// reference: subject_type keyword; electrophysiology
def model BCPS_2020 as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt_per_millimole as
    unit volt {pref: milli};
    unit millimolar {expo: -1};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_millimolar_per_millisecond as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond_per_millimolar as
    unit millisecond;
    unit millimolar {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit micrometre_3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit metre_3 as
    unit metre {expo: 3};
  enddef;
  def unit per_micrometre_3 as
    unit metre {expo: -3, pref: micro};
  enddef;
  def unit coulomb_per_metre_3 as
    unit metre {expo: -3};
    unit coulomb;
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit centimeter as
    unit metre {pref: centi};
  enddef;
  def unit centimeter_squared as
    unit centimeter {expo: 2};
  enddef;
  def unit microliter_per_centimeter_cubed as
    unit microliter;
    unit centimeter {expo: -3};
  enddef;
  def unit microF_per_centimeter_squared as
    unit microF;
    unit centimeter_squared {expo: -1};
  enddef;
  def unit microliter as
    unit liter {pref: micro};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit coulomb_per_mole_millivolt as
    unit coulomb;
    unit mole {expo: -1};
    unit millivolt {expo: -1};
  enddef;
  // //////////////

  def comp environment as
    var time: millisecond {pub: out};
    var celltype: dimensionless {init: 0, pub: out};
  enddef;

  def comp extracellular as
    var nao: millimolar {init: 144, pub: out};
    var cao: millimolar {init: 2.7, pub: out};
    var ko: millimolar {init: 5.4, pub: out};
  enddef;

  def comp physical_constants as
    var R: joule_per_kilomole_kelvin {init: 8314.0, pub: out};
    var T: kelvin {init: 310.0, pub: out};
    var F: coulomb_per_mole {init: 96485.0, pub: out};
    var zna: dimensionless {init: 1.0, pub: out};
    var zca: dimensionless {init: 2.0, pub: out};
    var zk: dimensionless {init: 1.0, pub: out};
  enddef;

  def comp cell_geometry as
    var L: centimeter {init: 0.01};
    var rad: centimeter {init: 0.0011};
    var vcell: microliter {pub: out};
    var Ageo: centimeter_squared {pub: out};
    var Acap: centimeter_squared {pub: out};
    var vmyo: microliter {pub: out};
    var vnsr: microliter {pub: out};
    var vjsr: microliter {pub: out};
    var vss: microliter {pub: out};
    var vsr: microliter {pub: out};
    vcell = 1000{microliter_per_centimeter_cubed}*3.1416{dimensionless}*rad*rad*L;
    Ageo = 2{dimensionless}*3.1416{dimensionless}*rad*rad+2{dimensionless}*3.1416{dimensionless}*rad*L;
    Acap = 2{dimensionless}*Ageo;
    vmyo = 0.68{dimensionless}*vcell;
    vnsr = 0.0552{dimensionless}*vcell;
    vjsr = 0.0048{dimensionless}*vcell;
    vss = 0.02{dimensionless}*vcell;
    vsr = 0.95{dimensionless}*(vnsr+vjsr);
  enddef;

  def comp membrane as
    var v: millivolt {init: -87, pub: out};
    var time: millisecond {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var vffrt: coulomb_per_mole {pub: out};
    var vfrt: dimensionless {pub: out};
    var INa: microA_per_microF {pub: in};
    var INaL: microA_per_microF {pub: in};
    var Ito: microA_per_microF {pub: in};
    var ICaL: microA_per_microF {pub: in};
    var ICaNa: microA_per_microF {pub: in};
    var ICaK: microA_per_microF {pub: in};
    var IKr: microA_per_microF {pub: in};
    var IKs: microA_per_microF {pub: in};
    var IK1: microA_per_microF {pub: in};
    var INaCa_i: microA_per_microF {pub: in};
    var INaCa_ss: microA_per_microF {pub: in};
    var INaK: microA_per_microF {pub: in};
    var INab: microA_per_microF {pub: in};
    var IKb: microA_per_microF {pub: in};
    var IpCa: microA_per_microF {pub: in};
    var ICab: microA_per_microF {pub: in};
    var pstim: dimensionless {init: 3};
    var Istim: microA_per_microF {pub: out};
    var i_Stim_Start: millisecond {init: 0};
    var i_Stim_End: millisecond {init: 999000};
    var i_Stim_Amplitude: microA_per_microF {init: -53};
    var i_Stim_Period: millisecond {init: 1000};
    var i_Stim_PulseDuration: millisecond {init: 1};
    Istim = sel
      case (time >= i_Stim_Start) and (time <= i_Stim_End) and (time-i_Stim_Start-floor((time-i_Stim_Start)/i_Stim_Period)*i_Stim_Period <= i_Stim_PulseDuration):
        i_Stim_Amplitude;
      otherwise:
        0.0{microA_per_microF};
    endsel;
    vffrt = v*F*F/(R*T);
    vfrt = v*F/(R*T);
    ode(v, time) = -(INa+INaL+Ito+ICaL+ICaNa+ICaK+IKr+IKs+IK1+INaCa_i+INaCa_ss+INaK+INab+IKb+IpCa+ICab+Istim);
  enddef;

  def comp CaMK as
    var KmCaMK: millimolar {init: 0.15, pub: out};
    var aCaMK: per_millimolar_per_millisecond {init: 0.05};
    var bCaMK: per_millisecond {init: 0.00068};
    var CaMKo: dimensionless {init: 0.05};
    var KmCaM: millimolar {init: 0.0015};
    var CaMKb: millimolar {pub: out};
    var CaMKa: millimolar {pub: out};
    var CaMKt: millimolar {init: 0};
    var cass: millimolar {pub: in};
    var time: millisecond {pub: in};
    CaMKb = CaMKo*(1.0{millimolar}-CaMKt)/(1.0{dimensionless}+KmCaM/cass);
    CaMKa = CaMKb+CaMKt;
    ode(CaMKt, time) = aCaMK*CaMKb*(CaMKb+CaMKt)-bCaMK*CaMKt;
  enddef;

  def comp intracellular_ions as
    var cmdnmax_b: millimolar {init: 0.05};
    var cmdnmax: millimolar;
    var kmcmdn: millimolar {init: 0.00238};
    var trpnmax: millimolar {init: 0.07};
    var kmtrpn: millimolar {init: 0.0005};
    var BSRmax: millimolar {init: 0.047};
    var KmBSR: millimolar {init: 0.00087};
    var BSLmax: millimolar {init: 1.124};
    var KmBSL: millimolar {init: 0.0087};
    var csqnmax: millimolar {init: 1.0};
    var kmcsqn: millimolar {init: 0.8};
    var nai: millimolar {init: 7, pub: out};
    var nass: millimolar {init: 7, pub: out};
    var ki: millimolar {init: 145, pub: out};
    var kss: millimolar {init: 145, pub: out};
    var cass: millimolar {init: 1.0e-04, pub: out};
    var cansr: millimolar {init: 1.50490908825974, pub: out};
    var cajsr: millimolar {init: 0.821364973867864, pub: out};
    var casr: millimolar {init: 1.2, pub: out};
    var cai: millimolar {init: 1.0e-04, pub: out};
    var celltype: dimensionless {pub: in};
    var Acap: centimeter_squared {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var INa: microA_per_microF {pub: in};
    var INaL: microA_per_microF {pub: in};
    var INaCa_i: microA_per_microF {pub: in};
    var INaCa_ss: microA_per_microF {pub: in};
    var ICaNa: microA_per_microF {pub: in};
    var INaK: microA_per_microF {pub: in};
    var INab: microA_per_microF {pub: in};
    var IK1: microA_per_microF {pub: in};
    var IKb: microA_per_microF {pub: in};
    var IKr: microA_per_microF {pub: in};
    var IKs: microA_per_microF {pub: in};
    var Istim: microA_per_microF {pub: in};
    var Ito: microA_per_microF {pub: in};
    var ICab: microA_per_microF {pub: in};
    var IpCa: microA_per_microF {pub: in};
    var ICaL: microA_per_microF {pub: in};
    var JdiffNa: millimolar_per_millisecond {pub: in};
    var Jdiff: millimolar_per_millisecond {pub: in};
    var Jup: millimolar_per_millisecond {pub: in};
    var JdiffK: millimolar_per_millisecond {pub: in};
    var Jrel: millimolar_per_millisecond {pub: in};
    var Jtr: millimolar_per_millisecond {pub: in};
    var Jleak: millimolar_per_millisecond {pub: in};
    var ICaK: microA_per_microF {pub: in};
    var time: millisecond {pub: in};
    var vmyo: microliter {pub: in};
    var vnsr: microliter {pub: in};
    var vss: microliter {pub: in};
    var vsr: microliter {pub: in};
    var vjsr: microliter {pub: in};
    var Bcai: dimensionless;
    var Bcasr: dimensionless;
    var Bcass: dimensionless;
    var cm: microF_per_centimeter_squared {init: 1, pub: out};
    cmdnmax = sel
      case celltype == 1{dimensionless}:
        cmdnmax_b*1.2{dimensionless};
      otherwise:
        cmdnmax_b;
    endsel;
    ode(nai, time) = -(INa+INaL+3{dimensionless}*INaCa_i+3{dimensionless}*INaK+INab)*Acap*cm/(F*vmyo)+JdiffNa*vss/vmyo;
    ode(nass, time) = -(ICaNa+3{dimensionless}*INaCa_ss)*cm*Acap/(F*vss)-JdiffNa;
    ode(ki, time) = -(Ito+IKr+IKs+IK1+IKb+Istim-2{dimensionless}*INaK)*cm*Acap/(F*vmyo)+JdiffK*vss/vmyo;
    ode(kss, time) = -ICaK*cm*Acap/(F*vss)-JdiffK;
    Bcai = 1{dimensionless}/(1{dimensionless}+cmdnmax*kmcmdn/sqr(kmcmdn+cai)+trpnmax*kmtrpn/sqr(kmtrpn+cai));
    ode(cai, time) = Bcai*(-(IpCa+ICab-2{dimensionless}*INaCa_i)*Acap/(2{dimensionless}*F*vmyo)-Jup*vsr/vmyo+Jleak*vsr/vmyo+Jdiff*vss/vmyo);
    Bcass = 1{dimensionless}/(1{dimensionless}+BSRmax*KmBSR/sqr(KmBSR+cass)+BSLmax*KmBSL/sqr(KmBSL+cass));
    ode(cass, time) = Bcass*(-(ICaL-2{dimensionless}*INaCa_ss)*Acap/(2{dimensionless}*F*vss)+Jrel*vsr/vss-Jdiff);
    // ode(cansr, time) = Jup-Jtr*vjsr/vnsr;
    Bcasr = 1{dimensionless}/(1{dimensionless}+csqnmax*kmcsqn/sqr(kmcsqn+casr));
    ode(casr, time) = Bcasr*(Jup-Jleak-Jrel);
  enddef;

  def comp reversal_potentials as
    var PKNa: dimensionless {init: 0.01833};
    var ENa: millivolt {pub: out};
    var EK: millivolt {pub: out};
    var EKs: millivolt {pub: out};
    var EKshift: millivolt {init: 8, pub: out};
    var nao: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var nai: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    ENa = R*T/F*ln(nao/nai);
    EK = R*T/F*ln(ko/ki);
    EKs = R*T/F*ln((ko+PKNa*nao)/(ki+PKNa*nai));
  enddef;

  def comp INa as
    var btj: dimensionless {init: 1};
    var bGNa: dimensionless {init: 0.27};
    var mss: dimensionless;
    var tm: millisecond {pub: out};
    var mssV1: millivolt {init: 39.57};
    var mssV2: millivolt {init: 9.871};
    var mtV1: millivolt {init: 11.64};
    var mtV2: millivolt {init: 34.77};
    var mtD1: dimensionless {init: 6.765};
    var mtD2: dimensionless {init: 8.552};
    var mtV3: millivolt {init: 77.42};
    var mtV4: millivolt {init: 5.955};
    var m: dimensionless {init: 0};
    var time: millisecond {pub: in};
    var hss: dimensionless;
    var thf: millisecond;
    var ths: millisecond;
    var hssV1: millivolt {init: 78.5};
    var hssV2: millivolt {init: 6.22};
    var Ahs: dimensionless;
    var Ahf: dimensionless {init: 0.99};
    var hf: dimensionless {init: 1};
    var hs: dimensionless {init: 1};
    var h: dimensionless;
    // 75/1.045809e+00 = 71.71481599412512
    // 75/1.0 = 75
    var GNa: milliS_per_microF {init: 75};
    var jss: dimensionless;
    var tj: millisecond;
    var j: dimensionless {init: 1};
    var hssp: dimensionless;
    var thsp: millisecond;
    var hsp: dimensionless {init: 1};
    var hp: dimensionless;
    var tjp: millisecond;
    var jp: dimensionless {init: 1};
    var fINap: dimensionless;
    var INa: microA_per_microF {pub: out};
    var v: millivolt {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var ENa: millivolt {pub: in};
    mss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+mssV1)/mssV2));
    tm = 1{millisecond}/(mtD1*exp((v+mtV1)/mtV2)+mtD2*exp(-(v+mtV3)/mtV4));
    ode(m, time) = (mss-m)/tm;
    hss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+hssV1)/hssV2));
    thf = 1.0{millisecond}/(3.6860e-6{dimensionless}*exp(-(v+3.8875{millivolt})/7.8579{millivolt})+16{dimensionless}*exp((v-0.4963{millivolt})/9.1843{millivolt}))+0.075{dimensionless};
    ths = 1.0{millisecond}/(0.009794{dimensionless}*exp(-(v+17.95{millivolt})/28.05{millivolt})+0.3343{dimensionless}*exp((v+5.73{millivolt})/56.66{millivolt}));
    Ahs = 1.0{dimensionless}-Ahf;
    ode(hf, time) = (hss-hf)/thf;
    ode(hs, time) = (hss-hs)/ths;
    h = Ahf*hf+Ahs*hs;
    jss = hss;
    // tj = 2.038{millisecond}+1{millisecond}/(0.02136{dimensionless}*exp(-(v+100.6{millivolt}-shift_INa_inact)/8.281{millivolt})+0.3052{dimensionless}*exp((v+0.9941{millivolt}-shift_INa_inact)/38.45{millivolt}));
    tj = (4.8590{millisecond}+1.0{millisecond}/(0.8628{dimensionless}*exp(-(v+116.7258{millivolt})/7.6005{millivolt})+1.1096{dimensionless}*exp((v+6.2719{millivolt})/9.0358{millivolt})))*btj;
    ode(j, time) = (jss-j)/tj;
    // hssp = 1{dimensionless}/(1{dimensionless}+exp((v+89.1{millivolt}-shift_INa_inact)/6.086{millivolt}));
    hssp = 1{dimensionless}/(1{dimensionless}+exp((v+84.7{millivolt})/6.220{millivolt}));
    thsp = 3{dimensionless}*ths;
    ode(hsp, time) = (hssp-hsp)/thsp;
    hp = Ahf*hf+Ahs*hsp;
    tjp = 1.46{dimensionless}*tj;
    ode(jp, time) = (jss-jp)/tjp;
    fINap = 1.0{dimensionless}/(1.0{dimensionless}+KmCaMK/CaMKa);
    INa = GNa*bGNa*(v-ENa)*pow(m, 3{dimensionless})*((1{dimensionless}-fINap)*h*j+fINap*hp*jp);
  enddef;

  def comp INaL as
    var bGnal: dimensionless {init: 2.8};
    // added
    var bthL: dimensionless {init: 1};
    // added
    var mLss: dimensionless;
    var tm: millisecond {pub: in};
    var tmL: millisecond;
    var mL: dimensionless {init: 0};
    // initial condition 16
    var thL: millisecond;
    var hLss: dimensionless;
    var v: millivolt {pub: in};
    var hL: dimensionless {init: 1};
    // initial condition 17
    var hLssp: dimensionless;
    var thLp: millisecond;
    var hLp: dimensionless {init: 1};
    // initial condition 18
    var GNaL_b: milliS_per_microF {init: 0.0075};
    var GNaL: milliS_per_microF;
    var fINaLp: dimensionless;
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var ENa: millivolt {pub: in};
    var INaL: microA_per_microF {pub: out};
    var celltype: dimensionless {pub: in};
    var time: millisecond {pub: in};
    mLss = 1{dimensionless}/(1{dimensionless}+exp(-(v+42.85{millivolt})/5.264{millivolt}));
    tmL = tm;
    ode(mL, time) = (mLss-mL)/tmL;
    hLss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+87.61{millivolt})/7.488{millivolt}));
    thL = 200.0{millisecond}*bthL;
    ode(hL, time) = (hLss-hL)/thL;
    hLssp = 1{dimensionless}/(1{dimensionless}+exp((v+93.81{millivolt})/7.488{millivolt}));
    thLp = 3.0{dimensionless}*thL;
    ode(hLp, time) = (hLssp-hLp)/thLp;
    GNaL = sel
      case celltype == 1{dimensionless}:
        GNaL_b*bGnal*0.7{dimensionless};
      otherwise:
        GNaL_b*bGnal;
    endsel;
    fINaLp = 1.0{dimensionless}/(1.0{dimensionless}+KmCaMK/CaMKa);
    INaL = GNaL*(v-ENa)*mL*((1.0{dimensionless}-fINaLp)*hL+fINaLp*hLp);
  enddef;

  def comp Ito as
    // 0.02/1.706770e+00 = 0.011718040509266042
    // 0.02/1.0 = 0.02
    var bGto: dimensionless {init: 1};
    var Gto_b: milliS_per_microF {init: 0.02};
    var ass: dimensionless;
    var ta: millisecond;
    var a: dimensionless {init: 0};
    var time: millisecond {pub: in};
    var v: millivolt {pub: in};
    var EK: millivolt {pub: in};
    var iss: dimensionless;
    var delta_epi: dimensionless;
    var tiF_b: millisecond;
    var tiS_b: millisecond;
    var tiF: millisecond;
    var tiS: millisecond;
    var AiF: dimensionless;
    var AiS: dimensionless;
    var iF: dimensionless {init: 1};
    var iS: dimensionless {init: 1};
    var i: dimensionless;
    var assp: dimensionless;
    var ap: dimensionless {init: 0};
    var dti_develop: dimensionless;
    var dti_recover: dimensionless;
    var tiFp: millisecond;
    var tiSp: millisecond;
    var iFp: dimensionless {init: 1};
    var iSp: dimensionless {init: 1};
    var ip: dimensionless;
    var Gto: milliS_per_microF;
    var fItop: dimensionless;
    var Ito: microA_per_microF {pub: out};
    var celltype: dimensionless {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var EKshift: millivolt {init: 8};
    ass = 1{dimensionless}/(1{dimensionless}+exp(-(v+EKshift-14.34{millivolt})/14.82{millivolt}));
    ta = 1.0515{millisecond}/(1.0{dimensionless}/(1.2089{dimensionless}*(1.0{dimensionless}+exp(-(v+EKshift-18.4099{millivolt})/29.3814{millivolt})))+3.5{dimensionless}/(1.0{dimensionless}+exp((v+EKshift+100.0{millivolt})/29.3814{millivolt})));
    ode(a, time) = (ass-a)/ta;
    iss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+EKshift+43.94{millivolt})/5.711{millivolt}));
    delta_epi = sel
      case celltype == 1{dimensionless}:
        1.0{dimensionless}-0.95{dimensionless}/(1{dimensionless}+exp((v+EKshift+70{millivolt})/5{millivolt}));
      otherwise:
        1.0{dimensionless};
    endsel;
    tiF_b = 4.562{millisecond}+1.0{millisecond}/(0.3933{dimensionless}*exp(-(v+EKshift+100.0{millivolt})/100.0{millivolt})+0.08004{dimensionless}*exp((v+EKshift+50.0{millivolt})/16.59{millivolt}));
    // modified
    tiS_b = 23.62{millisecond}+1{millisecond}/(0.001416{dimensionless}*exp(-(v+EKshift+96.52{millivolt})/59.05{millivolt})+1.78e-8{dimensionless}*exp((v+EKshift+114.1{millivolt})/8.079{millivolt}));
    // modified
    tiF = tiF_b*delta_epi;
    tiS = tiS_b*delta_epi;
    AiF = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+EKshift-213.6{millivolt})/151.2{millivolt}));
    AiS = 1.0{dimensionless}-AiF;
    ode(iF, time) = (iss-iF)/tiF;
    ode(iS, time) = (iss-iS)/tiS;
    i = AiF*iF+AiS*iS;
    assp = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+EKshift-24.34{millivolt})/14.82{millivolt}));
    // modified
    ode(ap, time) = (assp-ap)/ta;
    dti_develop = 1.354{dimensionless}+1e-4{dimensionless}/(exp((v+EKshift-167.4{millivolt})/15.89{millivolt})+exp(-(v+EKshift-12.23{millivolt})/0.2154{millivolt}));
    // modified
    dti_recover = 1.0{dimensionless}-0.5{dimensionless}/(1{dimensionless}+exp((v+EKshift+70.0{millivolt})/20.0{millivolt}));
    tiFp = dti_develop*dti_recover*tiF;
    tiSp = dti_develop*dti_recover*tiS;
    ode(iFp, time) = (iss-iFp)/tiFp;
    ode(iSp, time) = (iss-iSp)/tiSp;
    ip = AiF*iFp+AiS*iSp;
    Gto = sel
      case celltype == 1{dimensionless}:
        bGto*Gto_b*4{dimensionless};
      case celltype == 2{dimensionless}:
        bGto*Gto_b*4{dimensionless};
      otherwise:
        Gto_b*bGto;
    endsel;
    fItop = 1.0{dimensionless}/(1.0{dimensionless}+KmCaMK/CaMKa);
    Ito = Gto*(v-EK)*((1.0{dimensionless}-fItop)*a*i+fItop*ap*ip);
  enddef;

  def comp ICaL as
    var ICaL: microA_per_microF {pub: out};
    var ICaNa: microA_per_microF {pub: out};
    var ICaK: microA_per_microF {pub: out};
    var celltype: dimensionless {pub: in};
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var cass: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    var nao: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var kss: millimolar {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var r_down: dimensionless;
    var r_up: dimensionless;
    var undo_CDI: dimensionless {init: 0};
    var nca: dimensionless {init: 0};
    var jncass: dimensionless;
    var tjnca: millisecond {init: 1};
    var jnca: dimensionless {init: 1};
    var km2n: per_millisecond;
    var Kmn: millimolar {init: 0.05};
    var anca: dimensionless;
    var k2n: per_millisecond {init: 1000};
    var kmn: millimolar {init: 0.05};
    var dss: dimensionless;
    var td: millisecond;
    var alpha: dimensionless;
    var beta: dimensionless;
    var jcass_new: dimensionless;
    var jcass_VD: dimensionless;
    var jcass_CD: dimensionless;
    var jcass_VDp: dimensionless;
    var jcass_CDp: dimensionless;
    var tjca_new: dimensionless;
    var tjca_VD: dimensionless;
    var tjca_CD: dimensionless;
    var tjca_VDp: dimensionless;
    var tjca_CDp: dimensionless;
    var psi_VD: dimensionless;
    var psi_VDp: dimensionless;
    var psi_CD: dimensionless;
    var psi_CDp: dimensionless;
    var omega_VD: dimensionless;
    var omega_VDp: dimensionless;
    var omega_CD: dimensionless;
    var omega_CDp: dimensionless;
    var f1ss_0: dimensionless;
    var tf1_0: dimensionless;
    var ktaup: dimensionless;
    var gamma_VD: dimensionless;
    var delta_VD: dimensionless;
    var gamma_VDp: dimensionless;
    var delta_VDp: dimensionless;
    var kCDI: dimensionless {init: 9};
    var gamma_CD: dimensionless;
    var delta_CD: dimensionless;
    var gamma_CDp: dimensionless;
    var delta_CDp: dimensionless;
    var tf1_VD: dimensionless;
    var tf1_CD: dimensionless;
    var f1ss_VD: dimensionless;
    var f1ss_CD: dimensionless;
    var tf2_new: dimensionless;
    var tf2_VD: dimensionless;
    var tf2_CD: dimensionless;
    var tf2_VDp: dimensionless;
    var tf2_CDp: dimensionless;
    var theta_VD: dimensionless;
    var theta_CD: dimensionless;
    var theta_VDp: dimensionless;
    var theta_CDp: dimensionless;
    var eta_VD: dimensionless;
    var eta_VDp: dimensionless;
    var eta_CD: dimensionless;
    var eta_CDp: dimensionless;
    var tf2post_VD: dimensionless;
    var tf2post_CD: dimensionless;
    var f2ss_VD: dimensionless;
    var f2ss_CD: dimensionless;
    var PhiCaL: coulomb_per_metre_3;
    var PhiCaNa: coulomb_per_metre_3;
    var PhiCaK: coulomb_per_metre_3;
    var PCa: dimensionless;
    var PCap: dimensionless;
    var PCaNa: dimensionless;
    var PCaK: dimensionless;
    var PCaNap: dimensionless;
    var PCaKp: dimensionless;
    var PCa_b: dimensionless {init: 0.0001};
    var I1k: dimensionless {init: 0};
    var I2k: dimensionless {init: 0};
    var Ck: dimensionless {init: 1};
    var I1kp: dimensionless {init: 0};
    var I2kp: dimensionless {init: 0};
    var Ckp: dimensionless {init: 1};
    var I1Cak: dimensionless {init: 0};
    var I2Cak: dimensionless {init: 0};
    var CCak: dimensionless {init: 0};
    var I1Cakp: dimensionless {init: 0};
    var I2Cakp: dimensionless {init: 0};
    var CCakp: dimensionless {init: 0};
    var Ok: dimensionless {init: 0};
    var Okp: dimensionless {init: 0};
    var OCak: dimensionless;
    var OCakp: dimensionless;
    var ICaL_VD: dimensionless;
    var ICaL_VDp: dimensionless;
    var ICaL_CD: dimensionless;
    var ICaL_CDp: dimensionless;
    var ICaNa_VD: dimensionless;
    var ICaNa_VDp: dimensionless;
    var ICaNa_CD: dimensionless;
    var ICaNa_CDp: dimensionless;
    var ICaK_VD: dimensionless;
    var ICaK_VDp: dimensionless;
    var ICaK_CD: dimensionless;
    var ICaK_CDp: dimensionless;
    var ICaLnp: dimensionless;
    var ICaLp: dimensionless;
    var ICaLVD: dimensionless;
    var ICaLCD: dimensionless;
    var ICaNanp: dimensionless;
    var ICaNap: dimensionless;
    var ICaKnp: dimensionless;
    var ICaKp: dimensionless;
    var fICaLp: dimensionless;
    var bGCaL: dimensionless {init: 1};
    var gICaL: microF;
    fICaLp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    r_down = 1e-1{dimensionless}*(1{dimensionless}-undo_CDI);
    r_up = r_down*nca/(1{dimensionless}-nca)*(1{dimensionless}-undo_CDI);
    jncass = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+19.58{millivolt}+25{millivolt})/3.696{millivolt}));
    ode(jnca, time) = (jncass-jnca)/tjnca;
    km2n = jnca*150{per_millisecond};
    anca = (1{dimensionless}-nca)/pow(1{dimensionless}+Kmn/cass, 4{dimensionless});
    ode(nca, time) = anca*k2n-nca*km2n;
    dss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+3.940{millivolt})/4.230{millivolt}));
    td = 0.6{millisecond}+1{millisecond}/(exp(-0.05{per_millivolt}*(v+6{millivolt}))+exp(0.09{per_millivolt}*(v+14{millivolt})));
    alpha = dss/td;
    beta = (1{dimensionless}-dss)/td;
    // Recovery(jca)
    jcass_new = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+19.58{dimensionless})/3.696{dimensionless}));
    jcass_VD = jcass_new;
    jcass_CD = jcass_new;
    jcass_VDp = jcass_new;
    jcass_CDp = jcass_new;
    tjca_new = 35{dimensionless}+350{dimensionless}*exp(-sqr(v+20{millivolt})/(2{millivolt}*100{millivolt}));
    tjca_VD = tjca_new;
    tjca_CD = tjca_new;
    tjca_VDp = tjca_new;
    tjca_CDp = tjca_new;
    // Psi e omega rates
    psi_VD = jcass_VD/tjca_VD;
    psi_VDp = jcass_VDp/tjca_VDp;
    psi_CD = jcass_CD/tjca_CD;
    psi_CDp = jcass_CDp/tjca_CDp;
    omega_VD = (1{dimensionless}-jcass_VD)/tjca_VD;
    omega_VDp = (1{dimensionless}-jcass_VDp)/tjca_VDp;
    omega_CD = (1{dimensionless}-jcass_CD)/tjca_CD;
    omega_CDp = (1{dimensionless}-jcass_CDp)/tjca_CDp;
    // Fast inactivation (f1)
    f1ss_0 = 0.8{dimensionless}/(1.0{dimensionless}+exp((v+19.58{millivolt})/3.696{millivolt}))+0.2{dimensionless};
    tf1_0 = 1{dimensionless}*(70{dimensionless}+1.2{dimensionless}/(0.0045{dimensionless}*exp((v+20{millivolt})/(-50{millivolt}))+0.0045{dimensionless}*exp((v+30{millivolt})/10{millivolt})));
    ktaup = 2.5{dimensionless};
    gamma_VD = (1{dimensionless}-f1ss_0)/tf1_0;
    delta_VD = f1ss_0/tf1_0;
    gamma_VDp = gamma_VD/ktaup;
    delta_VDp = delta_VD/ktaup;
    gamma_CD = gamma_VD*kCDI;
    delta_CD = delta_VD*kCDI;
    gamma_CDp = gamma_VDp*kCDI;
    delta_CDp = delta_VDp*kCDI;
    tf1_VD = 1{dimensionless}/(gamma_VD+delta_VD);
    tf1_CD = 1{dimensionless}/(gamma_CD+delta_CD);
    f1ss_VD = gamma_VD/(gamma_VD+delta_VD);
    f1ss_CD = gamma_CD/(gamma_CD+delta_CD);
    // Slow inactivation (f2)
    tf2_new = 1{dimensionless}*(100{dimensionless}+0{dimensionless}/(0.0035{dimensionless}*exp((v+5{millivolt})/(-84{millivolt}))+0.0035{dimensionless}*exp((v+5{millivolt})/4{millivolt})));
    tf2_VD = tf2_new;
    tf2_CD = tf2_VD/kCDI;
    tf2_VDp = tf2_new*ktaup;
    tf2_CDp = tf2_VD/kCDI*ktaup;
    // Reversibility
    theta_VD = alpha*gamma_VD*psi_VD/tf2_VD/(alpha*gamma_VD*psi_VD+beta*delta_VD*omega_VD);
    theta_CD = alpha*gamma_CD*psi_CD/tf2_CD/(alpha*gamma_CD*psi_CD+beta*delta_CD*omega_CD);
    theta_VDp = alpha*gamma_VDp*psi_VDp/tf2_VDp/(alpha*gamma_VDp*psi_VDp+beta*delta_VDp*omega_VDp);
    theta_CDp = alpha*gamma_CDp*psi_CDp/tf2_CDp/(alpha*gamma_CDp*psi_CDp+beta*delta_CDp*omega_CDp);
    eta_VD = 1{dimensionless}/tf2_VD-theta_VD;
    eta_VDp = 1{dimensionless}/tf2_VDp-theta_VDp;
    eta_CD = 1{dimensionless}/tf2_CD-theta_CD;
    eta_CDp = 1{dimensionless}/tf2_CDp-theta_CDp;
    tf2post_VD = 1{dimensionless}/(eta_VD+theta_VD);
    tf2post_CD = 1{dimensionless}/(eta_CD+theta_CD);
    f2ss_VD = eta_VD/(eta_VD+theta_VD);
    f2ss_CD = eta_CD/(eta_CD+theta_CD);
    // Driving forces
    PhiCaL = 4.0{dimensionless}*vffrt*(1.2{dimensionless}*cass*exp(2{dimensionless}*vfrt)-0.341{dimensionless}*cao)/(exp(2.0{dimensionless}*vfrt)-1.0{dimensionless});
    PhiCaNa = 1.0{dimensionless}*vffrt*(0.75{dimensionless}*nass*exp(1.0{dimensionless}*vfrt)-0.75{dimensionless}*nao)/(exp(1.0{dimensionless}*vfrt)-1.0{dimensionless});
    PhiCaK = 1.0{dimensionless}*vffrt*(0.75{dimensionless}*kss*exp(1.0{dimensionless}*vfrt)-0.75{dimensionless}*ko)/(exp(1.0{dimensionless}*vfrt)-1.0{dimensionless});
    PCa = sel
      case celltype == 1{dimensionless}:
        PCa_b*0.9{dimensionless}*1.4{dimensionless};
      case celltype == 2{dimensionless}:
        PCa_b*0.9{dimensionless}*2.0{dimensionless};
      otherwise:
        PCa_b*0.9{dimensionless};
    endsel;
    PCap = 1.1{dimensionless}*PCa;
    PCaNa = 0.00125{dimensionless}*PCa;
    PCaK = 3.574e-4{dimensionless}*PCa;
    PCaNap = 0.00125{dimensionless}*PCap;
    PCaKp = 3.574e-4{dimensionless}*PCap;
    // Markov Model: VDI states
    OCak = 1{dimensionless}-CCak-I1Cak-I2Cak-Ck-I1k-I2k-Ok;
    OCakp = 1{dimensionless}-CCakp-I1Cakp-I2Cakp-Ckp-I1kp-I2kp-Okp;
    ode(Ok, time) = alpha*Ck+delta_VD*I1k-(beta+gamma_VD)*Ok-r_up*Ok+r_down*OCak;
    ode(I2k, time) = eta_VD*I1k+omega_VD*Ck-(theta_VD+psi_VD)*I2k-r_up*I2k+r_down*I2Cak;
    ode(I1k, time) = theta_VD*I2k+gamma_VD*Ok-(eta_VD+delta_VD)*I1k-r_up*I1k+r_down*I1Cak;
    ode(Ck, time) = beta*Ok+psi_VD*I2k-(omega_VD+alpha)*Ck-r_up*Ck+r_down*CCak;
    ode(Okp, time) = alpha*Ckp+delta_VDp*I1kp-(beta+gamma_VDp)*Okp-r_up*Okp+r_down*OCakp;
    ode(I2kp, time) = eta_VDp*I1kp+omega_VDp*Ckp-(theta_VDp+psi_VDp)*I2kp-r_up*I2kp+r_down*I2Cakp;
    ode(I1kp, time) = theta_VDp*I2kp+gamma_VDp*Okp-(eta_VDp+delta_VDp)*I1kp-r_up*I1kp+r_down*I1Cakp;
    ode(Ckp, time) = beta*Okp+psi_VDp*I2kp-(omega_VDp+alpha)*Ckp-r_up*Ckp+r_down*CCakp;
    // Markov Model: CDI states
    ode(I2Cak, time) = eta_CD*I1Cak+omega_CD*CCak-(theta_CD+psi_CD)*I2Cak+r_up*I2k-r_down*I2Cak;
    ode(I1Cak, time) = theta_CD*I2Cak+gamma_CD*OCak-(eta_CD+delta_CD)*I1Cak+r_up*I1k-r_down*I1Cak;
    ode(CCak, time) = beta*OCak+psi_CD*I2Cak-(omega_CD+alpha)*CCak+r_up*Ck-r_down*CCak;
    ode(I2Cakp, time) = eta_CDp*I1Cakp+omega_CDp*CCakp-(theta_CDp+psi_CDp)*I2Cakp+r_up*I2kp-r_down*I2Cakp;
    ode(I1Cakp, time) = theta_CDp*I2Cakp+gamma_CDp*OCakp-(eta_CDp+delta_CDp)*I1Cakp+r_up*I1kp-r_down*I1Cakp;
    ode(CCakp, time) = beta*OCakp+psi_CDp*I2Cakp-(omega_CDp+alpha)*CCakp+r_up*Ckp-r_down*CCakp;
    // ICaL ICaNa ICaK currents
    ICaL_VD = PCa*PhiCaL*Ok;
    ICaL_VDp = PCap*PhiCaL*Okp;
    ICaL_CD = PCa*PhiCaL*OCak;
    ICaL_CDp = PCap*PhiCaL*OCakp;
    ICaNa_VD = PCaNa*PhiCaNa*Ok;
    ICaNa_VDp = PCaNap*PhiCaNa*Okp;
    ICaNa_CD = PCaNa*PhiCaNa*OCak;
    ICaNa_CDp = PCaNap*PhiCaNa*OCakp;
    ICaK_VD = PCaK*PhiCaK*Ok;
    ICaK_VDp = PCaKp*PhiCaK*Okp;
    ICaK_CD = PCaK*PhiCaK*OCak;
    ICaK_CDp = PCaKp*PhiCaK*OCakp;
    // ICaL VD vs CD & ICaL p vs np
    ICaLnp = ICaL_VD+ICaL_CD;
    ICaLp = ICaL_VDp+ICaL_CDp;
    ICaLVD = ICaL_VD*(1{dimensionless}-fICaLp)+ICaL_VDp*fICaLp;
    ICaLCD = ICaL_CD*(1{dimensionless}-fICaLp)+ICaL_CDp*fICaLp;
    ICaNanp = ICaNa_VD+ICaNa_CD;
    ICaNap = ICaNa_VDp+ICaNa_CDp;
    ICaKnp = ICaK_VD+ICaK_CD;
    ICaKp = ICaK_VDp+ICaK_CDp;
    ICaL = (ICaLp*fICaLp+ICaLnp*(1{dimensionless}-fICaLp))*bGCaL;
    ICaNa = (ICaNap*fICaLp+ICaNanp*(1{dimensionless}-fICaLp))*bGCaL;
    ICaK = (ICaKp*fICaLp+ICaKnp*(1{dimensionless}-fICaLp))*bGCaL;
    // ICaL conductance*
    gICaL = ICaL/PhiCaL;
    // ICaL=0{microA_per_microF};
    // ICaNa=0{microA_per_microF};
    // ICaK=0{microA_per_microF};
  enddef;

  def comp IKr as
    var GKr_b: milliS_per_microF {init: 0.046};
    // New state variables (ODEs)
    var IC1: dimensionless {init: 0.999637};
    // y[39]
    var IC2: dimensionless {init: 6.83208e-05};
    // y[40];
    var C1: dimensionless {init: 1.80145e-08};
    // y[41];
    var C2: dimensionless {init: 8.26619e-05};
    // y[42];
    var O: dimensionless {init: 0.00015551};
    // y[43];
    var IO: dimensionless {init: 5.67623e-05};
    // y[44];
    var IObound: dimensionless {init: 0};
    // y[45];
    var Obound: dimensionless {init: 0};
    // y[46];
    var Cbound: dimensionless {init: 0};
    // y[47];
    var D: dimensionless {init: 0};
    // y[48];
    // A lot of constants/variables
    var GKr: milliS_per_microF;
    var GKr_total: milliS_per_microF;
    var A1: per_millisecond {init: 0.0264};
    var B1: per_millivolt {init: 4.631e-05};
    var q1: dimensionless {init: 4.843};
    var A2: per_millisecond {init: 4.986e-06};
    var B2: per_millivolt {init: -0.004226};
    var q2: dimensionless {init: 4.23};
    var A3: per_millisecond {init: 0.001214};
    var B3: per_millivolt {init: 0.008516};
    var q3: dimensionless {init: 4.962};
    var A4: per_millisecond {init: 1.854e-05};
    var B4: per_millivolt {init: -0.04641};
    var q4: dimensionless {init: 3.769};
    var A11: per_millisecond {init: 0.0007868};
    var B11: per_millivolt {init: 1.535e-08};
    var q11: dimensionless {init: 4.942};
    var A21: per_millisecond {init: 5.455e-06};
    var B21: per_millivolt {init: -0.1688};
    var q21: dimensionless {init: 4.156};
    var A31: per_millisecond {init: 0.005509};
    var B31: per_millivolt {init: 7.771e-09};
    var q31: dimensionless {init: 4.22};
    var A41: per_millisecond {init: 0.001416};
    var B41: per_millivolt {init: -0.02877};
    var q41: dimensionless {init: 1.459};
    var A51: per_millisecond {init: 0.4492};
    var B51: per_millivolt {init: 0.008595};
    var q51: dimensionless {init: 5.0};
    var A52: per_millisecond {init: 0.3181};
    var B52: per_millivolt {init: 3.613e-08};
    var q52: dimensionless {init: 4.663};
    var A53: per_millisecond {init: 0.149};
    var B53: per_millivolt {init: 0.004668};
    var q53: dimensionless {init: 2.412};
    var A61: per_millisecond {init: 0.01241};
    var B61: per_millivolt {init: 0.1725};
    var q61: dimensionless {init: 5.568};
    var A62: per_millisecond {init: 0.3226};
    var B62: per_millivolt {init: -0.0006575};
    var q62: dimensionless {init: 5.0};
    var A63: per_millisecond {init: 0.008978};
    var B63: per_millivolt {init: -0.02215};
    var q63: dimensionless {init: 5.682};
    var Kmax: dimensionless {init: 0};
    var Ku: per_millisecond {init: 0};
    var n: dimensionless {init: 1.0};
    var halfmax: dimensionless {init: 1};
    var Kt: per_millisecond {init: 3.5e-5};
    var Vhalf: millivolt {init: 1.0};
    var Temp: kelvin {init: 310.0};
    var bGKr: dimensionless {init: 1.2};
    // Those going in and out
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var EK: millivolt {pub: in};
    var ko: millimolar {pub: in};
    var IKr: microA_per_microF {pub: out};
    // Main ODEs!
    ode(IC1, time) = -(A11*exp(B11*v)*IC1*exp((Temp-293{kelvin})*ln(q11)/10{kelvin})-A21*exp(B21*v)*IC2*exp((Temp-293{kelvin})*ln(q21)/10{kelvin}))+A51*exp(B51*v)*C1*exp((Temp-293{kelvin})*ln(q51)/10{kelvin})-A61*exp(B61*v)*IC1*exp((Temp-293{kelvin})*ln(q61)/10{kelvin});
    ode(IC2, time) = A11*exp(B11*v)*IC1*exp((Temp-293{kelvin})*ln(q11)/10{kelvin})-A21*exp(B21*v)*IC2*exp((Temp-293{kelvin})*ln(q21)/10{kelvin})-(A3*exp(B3*v)*IC2*exp((Temp-293{kelvin})*ln(q3)/10{kelvin})-A4*exp(B4*v)*IO*exp((Temp-293{kelvin})*ln(q4)/10{kelvin}))+A52*exp(B52*v)*C2*exp((Temp-293{kelvin})*ln(q52)/10{kelvin})-A62*exp(B62*v)*IC2*exp((Temp-293{kelvin})*ln(q62)/10{kelvin});
    ode(C1, time) = -(A1*exp(B1*v)*C1*exp((Temp-293{kelvin})*ln(q1)/10{kelvin})-A2*exp(B2*v)*C2*exp((Temp-293{kelvin})*ln(q2)/10{kelvin}))-(A51*exp(B51*v)*C1*exp((Temp-293{kelvin})*ln(q51)/10{kelvin})-A61*exp(B61*v)*IC1*exp((Temp-293{kelvin})*ln(q61)/10{kelvin}));
    ode(C2, time) = A1*exp(B1*v)*C1*exp((Temp-293{kelvin})*ln(q1)/10{kelvin})-A2*exp(B2*v)*C2*exp((Temp-293{kelvin})*ln(q2)/10{kelvin})-(A31*exp(B31*v)*C2*exp((Temp-293{kelvin})*ln(q31)/10{kelvin})-A41*exp(B41*v)*O*exp((Temp-293{kelvin})*ln(q41)/10{kelvin}))-(A52*exp(B52*v)*C2*exp((Temp-293{kelvin})*ln(q52)/10{kelvin})-A62*exp(B62*v)*IC2*exp((Temp-293{kelvin})*ln(q62)/10{kelvin}));
    ode(O, time) = A31*exp(B31*v)*C2*exp((Temp-293{kelvin})*ln(q31)/10{kelvin})-A41*exp(B41*v)*O*exp((Temp-293{kelvin})*ln(q41)/10{kelvin})-(A53*exp(B53*v)*O*exp((Temp-293{kelvin})*ln(q53)/10{kelvin})-A63*exp(B63*v)*IO*exp((Temp-293{kelvin})*ln(q63)/10{kelvin}))-(Kmax*Ku*exp(n*ln(D))/(exp(n*ln(D))+halfmax)*O-Ku*Obound);
    ode(IO, time) = A3*exp(B3*v)*IC2*exp((Temp-293{kelvin})*ln(q3)/10{kelvin})-A4*exp(B4*v)*IO*exp((Temp-293{kelvin})*ln(q4)/10{kelvin})+A53*exp(B53*v)*O*exp((Temp-293{kelvin})*ln(q53)/10{kelvin})-A63*exp(B63*v)*IO*exp((Temp-293{kelvin})*ln(q63)/10{kelvin})-(Kmax*Ku*exp(n*ln(D))/(exp(n*ln(D))+halfmax)*IO-Ku*A53*exp(B53*v)*exp((Temp-293{kelvin})*ln(q53)/10{kelvin})/(A63*exp(B63*v)*exp((Temp-293{kelvin})*ln(q63)/10{kelvin}))*IObound);
    ode(IObound, time) = Kmax*Ku*exp(n*ln(D))/(exp(n*ln(D))+halfmax)*IO-Ku*A53*exp(B53*v)*exp((Temp-293{kelvin})*ln(q53)/10{kelvin})/(A63*exp(B63*v)*exp((Temp-293{kelvin})*ln(q63)/10{dimensionless}))*IObound+Kt/(1{dimensionless}+exp(-(v-Vhalf)/6.789{millivolt}))*Cbound-Kt*IObound;
    ode(Obound, time) = Kmax*Ku*exp(n*ln(D))/(exp(n*ln(D))+halfmax)*O-Ku*Obound+Kt/(1{dimensionless}+exp(-(v-Vhalf)/6.789{millivolt}))*Cbound-Kt*Obound;
    ode(Cbound, time) = -(Kt/(1{dimensionless}+exp(-(v-Vhalf)/6.789{millivolt}))*Cbound-Kt*Obound)-(Kt/(1{dimensionless}+exp(-(v-Vhalf)/6.789{millivolt}))*Cbound-Kt*IObound);
    ode(D, time) = 0{dimensionless};
    GKr = sel
      case celltype == 1{dimensionless}:
        GKr_b*bGKr*1.1{dimensionless};
      case celltype == 2{dimensionless}:
        GKr_b*bGKr*0.8{dimensionless};
      otherwise:
        GKr_b*bGKr;
    endsel;
    GKr_total = GKr*sqrt(ko/5.4{millimolar});
    IKr = GKr_total*O*(v-EK);
  enddef;

  def comp IKs as
    // 0.0034/5.347594e-01 = 0.006357999504076038
    // 0.0034/0.53475935828877 = 0.006358000000000001
    var GKs_b: milliS_per_microF {init: 0.0034};
    var bGKs: milliS_per_microF {init: 2};
    var EKshift: millivolt {init: 8};
    var GKs: milliS_per_microF;
    var xs1ss: dimensionless;
    var xs2ss: dimensionless;
    var txs1: millisecond;
    var txs1_max: millisecond {init: 817.3};
    var xs1: dimensionless {init: 0};
    var xs2: dimensionless {init: 0};
    var KsCa: dimensionless;
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var EKs: millivolt {pub: in};
    var IKs: microA_per_microF {pub: out};
    var txs2: millisecond;
    var cai: millimolar {pub: in};
    xs1ss = 1{dimensionless}/(1{dimensionless}+exp(-(v+11.6{millivolt}+EKshift)/8.932{millivolt}));
    txs1 = 817.3{millisecond}+1{millisecond}/(2.326e-4{dimensionless}*exp((v+48.28{millivolt}+EKshift)/17.8{millivolt})+0.001292{dimensionless}*exp(-(v+210{millivolt}+EKshift)/230.0{millivolt}));
    ode(xs1, time) = (xs1ss-xs1)/txs1;
    xs2ss = xs1ss;
    txs2 = 1{millisecond}/(0.01{dimensionless}*exp((v-50{millivolt}+EKshift)/20{millivolt})+0.0193{dimensionless}*exp(-(v+66.54{millivolt}+EKshift)/31.0{millivolt}));
    ode(xs2, time) = (xs2ss-xs2)/txs2;
    KsCa = 1.0{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8e-5{millimolar}/cai, 1.4{dimensionless}));
    GKs = sel
      case celltype == 1{dimensionless}:
        bGKs*GKs_b*1.4{dimensionless};
      otherwise:
        bGKs*GKs_b;
    endsel;
    IKs = GKs*KsCa*xs1*xs2*(v-EKs);
  enddef;

  def comp IK1 as
    var GK1: milliS_per_microF;
    // 0.1908/6.296422e-01 = 0.3030292442279123
    // 0.1908/0.588928150765607 = 0.3239783999999998
    var GK1_b: milliS_per_microF {init: 0.1908};
    var bGK1: dimensionless {init: 0.71};
    var EKshift: millivolt {init: 8};
    var xk1ss: dimensionless;
    var txk1: millisecond;
    var xk1: dimensionless {init: 1};
    var rk1: millisecond;
    var kslope_rk1: dimensionless {init: 1.09};
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var EK: millivolt {pub: in};
    var ko: millimolar {pub: in};
    var IK1: microA_per_microF {pub: out};
    xk1ss = 1{dimensionless}/(1{dimensionless}+exp(-(v+2.5538{millivolt_per_millimole}*ko+144.59{millivolt}+EKshift)/(1.5692{millivolt_per_millimole}*ko+3.8115{millivolt})));
    txk1 = 122.2{millisecond}/(exp(-(v+EKshift+127.2{millivolt})/20.36{millivolt})+exp((v+EKshift+236.8{millivolt})/69.33{millivolt}));
    ode(xk1, time) = (xk1ss-xk1)/txk1;
    rk1 = 1{dimensionless}/(1{dimensionless}+exp((v+105.8{millivolt}-2.6{millivolt_per_millimole}*ko+EKshift)/(kslope_rk1*9.493{millivolt})));
    GK1 = sel
      case celltype == 1{dimensionless}:
        bGK1*GK1_b*1.2{dimensionless};
      case celltype == 2{dimensionless}:
        bGK1*GK1_b*1.3{dimensionless};
      otherwise:
        bGK1*GK1_b;
    endsel;
    IK1 = GK1*sqrt(ko)*rk1*xk1*(v-EK);
  enddef;

  def comp INaCa_i as
    var kna1: per_millisecond {init: 15.0};
    var kna2: per_millisecond {init: 5.0};
    var kna3: per_millisecond {init: 88.12};
    var kasymm: dimensionless {init: 12.5};
    var wna: dimensionless {init: 60000};
    var wca: dimensionless {init: 60000};
    var wnaca: dimensionless {init: 5000};
    var kcaon: per_millisecond {init: 1500000};
    var kcaoff: per_millisecond {init: 5000};
    var qna: dimensionless {init: 0.5224};
    var qca: dimensionless {init: 0.1670};
    var hna: dimensionless;
    var hca: dimensionless;
    var zca: dimensionless {pub: in};
    var KmCaAct: millimolar {init: 150e-06};
    var zna: dimensionless {pub: in};
    var Gncx_b: milliS_per_microF {init: 0.0008};
    var bGncx: dimensionless {init: 2.4};
    var Gncx: milliS_per_microF;
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var v: millivolt {pub: in};
    var nai: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var cass: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var cai: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var h1_i: dimensionless;
    var h2_i: dimensionless;
    var h3_i: dimensionless;
    var h4_i: dimensionless;
    var h5_i: dimensionless;
    var h6_i: dimensionless;
    var h7_i: dimensionless;
    var h8_i: dimensionless;
    var h9_i: dimensionless;
    var h10_i: dimensionless;
    var h11_i: dimensionless;
    var h12_i: dimensionless;
    var k1_i: dimensionless;
    var k2_i: dimensionless;
    var k3p_i: dimensionless;
    var k3pp_i: dimensionless;
    var k3_i: dimensionless;
    var k4_i: dimensionless;
    var k4p_i: dimensionless;
    var k4pp_i: dimensionless;
    var k5_i: dimensionless;
    var k6_i: dimensionless;
    var k7_i: dimensionless;
    var k8_i: dimensionless;
    var x1_i: dimensionless;
    var x2_i: dimensionless;
    var x3_i: dimensionless;
    var x4_i: dimensionless;
    var E1_i: dimensionless;
    var E2_i: dimensionless;
    var E3_i: dimensionless;
    var E4_i: dimensionless;
    var allo_i: dimensionless;
    var JncxNa_i: millimolar_per_millisecond;
    var JncxCa_i: millimolar_per_millisecond;
    var celltype: dimensionless {pub: in};
    var INaCa_i: microA_per_microF {pub: out};
    var INaCa_ss: microA_per_microF {pub: out};
    var h1_ss: dimensionless;
    var h2_ss: dimensionless;
    var h3_ss: dimensionless;
    var h4_ss: dimensionless;
    var h5_ss: dimensionless;
    var h6_ss: dimensionless;
    var h7_ss: dimensionless;
    var h8_ss: dimensionless;
    var h9_ss: dimensionless;
    var h10_ss: dimensionless;
    var h11_ss: dimensionless;
    var h12_ss: dimensionless;
    var k1_ss: dimensionless;
    var k2_ss: dimensionless;
    var k3p_ss: dimensionless;
    var k3pp_ss: dimensionless;
    var k3_ss: dimensionless;
    var k4_ss: dimensionless;
    var k4p_ss: dimensionless;
    var k4pp_ss: dimensionless;
    var k5_ss: dimensionless;
    var k6_ss: dimensionless;
    var k7_ss: dimensionless;
    var k8_ss: dimensionless;
    var x1_ss: dimensionless;
    var x2_ss: dimensionless;
    var x3_ss: dimensionless;
    var x4_ss: dimensionless;
    var E1_ss: dimensionless;
    var E2_ss: dimensionless;
    var E3_ss: dimensionless;
    var E4_ss: dimensionless;
    var allo_ss: dimensionless;
    var JncxNa_ss: millimolar_per_millisecond;
    var JncxCa_ss: millimolar_per_millisecond;
    hca = exp(qca*v*F/(R*T));
    hna = exp(qna*v*F/(R*T));
    h1_i = 1.0{dimensionless}+nai/kna3*(1.0{dimensionless}+hna);
    h2_i = nai*hna/(kna3*h1_i);
    h3_i = 1.0{dimensionless}/h1_i;
    h4_i = 1.0{dimensionless}+nai/kna1*(1.0{dimensionless}+nai/kna2);
    h5_i = nai*nai/(h4_i*kna1*kna2);
    h6_i = 1.0{dimensionless}/h4_i;
    h7_i = 1.0{dimensionless}+nao/kna3*(1.0{dimensionless}+1{dimensionless}/hna);
    h8_i = nao/(kna3*hna*h7_i);
    h9_i = 1{dimensionless}/h7_i;
    h10_i = kasymm+1.0{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_i = nao*nao/(h10_i*kna1*kna2);
    h12_i = 1.0{dimensionless}/h10_i;
    k1_i = h12_i*cao*kcaon;
    k2_i = kcaoff;
    k3p_i = h9_i*wca;
    k3pp_i = h8_i*wnaca;
    k3_i = k3p_i+k3pp_i;
    k4p_i = h3_i*wca/hca;
    k4pp_i = h2_i*wnaca;
    k4_i = k4p_i+k4pp_i;
    k5_i = kcaoff;
    k6_i = h6_i*cai*kcaon;
    k7_i = h5_i*h2_i*wna;
    k8_i = h8_i*h11_i*wna;
    x1_i = k2_i*k4_i*(k7_i+k6_i)+k5_i*k7_i*(k2_i+k3_i);
    x2_i = k1_i*k7_i*(k4_i+k5_i)+k4_i*k6_i*(k1_i+k8_i);
    x3_i = k1_i*k3_i*(k7_i+k6_i)+k8_i*k6_i*(k2_i+k3_i);
    x4_i = k2_i*k8_i*(k4_i+k5_i)+k3_i*k5_i*(k1_i+k8_i);
    E1_i = x1_i/(x1_i+x2_i+x3_i+x4_i);
    E2_i = x2_i/(x1_i+x2_i+x3_i+x4_i);
    E3_i = x3_i/(x1_i+x2_i+x3_i+x4_i);
    E4_i = x4_i/(x1_i+x2_i+x3_i+x4_i);
    allo_i = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/cai));
    JncxNa_i = 3.0{dimensionless}*(E4_i*k7_i-E1_i*k8_i)+E3_i*k4pp_i-E2_i*k3pp_i;
    JncxCa_i = E2_i*k2_i-E1_i*k1_i;
    Gncx = sel
      case celltype == 1{dimensionless}:
        bGncx*Gncx_b*1.2{dimensionless};
      case celltype == 2{dimensionless}:
        bGncx*Gncx_b*1.4{dimensionless};
      otherwise:
        bGncx*Gncx_b;
    endsel;
    INaCa_i = 0.8{dimensionless}*Gncx*allo_i*(zna*JncxNa_i+zca*JncxCa_i);
    h1_ss = 1{dimensionless}+nass/kna3*(1{dimensionless}+hna);
    h2_ss = nass*hna/(kna3*h1_ss);
    h3_ss = 1{dimensionless}/h1_ss;
    h4_ss = 1{dimensionless}+nass/kna1*(1{dimensionless}+nass/kna2);
    h5_ss = nass*nass/(h4_ss*kna1*kna2);
    h6_ss = 1{dimensionless}/h4_ss;
    h7_ss = 1{dimensionless}+nao/kna3*(1{dimensionless}+1{dimensionless}/hna);
    h8_ss = nao/(kna3*hna*h7_ss);
    h9_ss = 1{dimensionless}/h7_ss;
    h10_ss = kasymm+1{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_ss = nao*nao/(h10_ss*kna1*kna2);
    h12_ss = 1{dimensionless}/h10_ss;
    k1_ss = h12_ss*cao*kcaon;
    k2_ss = kcaoff;
    k3p_ss = h9_ss*wca;
    k3pp_ss = h8_ss*wnaca;
    k3_ss = k3p_ss+k3pp_ss;
    k4p_ss = h3_ss*wca/hca;
    k4pp_ss = h2_ss*wnaca;
    k4_ss = k4p_ss+k4pp_ss;
    k5_ss = kcaoff;
    k6_ss = h6_ss*cass*kcaon;
    k7_ss = h5_ss*h2_ss*wna;
    k8_ss = h8_ss*h11_ss*wna;
    x1_ss = k2_ss*k4_ss*(k7_ss+k6_ss)+k5_ss*k7_ss*(k2_ss+k3_ss);
    x2_ss = k1_ss*k7_ss*(k4_ss+k5_ss)+k4_ss*k6_ss*(k1_ss+k8_ss);
    x3_ss = k1_ss*k3_ss*(k7_ss+k6_ss)+k8_ss*k6_ss*(k2_ss+k3_ss);
    x4_ss = k2_ss*k8_ss*(k4_ss+k5_ss)+k3_ss*k5_ss*(k1_ss+k8_ss);
    E1_ss = x1_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E2_ss = x2_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E3_ss = x3_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E4_ss = x4_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    allo_ss = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/cass));
    JncxNa_ss = 3{dimensionless}*(E4_ss*k7_ss-E1_ss*k8_ss)+E3_ss*k4pp_ss-E2_ss*k3pp_ss;
    JncxCa_ss = E2_ss*k2_ss-E1_ss*k1_ss;
    INaCa_ss = 0.2{dimensionless}*Gncx*allo_ss*(zna*JncxNa_ss+zca*JncxCa_ss);
  enddef;

  def comp INaK as
    var k1p: per_millisecond {init: 949.5};
    var k1m: per_millisecond {init: 182.4};
    var k2p: per_millisecond {init: 687.2};
    var k2m: per_millisecond {init: 39.4};
    var k3p: per_millisecond {init: 1899.0};
    var k3m: per_millisecond {init: 79300.0};
    var k4p: per_millisecond {init: 639.0};
    var k4m: per_millisecond {init: 40.0};
    var Knai0: millimolar {init: 9.073};
    var Knao0: millimolar {init: 27.78};
    var delta: millivolt {init: -0.1550};
    var Kki: per_millisecond {init: 0.5};
    var Kko: per_millisecond {init: 0.3582};
    var MgADP: millimolar {init: 0.05};
    var MgATP: millimolar {init: 9.8};
    var Kmgatp: millimolar {init: 1.698e-7};
    var H: millimolar {init: 1e-7};
    var eP: dimensionless {init: 4.2};
    var Khp: millimolar {init: 1.698e-7};
    var Knap: millimolar {init: 224.0};
    var Kxkur: millimolar {init: 292.0};
    var zk: dimensionless {pub: in};
    var zna: dimensionless {pub: in};
    var Pnak_b: milliS_per_microF {init: 30};
    var Pnak: milliS_per_microF;
    var bGnak: dimensionless {init: 2};
    var celltype: dimensionless {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var v: millivolt {pub: in};
    var nai: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var Knai: millimolar;
    var Knao: millimolar;
    var P: dimensionless;
    var a1: dimensionless;
    var b1: dimensionless;
    var a2: dimensionless;
    var b2: dimensionless;
    var a3: dimensionless;
    var b3: dimensionless;
    var a4: dimensionless;
    var b4: dimensionless;
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var E1: dimensionless;
    var E2: dimensionless;
    var E3: dimensionless;
    var E4: dimensionless;
    var JnakNa: millimolar_per_millisecond;
    var JnakK: millimolar_per_millisecond;
    var INaK: microA_per_microF {pub: out};
    Knai = Knai0*exp(delta*v*F/(3.0{dimensionless}*R*T));
    Knao = Knao0*exp((1.0{dimensionless}-delta)*v*F/(3.0{dimensionless}*R*T));
    P = eP/(1{dimensionless}+H/Khp+nai/Knap+ki/Kxkur);
    a1 = k1p*pow(nai/Knai, 3{dimensionless})/(pow(1{dimensionless}+nai/Knai, 3{dimensionless})+sqr(1{dimensionless}+ki/Kki)-1.0{dimensionless});
    b1 = k1m*MgADP;
    a2 = k2p;
    b2 = k2m*pow(nao/Knao, 3{dimensionless})/(pow(1{dimensionless}+nao/Knao, 3{dimensionless})+sqr(1{dimensionless}+ko/Kko)-1{dimensionless});
    a3 = k3p*sqr(ko/Kko)/(pow(1{dimensionless}+nao/Knao, 3{dimensionless})+sqr(1{dimensionless}+ko/Kko)-1.0{dimensionless});
    b3 = k3m*P*H/(1{dimensionless}+MgATP/Kmgatp);
    a4 = k4p*MgATP/Kmgatp/(1{dimensionless}+MgATP/Kmgatp);
    b4 = k4m*sqr(ki/Kki)/(pow(1{dimensionless}+nai/Knai, 3{dimensionless})+sqr(1{dimensionless}+ki/Kki)-1.0{dimensionless});
    x1 = a4*a1*a2+b2*b4*b3+a2*b4*b3+b3*a1*a2;
    x2 = b2*b1*b4+a1*a2*a3+a3*b1*b4+a2*a3*b4;
    x3 = a2*a3*a4+b3*b2*b1+b2*b1*a4+a3*a4*b1;
    x4 = b4*b3*b2+a3*a4*a1+b2*a4*a1+b3*b2*a1;
    E1 = x1/(x1+x2+x3+x4);
    E2 = x2/(x1+x2+x3+x4);
    E3 = x3/(x1+x2+x3+x4);
    E4 = x4/(x1+x2+x3+x4);
    JnakNa = 3{dimensionless}*(E1*a3-E2*b3);
    JnakK = 2{dimensionless}*(E4*b1-E3*a1);
    Pnak = sel
      case celltype == 1{dimensionless}:
        bGnak*Pnak_b*0.9{dimensionless};
      case celltype == 2{dimensionless}:
        bGnak*Pnak_b*0.7{dimensionless};
      otherwise:
        bGnak*Pnak_b;
    endsel;
    INaK = Pnak*(zna*JnakNa+zk*JnakK);
  enddef;

  def comp IKb as
    var xkb: dimensionless;
    var GKb_b: milliS_per_microF {init: 0.003};
    var GKb: milliS_per_microF;
    var v: millivolt {pub: in};
    var EK: millivolt {pub: in};
    var celltype: dimensionless {pub: in};
    var IKb: microA_per_microF {pub: out};
    xkb = 1{dimensionless}/(1{dimensionless}+exp(-(v-14.48{millivolt})/18.34{millivolt}));
    GKb = sel
      case celltype == 1{dimensionless}:
        GKb_b*0.6{dimensionless};
      otherwise:
        GKb_b;
    endsel;
    IKb = GKb*xkb*(v-EK);
  enddef;

  def comp INab as
    var PNab: milliS_per_microF {init: 3.75e-10};
    var INab: microA_per_microF {pub: out};
    var nai: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    INab = PNab*vffrt*(nai*exp(vfrt)-nao)/(exp(vfrt)-1.0{dimensionless});
  enddef;

  def comp ICab as
    var PCab: milliS_per_microF {init: 2.5e-8};
    var ICab: microA_per_microF {pub: out};
    var cai: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    var undo_ICab: dimensionless {init: 0};
    ICab = (1{dimensionless}-undo_ICab)*PCab*16{dimensionless}*vffrt*(1.2{dimensionless}*cai*exp(2{dimensionless}*vfrt)-0.341{dimensionless}*cao)/(exp(2{dimensionless}*vfrt)-1.0{dimensionless});
  enddef;

  def comp IpCa as
    var GpCa: milliS_per_microF {init: 0.0005};
    var KmCap: millimolar {init: 0.0005};
    var IpCa: microA_per_microF {pub: out};
    var cai: millimolar {pub: in};
    IpCa = GpCa*cai/(KmCap+cai);
  enddef;

  def comp diff as
    var cai: millimolar {pub: in};
    var cass: millimolar {pub: in};
    var nai: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var kss: millimolar {pub: in};
    var JdiffNa: millimolar_per_millisecond {pub: out};
    var Jdiff: millimolar_per_millisecond {pub: out};
    var JdiffK: millimolar_per_millisecond {pub: out};
    JdiffNa = (nass-nai)/2.0{dimensionless};
    JdiffK = (kss-ki)/2.0{dimensionless};
    Jdiff = (cass-cai)*1.7{dimensionless}/0.2{dimensionless};
  enddef;

  def comp ryr as
    var celltype: dimensionless {pub: in};
    var time: millisecond {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var RyRa1: micromolar {init: 0.05};
    var RyRa2: micromolar {init: 0.03};
    var RyRohalf: micromolar;
    var RyRchalf: micromolar;
    var RyRSRCass: dimensionless;
    var RyRainfss: micromolar;
    var RyRtauadapt: millisecond;
    var RyRa: micromolar {init: 0.03};
    var RyRoinfss: dimensionless;
    var RyRtauact: millisecond;
    var RyRcinfss: dimensionless;
    var RyRo: dimensionless {init: 0};
    var RyRtauinact: millisecond;
    var RyRc: dimensionless {init: 1};
    var RyRtauinactp: millisecond;
    var RyRcp: dimensionless {init: 1};
    var casr: millimolar {pub: in};
    var cass: millimolar {pub: in};
    var fJrelp: dimensionless;
    var Jrel: millimolar_per_millisecond {pub: out};
    var Jrelnp: millimolar_per_millisecond;
    var Jrelp: millimolar_per_millisecond;
    var g_irel_max: millimolar_per_second {init: 0.02};
    var g_irel_max_M: per_second;
    var g_irel_max_p: per_second;
    RyRohalf = 0.12{micromolar}-(RyRa1-RyRa2/2{dimensionless});
    RyRchalf = 0.10{micromolar}-(RyRa1-RyRa2/2{dimensionless});
    RyRSRCass = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp((casr-0.3{millimolar})/0.1{millimolar}));
    RyRainfss = RyRa1-RyRa2/(1{dimensionless}+exp((1000{dimensionless}*cass-0.043{micromolar})/0.0082{micromolar}));
    RyRtauadapt = 1000{millisecond};
    ode(RyRa, time) = (RyRainfss-RyRa)/RyRtauadapt;
    RyRoinfss = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp((1000{dimensionless}*cass-(RyRa+RyRohalf))/0.003{micromolar}));
    RyRtauact = 18.75e-1{millisecond}/1.875{dimensionless};
    ode(RyRo, time) = (RyRoinfss-RyRo)/RyRtauact;
    RyRcinfss = 1{dimensionless}/(1{dimensionless}+exp((1000{dimensionless}*cass-(RyRa+RyRchalf))/0.001{micromolar}));
    RyRtauinact = 2{dimensionless}*87.5{millisecond}/10{dimensionless};
    ode(RyRc, time) = (RyRcinfss-RyRc)/RyRtauinact;
    RyRtauinactp = RyRtauinact*1.25{dimensionless};
    ode(RyRcp, time) = (RyRcinfss-RyRcp)/RyRtauinactp;
    fJrelp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    g_irel_max_M = g_irel_max*1.7{dimensionless};
    Jrelnp = sel
      case celltype == 2{dimensionless}:
        g_irel_max_M*RyRSRCass*RyRo*RyRc*(casr-cass);
      otherwise:
        g_irel_max*RyRSRCass*RyRo*RyRc*(casr-cass);
    endsel;
    g_irel_max_p = g_irel_max*1.25{dimensionless};
    Jrelp = sel
      case celltype == 2{dimensionless}:
        g_irel_max_p*1.7{dimensionless}*RyRSRCass*RyRo*RyRcp*(casr-cass);
      otherwise:
        g_irel_max_p*RyRSRCass*RyRo*RyRcp*(casr-cass);
    endsel;
    Jrel = (1{dimensionless}-fJrelp)*Jrelnp+fJrelp*Jrelp;
  enddef;

  def comp SERCA as
    var upScale: dimensionless;
    var Jupnp: millimolar_per_millisecond;
    var Jupp: millimolar_per_millisecond;
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var celltype: dimensionless {pub: in};
    var cai: millimolar {pub: in};
    // var cansr: millimolar {pub: in};
    var fJupp: dimensionless;
    var Jleak: millimolar_per_millisecond {pub: out};
    var Jup: millimolar_per_millisecond {pub: out};
    var Jup_b: dimensionless {init: 1};
    var cJup: dimensionless {init: 3.13};
    var Vmax_SRCaP: millimolar_per_millisecond;
    // [mM/msec] (286 umol/L cytosol/sec)
    var Kmf: millimolar;
    var casr: millimolar {pub: in};
    var Kmr: millimolar;
    var hillSRCaP: millimolar;
    var Jup2: millimolar_per_millisecond {pub: out};
    upScale = sel
      case celltype == 1{dimensionless}:
        1.3{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    Jupnp = upScale*0.004375{dimensionless}*cai/(cai+0.00092{millimolar});
    Jupp = upScale*2.75{dimensionless}*0.004375{dimensionless}*cai/(cai+0.00092{millimolar}-0.00017{millimolar});
    fJupp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    Jleak = 0.0123{millimolar_per_millisecond}*casr/15.0{millimolar};
    Jup = cJup*((1{dimensionless}-fJupp)*Jupnp+fJupp*Jupp);
    Vmax_SRCaP = 1.0{dimensionless}*5.3114e-3{millimolar_per_millisecond};
    // [mM/msec] (286 umol/L cytosol/sec)
    Kmf = 0.246e-3{millimolar};
    Kmr = 1.7{millimolar};
    hillSRCaP = 1.787{millimolar};
    Jup2 = Vmax_SRCaP*(pow(cai/Kmf, hillSRCaP)-pow(casr/Kmr, hillSRCaP))/(1{dimensionless}+pow(cai/Kmf, hillSRCaP)+pow(casr/Kmr, hillSRCaP));
  enddef;

  def comp trans_flux as
    // var cansr: millimolar {pub: in};
    // var cajsr: millimolar {pub: in};
    var Jtr: millimolar_per_millisecond {pub: out};
    // Jtr = (cansr-cajsr)/100{millisecond};
    Jtr = 0{millimolar_per_millisecond};
  enddef;
  def map between intracellular_ions and INaL for
    vars INaL and INaL;
  enddef;
  def map between intracellular_ions and membrane for
    vars Istim and Istim;
  enddef;
  def map between intracellular_ions and trans_flux for
    // vars cajsr and cajsr;
    // vars cansr and cansr;
    vars Jtr and Jtr;
  enddef;
  def map between intracellular_ions and SERCA for
    vars cai and cai;
    // vars cansr and cansr;
    vars casr and casr;
    vars Jup and Jup;
    vars Jleak and Jleak;
  enddef;
  def map between SERCA and environment for
    vars celltype and celltype;
  enddef;
  def map between SERCA and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between intracellular_ions and ryr for
    // vars cajsr and cajsr;
    vars Jrel and Jrel;
    vars cass and cass;
    vars casr and casr;
  enddef;
  // def map between ICaL and ryr for
  // vars ICaL and ICaL;
  // enddef;
  def map between ryr and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between ryr and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between intracellular_ions and diff for
    vars cai and cai;
    vars cass and cass;
    vars nai and nai;
    vars nass and nass;
    vars ki and ki;
    vars kss and kss;
    vars JdiffK and JdiffK;
    vars Jdiff and Jdiff;
    vars JdiffNa and JdiffNa;
  enddef;
  def map between IpCa and membrane for
    vars IpCa and IpCa;
  enddef;
  def map between intracellular_ions and IpCa for
    vars cai and cai;
    vars IpCa and IpCa;
  enddef;
  def map between extracellular and ICab for
    vars cao and cao;
  enddef;
  def map between intracellular_ions and ICab for
    vars cai and cai;
    vars ICab and ICab;
  enddef;
  def map between ICab and membrane for
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars ICab and ICab;
  enddef;
  def map between extracellular and INab for
    vars nao and nao;
  enddef;
  def map between intracellular_ions and INab for
    vars nai and nai;
    vars INab and INab;
  enddef;
  def map between INab and membrane for
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars INab and INab;
  enddef;
  def map between IKb and membrane for
    vars v and v;
    vars IKb and IKb;
  enddef;
  def map between IKb and environment for
    vars celltype and celltype;
  enddef;
  def map between IKb and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between intracellular_ions and IKb for
    vars IKb and IKb;
  enddef;
  def map between intracellular_ions and INaK for
    vars ki and ki;
    vars nai and nai;
    vars INaK and INaK;
  enddef;
  def map between INaK and membrane for
    vars v and v;
    vars INaK and INaK;
  enddef;
  def map between INaK and environment for
    vars celltype and celltype;
  enddef;
  def map between INaK and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zna and zna;
    vars zk and zk;
  enddef;
  def map between extracellular and INaK for
    vars nao and nao;
    vars ko and ko;
  enddef;
  def map between intracellular_ions and INaCa_i for
    vars cai and cai;
    vars nai and nai;
    vars nass and nass;
    vars cass and cass;
    vars INaCa_i and INaCa_i;
    vars INaCa_ss and INaCa_ss;
  enddef;
  def map between INaCa_i and membrane for
    vars v and v;
    vars INaCa_i and INaCa_i;
    vars INaCa_ss and INaCa_ss;
  enddef;
  def map between INaCa_i and environment for
    vars celltype and celltype;
  enddef;
  def map between INaCa_i and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zna and zna;
    vars zca and zca;
  enddef;
  def map between extracellular and INaCa_i for
    vars nao and nao;
    vars cao and cao;
  enddef;
  def map between intracellular_ions and IKs for
    vars cai and cai;
    vars IKs and IKs;
  enddef;
  def map between IK1 and membrane for
    vars v and v;
    vars IK1 and IK1;
  enddef;
  def map between IK1 and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between IKs and membrane for
    vars v and v;
    vars IKs and IKs;
  enddef;
  def map between IKs and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between IK1 and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between IKs and reversal_potentials for
    vars EKs and EKs;
  enddef;
  def map between Ito and membrane for
    vars v and v;
    vars Ito and Ito;
  enddef;
  def map between INaL and membrane for
    vars v and v;
    vars INaL and INaL;
  enddef;
  def map between IKr and membrane for
    vars v and v;
    vars IKr and IKr;
  enddef;
  def map between IKr and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between INaL and reversal_potentials for
    vars ENa and ENa;
  enddef;
  def map between Ito and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between INaL and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between Ito and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between INaL and INa for
    vars tm and tm;
  enddef;
  def map between INaL and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between ICaL and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between ICaL and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between CaMK and environment for
    vars time and time;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between ICaL and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and ICaL for
    vars v and v;
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars ICaL and ICaL;
    vars ICaNa and ICaNa;
    vars ICaK and ICaK;
  enddef;
  def map between membrane and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_ions and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_ions and ICaL for
    vars cass and cass;
    vars nass and nass;
    vars kss and kss;
    vars ICaNa and ICaNa;
    vars ICaK and ICaK;
    vars ICaL and ICaL;
  enddef;
  def map between extracellular and IK1 for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IK1 for
    vars IK1 and IK1;
  enddef;
  def map between extracellular and ICaL for
    vars nao and nao;
    vars ko and ko;
    vars cao and cao;
  enddef;
  def map between extracellular and IKr for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IKr for
    vars IKr and IKr;
  enddef;
  def map between reversal_potentials and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between reversal_potentials and IKr for
    vars EK and EK;
  enddef;
  def map between reversal_potentials and INa for
    vars ENa and ENa;
  enddef;
  def map between intracellular_ions and INa for
    vars INa and INa;
  enddef;
  def map between intracellular_ions and Ito for
    vars Ito and Ito;
  enddef;
  def map between membrane and INa for
    vars v and v;
    vars INa and INa;
  enddef;
  def map between CaMK and INa for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between Ito and environment for
    vars time and time;
    vars celltype and celltype;
  enddef;
  def map between INa and environment for
    vars time and time;
  enddef;
  def map between intracellular_ions and CaMK for
    vars cass and cass;
  enddef;
  def map between intracellular_ions and cell_geometry for
    vars Acap and Acap;
    vars vmyo and vmyo;
    vars vss and vss;
    vars vsr and vsr;
    vars vnsr and vnsr;
    vars vjsr and vjsr;
  enddef;
  def map between intracellular_ions and environment for
    vars time and time;
    vars celltype and celltype;
  enddef;
  def map between intracellular_ions and reversal_potentials for
    vars nai and nai;
    vars ki and ki;
  enddef;
  def map between extracellular and reversal_potentials for
    vars nao and nao;
    vars ko and ko;
  enddef;
enddef;
