// This CellML file was generated on 29/01/2009 at 10:34:23 at a.m. using:
//
// COR (0.9.31.1125)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// comment: FN Jeelean Lim; This CellML version of the model runs in PCEnv but requires initial conditions and 'switches' in order to reproduce the published results. The set of parameters used to produce figure 3 of the published paper is implemented in this version. The doubling of N and rescaling of other variables at division are not included in this CellML description. Units have been checked and are consistent.
// created: W3CDTF 2009-02-19T00:00:00+00:00
// creator: Orgname University of Auckland; Orgunit Auckland Bioengineering Institute; jlim063@aucklanduni.ac.nz; Given Jeelean; Family Lim
// modification: W3CDTF 2009-05-29T12:18:42+12:00; updated curation status; Given James; Family Lawson; Other Richard
// reference: Pubmed_id 17667953; Given Laurence; Family Calzone; Given Denis; Family Thieffry; Given John; Family Tyson; Other J; Given Bela; Family Novak; title Dynamical modeling of syncytial mitotic cycles in Drosophila embryos; volume 3; first_page 131; title Molecular Systems Biology; W3CDTF 2007-07-31 00:00
// reference: subject_type keyword; cell cycle
// comment: FN Jeelean Lim; This is the CellML description of Calzone et al's 2007 dynamical modeling of syncytial mitotic cycles in Drosophila embryos
def model Calzone_Thieffry_Tyson_Novak_2007_version01 as
  // Dynamical modeling of syncytial mitotic cycles in Drosophila embryos
  //
  // Jeelean Lim
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML version of the model runs in PCEnv but requires initial conditions and 'switches' in order to reproduce the published results. The set of parameters used to produce figure 3 of the published paper is implemented in this version. The doubling of N and rescaling of other variables at division are not included in this CellML description.
  //
  // ValidateCellML verifies this model as valid CellML with fully consistent units.
  //
  // Model Structure
  //
  // ABSTRACT: Immediately following fertilization, the fruit fly embryo undergoes 13 rapid, synchronous, syncytial nuclear division cycles driven by maternal genes and proteins. During these mitotic cycles, there are barely detectable oscillations in the total level of B-type cyclins. In this paper, we propose a dynamical model for the molecular events underlying these early nuclear division cycles in Drosophila. The model distinguishes nuclear and cytoplasmic compartments of the embryo and permits exploration of a variety of rules for protein transport between the compartments. Numerical simulations reproduce the main features of wild-type mitotic cycles: patterns of protein accumulation and degradation, lengthening of later cycles, and arrest in interphase 14. The model is consistent with mutations that introduce subtle changes in the number of mitotic cycles before interphase arrest. Bifurcation analysis of the differential equations reveals the dependence of mitotic oscillations on cycle number, and how this dependence is altered by mutations. The model can be used to predict the phenotypes of novel mutations and effective ranges of the unmeasured rate constants and transport coefficients in the proposed mechanism.
  //
  // The complete original paper reference is cited below:
  //
  // Dynamical modeling of syncytial mitotic cycles in Drosophila embryos, Laurence Calzone, Denis Thieffry, John J Tyson, Bela Novak, 2007, Molecular Systems Biology , 3, 131. PubMed ID: 17667953 (http://www.ncbi.nlm.nih.gov/pubmed/17667953)
  //
  // figure1
  //
  // Dynamical model of nuclear division cycles during early embryogenesis of Drosophila.
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp MPF_n as
    var MPF_n: dimensionless {pub: out, init: 0};
    var k_in: first_order_rate_constant {pub: in};
    var k_out: first_order_rate_constant {pub: in};
    var k_dn_: first_order_rate_constant {pub: in};
    var k_dn__: first_order_rate_constant {pub: in};
    var k_wee_: first_order_rate_constant {pub: in};
    var k_wee__: first_order_rate_constant {pub: in};
    var k_stg_: first_order_rate_constant {pub: in};
    var k_stg__: first_order_rate_constant {pub: in};
    var MPF_c: dimensionless {pub: in};
    var FZY: dimensionless {pub: in};
    var Wee1_n: dimensionless {pub: in};
    var StgP_n: dimensionless {pub: in};
    var preMPF_n: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(MPF_n, time) = k_in*MPF_c-k_out*MPF_n-(k_dn_+k_dn__*FZY)*MPF_n-(k_wee_+k_wee__*Wee1_n)*MPF_n+(k_stg_+k_stg__*StgP_n)*preMPF_n;
  enddef;

  def comp preMPF_n as
    var preMPF_n: dimensionless {pub: out, init: 0};
    var k_in: first_order_rate_constant {pub: in};
    var k_out: first_order_rate_constant {pub: in};
    var k_dn_: first_order_rate_constant {pub: in};
    var k_dn__: first_order_rate_constant {pub: in};
    var k_wee_: first_order_rate_constant {pub: in};
    var k_wee__: first_order_rate_constant {pub: in};
    var k_stg_: first_order_rate_constant {pub: in};
    var k_stg__: first_order_rate_constant {pub: in};
    var preMPF_c: dimensionless {pub: in};
    var FZY: dimensionless {pub: in};
    var Wee1_n: dimensionless {pub: in};
    var MPF_n: dimensionless {pub: in};
    var StgP_n: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(preMPF_n, time) = k_in*preMPF_c-k_out*preMPF_n-(k_dn_+k_dn__*FZY)*preMPF_n+(k_wee_+k_wee__*Wee1_n)*MPF_n-(k_stg_+k_stg__*StgP_n)*preMPF_n;
  enddef;

  def comp MPF_c as
    var MPF_c: dimensionless {pub: out, init: 1};
    var k_sc: first_order_rate_constant {pub: in};
    var k_in: first_order_rate_constant {pub: in};
    var k_out: first_order_rate_constant {pub: in};
    var k_dc_: first_order_rate_constant {pub: in};
    var k_stg_: first_order_rate_constant {pub: in};
    var k_stg__: first_order_rate_constant {pub: in};
    var k_wee_: first_order_rate_constant {pub: in};
    var k_wee__: first_order_rate_constant {pub: in};
    var epsilon: dimensionless {pub: in};
    var MPF_n: dimensionless {pub: in};
    var N: dimensionless {pub: in};
    var StgP_c: dimensionless {pub: in};
    var preMPF_c: dimensionless {pub: in};
    var Wee1_c: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(MPF_c, time) = k_sc-epsilon*N*(k_in*MPF_c-k_out*MPF_n)/(1{dimensionless}-N*epsilon)-k_dc_*MPF_c+(k_stg_+k_stg__*StgP_c)*preMPF_c-(k_wee_+k_wee__*Wee1_c)*MPF_c;
  enddef;

  def comp preMPF_c as
    var preMPF_c: dimensionless {pub: out, init: 0};
    var k_in: first_order_rate_constant {pub: in};
    var k_out: first_order_rate_constant {pub: in};
    var k_dc_: first_order_rate_constant {pub: in};
    var k_stg_: first_order_rate_constant {pub: in};
    var k_stg__: first_order_rate_constant {pub: in};
    var k_wee_: first_order_rate_constant {pub: in};
    var k_wee__: first_order_rate_constant {pub: in};
    var epsilon: dimensionless {pub: in};
    var N: dimensionless {pub: in};
    var preMPF_n: dimensionless {pub: in};
    var StgP_c: dimensionless {pub: in};
    var Wee1_c: dimensionless {pub: in};
    var MPF_c: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(preMPF_c, time) = -epsilon*N*(k_in*preMPF_c-k_out*preMPF_n)/(1{dimensionless}-N*epsilon)-k_dc_*preMPF_c-(k_stg_+k_stg__*StgP_c)*preMPF_c+(k_wee_+k_wee__*Wee1_c)*MPF_c;
  enddef;

  def comp IE as
    var IE: dimensionless {pub: out, init: 0};
    var j_aie: dimensionless {pub: in};
    var j_iie: dimensionless {pub: in};
    var k_aie: first_order_rate_constant {pub: in};
    var k_iie: first_order_rate_constant {pub: in};
    var MPF_n: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(IE, time) = k_aie*(1{dimensionless}-IE)*MPF_n/(j_aie+1{dimensionless}-IE)-k_iie*IE/(j_iie+IE);
  enddef;

  def comp FZY as
    var FZY: dimensionless {pub: out, init: 0};
    var j_afz: dimensionless {pub: in};
    var j_ifz: dimensionless {pub: in};
    var k_afz: first_order_rate_constant {pub: in};
    var k_ifz: first_order_rate_constant {pub: in};
    var IE: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(FZY, time) = k_afz*IE*(1{dimensionless}-FZY)/(j_afz+1{dimensionless}-FZY)-k_ifz*FZY/(j_ifz+FZY);
  enddef;

  def comp Stg_m as
    var Stg_m: dimensionless {pub: out, init: 1};
    var k_dm_: first_order_rate_constant {pub: in};
    var k_dm__: first_order_rate_constant {pub: in};
    var j_m: dimensionless {pub: in};
    var Xp: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Stg_m, time) = -(k_dm_/(j_m+Stg_m)+k_dm__*Xp)*Stg_m;
  enddef;

  def comp Xm as
    var Xm: dimensionless {pub: out, init: 0};
    var k_sxm: first_order_rate_constant {pub: in};
    var N: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Xm, time) = k_sxm*N;
  enddef;

  def comp Xp as
    var Xp: dimensionless {pub: out, init: 0};
    var k_sxp: first_order_rate_constant {pub: in};
    var Xm: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Xp, time) = k_sxp*Xm;
  enddef;

  def comp StgP_n as
    var StgP_n: dimensionless {pub: out, init: 0};
    var k_ins: first_order_rate_constant {pub: in};
    var k_outs: first_order_rate_constant {pub: in};
    var k_astg_: first_order_rate_constant {pub: in};
    var k_astg__: first_order_rate_constant {pub: in};
    var k_istg: first_order_rate_constant {pub: in};
    var k_dstg: first_order_rate_constant {pub: in};
    var j_astg: dimensionless {pub: in};
    var j_istg: dimensionless {pub: in};
    var StgP_c: dimensionless {pub: in};
    var MPF_n: dimensionless {pub: in};
    var Stg_n: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(StgP_n, time) = k_ins*StgP_c-k_outs*StgP_n+(k_astg_+k_astg__*MPF_n)*Stg_n/(j_astg+Stg_n)-k_istg*StgP_n/(j_istg+StgP_n)-k_dstg*StgP_n;
  enddef;

  def comp Stg_n as
    var Stg_n: dimensionless {pub: out, init: 0};
    var k_ins: first_order_rate_constant {pub: in};
    var k_outs: first_order_rate_constant {pub: in};
    var k_astg_: first_order_rate_constant {pub: in};
    var k_astg__: first_order_rate_constant {pub: in};
    var k_istg: first_order_rate_constant {pub: in};
    var k_dstg: first_order_rate_constant {pub: in};
    var j_astg: dimensionless {pub: in};
    var j_istg: dimensionless {pub: in};
    var Stg_c: dimensionless {pub: in};
    var MPF_n: dimensionless {pub: in};
    var StgP_n: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Stg_n, time) = k_ins*Stg_c-k_outs*Stg_n-(k_astg_+k_astg__*MPF_n)*Stg_n/(j_astg+Stg_n)+k_istg*StgP_n/(j_istg+StgP_n)-k_dstg*Stg_n;
  enddef;

  def comp StgP_c as
    var StgP_c: dimensionless {pub: out, init: 0};
    var k_dstg: first_order_rate_constant {pub: in};
    var k_ins: first_order_rate_constant {pub: in};
    var k_outs: first_order_rate_constant {pub: in};
    var k_astg_: first_order_rate_constant {pub: in};
    var k_astg__: first_order_rate_constant {pub: in};
    var k_istg: first_order_rate_constant {pub: in};
    var j_astg: dimensionless {pub: in};
    var j_istg: dimensionless {pub: in};
    var epsilon: dimensionless {pub: in};
    var Stg_c: dimensionless {pub: in};
    var N: dimensionless {pub: in};
    var StgP_n: dimensionless {pub: in};
    var MPF_c: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(StgP_c, time) = -k_dstg*StgP_c-epsilon*N*(k_ins*StgP_c-k_outs*StgP_n)/(1{dimensionless}-N*epsilon)+(k_astg_+k_astg__*MPF_c)*Stg_c/(j_astg+Stg_c)-k_istg*StgP_c/(j_istg+StgP_c);
  enddef;

  def comp Stg_c as
    var Stg_c: dimensionless {pub: out, init: 1};
    var j_astg: dimensionless {pub: in};
    var j_istg: dimensionless {pub: in};
    var k_sstg: first_order_rate_constant {pub: in};
    var k_dstg: first_order_rate_constant {pub: in};
    var k_ins: first_order_rate_constant {pub: in};
    var k_outs: first_order_rate_constant {pub: in};
    var k_astg_: first_order_rate_constant {pub: in};
    var k_astg__: first_order_rate_constant {pub: in};
    var k_istg: first_order_rate_constant {pub: in};
    var Stg_m: dimensionless {pub: in};
    var epsilon: dimensionless {pub: in};
    var N: dimensionless {pub: in};
    var Stg_n: dimensionless {pub: in};
    var MPF_c: dimensionless {pub: in};
    var StgP_c: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Stg_c, time) = k_sstg*Stg_m-k_dstg*Stg_c-epsilon*N*(k_ins*Stg_c-k_outs*Stg_n)/(1{dimensionless}-N*epsilon)-(k_astg_+k_astg__*MPF_c)*Stg_c/(j_astg+Stg_c)+k_istg*StgP_c/(j_istg+StgP_c);
  enddef;

  def comp Wee1_n as
    var Wee1_n: dimensionless {pub: out, init: 0};
    var k_inw: first_order_rate_constant {pub: in};
    var k_outw: first_order_rate_constant {pub: in};
    var k_awee: first_order_rate_constant {pub: in};
    var k_iwee_: first_order_rate_constant {pub: in};
    var k_iwee__: first_order_rate_constant {pub: in};
    var j_awee: dimensionless {pub: in};
    var j_iwee: dimensionless {pub: in};
    var Wee1_c: dimensionless {pub: in};
    var Wee1P_n: dimensionless {pub: in};
    var MPF_n: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Wee1_n, time) = k_inw*Wee1_c-k_outw*Wee1_n+k_awee*Wee1P_n/(j_awee+Wee1P_n)-(k_iwee_+k_iwee__*MPF_n)*Wee1_n/(j_iwee+Wee1_n);
  enddef;

  def comp Wee1_c as
    var Wee1_c: dimensionless {pub: out, init: 0};
    var k_inw: first_order_rate_constant {pub: in};
    var k_outw: first_order_rate_constant {pub: in};
    var k_awee: first_order_rate_constant {pub: in};
    var k_iwee_: first_order_rate_constant {pub: in};
    var k_iwee__: first_order_rate_constant {pub: in};
    var j_awee: dimensionless {pub: in};
    var j_iwee: dimensionless {pub: in};
    var Wee1_n: dimensionless {pub: in};
    var N: dimensionless {pub: in};
    var epsilon: dimensionless {pub: in};
    var Wee1P_c: dimensionless {pub: in};
    var MPF_c: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Wee1_c, time) = -(k_inw*Wee1_c-k_outw*Wee1_n)*N*epsilon/(1{dimensionless}-N*epsilon)+k_awee*Wee1P_c/(j_awee+Wee1P_c)-(k_iwee_+k_iwee__*MPF_c)*Wee1_c/(j_iwee+Wee1_c);
  enddef;

  def comp Wee1P_n as
    var Wee1P_n: dimensionless {pub: out, init: 0};
    var k_inw: first_order_rate_constant {pub: in};
    var k_outw: first_order_rate_constant {pub: in};
    var k_awee: first_order_rate_constant {pub: in};
    var k_iwee_: first_order_rate_constant {pub: in};
    var k_iwee__: first_order_rate_constant {pub: in};
    var j_awee: dimensionless {pub: in};
    var j_iwee: dimensionless {pub: in};
    var Wee1P_c: dimensionless {pub: in};
    var MPF_n: dimensionless {pub: in};
    var Wee1_n: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Wee1P_n, time) = k_inw*Wee1P_c-k_outw*Wee1P_n-k_awee*Wee1P_n/(j_awee+Wee1P_n)+(k_iwee_+k_iwee__*MPF_n)*Wee1_n/(j_iwee+Wee1_n);
  enddef;

  def comp Wee1P_c as
    var Wee1P_c: dimensionless {pub: out};
    var Wee1_T: dimensionless {init: 0.8};
    var epsilon: dimensionless {pub: in};
    var Wee1_n: dimensionless {pub: in};
    var Wee1P_n: dimensionless {pub: in};
    var N: dimensionless {pub: in};
    var Wee1_c: dimensionless {pub: in};
    Wee1P_c = (Wee1_T-N*epsilon*(Wee1_n+Wee1P_n))/(1{dimensionless}-N*epsilon)-Wee1_c;
  enddef;

  def comp N as
    var N: dimensionless {pub: out, init: 1};
    var time: minute {pub: in};
    ode(N, time) = 0{first_order_rate_constant};
  enddef;

  def comp CycB_T as
    var CycB_T: dimensionless {pub: out};
    var N: dimensionless {pub: in};
    var epsilon: dimensionless {pub: in};
    var MPF_c: dimensionless {pub: in};
    var preMPF_c: dimensionless {pub: in};
    var MPF_n: dimensionless {pub: in};
    var preMPF_n: dimensionless {pub: in};
    CycB_T = (1{dimensionless}-N*epsilon)*(MPF_c+preMPF_c)+N*epsilon*(MPF_n+preMPF_n);
  enddef;

  def comp Stg_T as
    var Stg_T: dimensionless {pub: out};
    var N: dimensionless {pub: in};
    var epsilon: dimensionless {pub: in};
    var Stg_c: dimensionless {pub: in};
    var StgP_c: dimensionless {pub: in};
    var Stg_n: dimensionless {pub: in};
    var StgP_n: dimensionless {pub: in};
    Stg_T = (1{dimensionless}-N*epsilon)*(Stg_c+StgP_c)+N*epsilon*(Stg_n+StgP_n);
  enddef;

  def comp StgP_T as
    var StgP_T: dimensionless {pub: out};
    var N: dimensionless {pub: in};
    var epsilon: dimensionless {pub: in};
    var StgP_c: dimensionless {pub: in};
    var StgP_n: dimensionless {pub: in};
    StgP_T = (1{dimensionless}-N*epsilon)*StgP_c+N*epsilon*StgP_n;
  enddef;

  def comp parameters as
    var k_sc: first_order_rate_constant {pub: out, init: 0.01};
    var k_dc_: first_order_rate_constant {pub: out, init: 0.01};
    var k_dn_: first_order_rate_constant {pub: out, init: 0.01};
    var k_dn__: first_order_rate_constant {pub: out, init: 1.5};
    var k_afz: first_order_rate_constant {pub: out, init: 1};
    var k_ifz: first_order_rate_constant {pub: out, init: 0.2};
    var k_aie: first_order_rate_constant {pub: out, init: 1};
    var k_iie: first_order_rate_constant {pub: out, init: 0.4};
    var k_wee_: first_order_rate_constant {pub: out, init: 0.005};
    var k_wee__: first_order_rate_constant {pub: out, init: 1};
    var k_awee: first_order_rate_constant {pub: out, init: 0.3};
    var k_iwee_: first_order_rate_constant {pub: out, init: 0.01};
    var k_iwee__: first_order_rate_constant {pub: out, init: 1};
    var k_stg_: first_order_rate_constant {pub: out, init: 0.2};
    var k_stg__: first_order_rate_constant {pub: out, init: 2};
    var k_astg_: first_order_rate_constant {pub: out, init: 0};
    var k_astg__: first_order_rate_constant {pub: out, init: 1};
    var k_istg: first_order_rate_constant {pub: out, init: 0.3};
    var k_sstg: first_order_rate_constant {pub: out, init: 0.02};
    var k_dstg: first_order_rate_constant {pub: out, init: 0.015};
    var k_dm_: first_order_rate_constant {pub: out, init: 0.002};
    var k_dm__: first_order_rate_constant {pub: out, init: 0.2};
    var k_sxm: first_order_rate_constant {pub: out, init: 0.0005};
    var k_sxp: first_order_rate_constant {pub: out, init: 0.001};
    var k_ez: first_order_rate_constant {pub: out, init: 0.5};
    var k_outs: first_order_rate_constant {pub: out, init: 0.02};
    var k_outw: first_order_rate_constant {pub: out, init: 0.01};
    var k_ins: first_order_rate_constant {pub: out, init: 0.08};
    var k_inw: first_order_rate_constant {pub: out, init: 0.04};
    var k_in: first_order_rate_constant {pub: out, init: 0.15};
    var k_out: first_order_rate_constant {pub: out, init: 0};
    var j_afz: dimensionless {pub: out, init: 0.01};
    var j_ifz: dimensionless {pub: out, init: 0.01};
    var j_aie: dimensionless {pub: out, init: 0.01};
    var j_iie: dimensionless {pub: out, init: 0.01};
    var j_awee: dimensionless {pub: out, init: 0.05};
    var j_iwee: dimensionless {pub: out, init: 0.05};
    var j_astg: dimensionless {pub: out, init: 0.05};
    var j_istg: dimensionless {pub: out, init: 0.05};
    var j_m: dimensionless {pub: out, init: 0.05};
    var epsilon: dimensionless {pub: out, init: 0.00007};
  enddef;
  def map between MPF_n and environment for
    vars time and time;
  enddef;
  def map between preMPF_n and environment for
    vars time and time;
  enddef;
  def map between MPF_c and environment for
    vars time and time;
  enddef;
  def map between preMPF_c and environment for
    vars time and time;
  enddef;
  def map between IE and environment for
    vars time and time;
  enddef;
  def map between FZY and environment for
    vars time and time;
  enddef;
  def map between Stg_m and environment for
    vars time and time;
  enddef;
  def map between Xm and environment for
    vars time and time;
  enddef;
  def map between Xp and environment for
    vars time and time;
  enddef;
  def map between StgP_n and environment for
    vars time and time;
  enddef;
  def map between Stg_n and environment for
    vars time and time;
  enddef;
  def map between StgP_c and environment for
    vars time and time;
  enddef;
  def map between Stg_c and environment for
    vars time and time;
  enddef;
  def map between Wee1_n and environment for
    vars time and time;
  enddef;
  def map between Wee1_c and environment for
    vars time and time;
  enddef;
  def map between Wee1P_n and environment for
    vars time and time;
  enddef;
  def map between N and environment for
    vars time and time;
  enddef;
  def map between MPF_n and parameters for
    vars k_in and k_in;
    vars k_out and k_out;
    vars k_dn_ and k_dn_;
    vars k_dn__ and k_dn__;
    vars k_wee_ and k_wee_;
    vars k_wee__ and k_wee__;
    vars k_stg_ and k_stg_;
    vars k_stg__ and k_stg__;
  enddef;
  def map between MPF_n and MPF_c for
    vars MPF_c and MPF_c;
    vars MPF_n and MPF_n;
  enddef;
  def map between MPF_n and FZY for
    vars FZY and FZY;
  enddef;
  def map between MPF_n and Wee1_n for
    vars Wee1_n and Wee1_n;
    vars MPF_n and MPF_n;
  enddef;
  def map between MPF_n and StgP_n for
    vars StgP_n and StgP_n;
    vars MPF_n and MPF_n;
  enddef;
  def map between MPF_n and preMPF_n for
    vars preMPF_n and preMPF_n;
    vars MPF_n and MPF_n;
  enddef;
  def map between preMPF_n and parameters for
    vars k_in and k_in;
    vars k_out and k_out;
    vars k_dn_ and k_dn_;
    vars k_dn__ and k_dn__;
    vars k_wee_ and k_wee_;
    vars k_wee__ and k_wee__;
    vars k_stg_ and k_wee_;
    vars k_stg__ and k_stg__;
  enddef;
  def map between preMPF_n and preMPF_c for
    vars preMPF_c and preMPF_c;
    vars preMPF_n and preMPF_n;
  enddef;
  def map between preMPF_n and FZY for
    vars FZY and FZY;
  enddef;
  def map between preMPF_n and Wee1_n for
    vars Wee1_n and Wee1_n;
  enddef;
  def map between preMPF_n and StgP_n for
    vars StgP_n and StgP_n;
  enddef;
  def map between MPF_c and parameters for
    vars k_sc and k_sc;
    vars k_in and k_in;
    vars k_out and k_out;
    vars k_dc_ and k_dc_;
    vars k_stg_ and k_stg_;
    vars k_stg__ and k_stg__;
    vars k_wee_ and k_wee_;
    vars k_wee__ and k_wee__;
    vars epsilon and epsilon;
  enddef;
  def map between MPF_c and N for
    vars N and N;
  enddef;
  def map between MPF_c and StgP_c for
    vars StgP_c and StgP_c;
    vars MPF_c and MPF_c;
  enddef;
  def map between MPF_c and preMPF_c for
    vars preMPF_c and preMPF_c;
    vars MPF_c and MPF_c;
  enddef;
  def map between MPF_c and Wee1_c for
    vars Wee1_c and Wee1_c;
    vars MPF_c and MPF_c;
  enddef;
  def map between preMPF_c and parameters for
    vars k_in and k_in;
    vars k_out and k_out;
    vars k_dc_ and k_dc_;
    vars k_stg_ and k_stg_;
    vars k_stg__ and k_stg__;
    vars k_wee_ and k_wee_;
    vars k_wee__ and k_wee__;
    vars epsilon and epsilon;
  enddef;
  def map between preMPF_c and N for
    vars N and N;
  enddef;
  def map between preMPF_c and StgP_c for
    vars StgP_c and StgP_c;
  enddef;
  def map between preMPF_c and Wee1_c for
    vars Wee1_c and Wee1_c;
  enddef;
  def map between IE and parameters for
    vars j_aie and j_aie;
    vars j_iie and j_iie;
    vars k_aie and k_aie;
    vars k_iie and k_iie;
  enddef;
  def map between IE and MPF_n for
    vars MPF_n and MPF_n;
  enddef;
  def map between FZY and parameters for
    vars j_afz and j_afz;
    vars j_ifz and j_ifz;
    vars k_afz and k_afz;
    vars k_ifz and k_ifz;
  enddef;
  def map between FZY and IE for
    vars IE and IE;
  enddef;
  def map between Stg_m and parameters for
    vars k_dm_ and k_dm_;
    vars k_dm__ and k_dm__;
    vars j_m and j_m;
  enddef;
  def map between Stg_m and Xp for
    vars Xp and Xp;
  enddef;
  def map between Xm and parameters for
    vars k_sxm and k_sxm;
  enddef;
  def map between Xm and N for
    vars N and N;
  enddef;
  def map between Xp and parameters for
    vars k_sxp and k_sxp;
  enddef;
  def map between Xp and Xm for
    vars Xm and Xm;
  enddef;
  def map between StgP_n and parameters for
    vars k_ins and k_ins;
    vars k_outs and k_outs;
    vars k_astg_ and k_astg_;
    vars k_astg__ and k_astg__;
    vars k_istg and k_istg;
    vars k_dstg and k_dstg;
    vars j_astg and j_astg;
    vars j_istg and j_istg;
  enddef;
  def map between StgP_n and StgP_c for
    vars StgP_c and StgP_c;
    vars StgP_n and StgP_n;
  enddef;
  def map between StgP_n and Stg_n for
    vars Stg_n and Stg_n;
    vars StgP_n and StgP_n;
  enddef;
  def map between Stg_n and parameters for
    vars k_ins and k_ins;
    vars k_outs and k_outs;
    vars k_astg_ and k_astg_;
    vars k_astg__ and k_astg__;
    vars k_istg and k_istg;
    vars k_dstg and k_dstg;
    vars j_astg and j_astg;
    vars j_istg and j_istg;
  enddef;
  def map between Stg_n and Stg_c for
    vars Stg_c and Stg_c;
    vars Stg_n and Stg_n;
  enddef;
  def map between Stg_n and MPF_n for
    vars MPF_n and MPF_n;
  enddef;
  def map between StgP_c and parameters for
    vars k_dstg and k_dstg;
    vars k_ins and k_ins;
    vars k_outs and k_outs;
    vars k_astg_ and k_astg_;
    vars k_astg__ and k_astg__;
    vars k_istg and k_istg;
    vars j_astg and j_astg;
    vars j_istg and j_istg;
    vars epsilon and epsilon;
  enddef;
  def map between StgP_c and Stg_c for
    vars Stg_c and Stg_c;
    vars StgP_c and StgP_c;
  enddef;
  def map between StgP_c and N for
    vars N and N;
  enddef;
  def map between Stg_c and parameters for
    vars j_astg and j_astg;
    vars j_istg and j_istg;
    vars k_sstg and k_sstg;
    vars k_dstg and k_dstg;
    vars k_ins and k_ins;
    vars k_outs and k_outs;
    vars k_astg_ and k_astg_;
    vars k_astg__ and k_astg__;
    vars k_istg and k_istg;
    vars epsilon and epsilon;
  enddef;
  def map between Stg_c and Stg_m for
    vars Stg_m and Stg_m;
  enddef;
  def map between Stg_c and N for
    vars N and N;
  enddef;
  def map between Stg_c and MPF_c for
    vars MPF_c and MPF_c;
  enddef;
  def map between Wee1_n and parameters for
    vars k_inw and k_inw;
    vars k_outw and k_outw;
    vars k_awee and k_awee;
    vars k_iwee_ and k_iwee_;
    vars k_iwee__ and k_iwee__;
    vars j_awee and j_awee;
    vars j_iwee and j_iwee;
  enddef;
  def map between Wee1_n and Wee1_c for
    vars Wee1_c and Wee1_c;
    vars Wee1_n and Wee1_n;
  enddef;
  def map between Wee1_n and Wee1P_n for
    vars Wee1P_n and Wee1P_n;
    vars Wee1_n and Wee1_n;
  enddef;
  def map between Wee1_c and parameters for
    vars k_inw and k_inw;
    vars k_outw and k_outw;
    vars k_awee and k_awee;
    vars k_iwee_ and k_iwee_;
    vars k_iwee__ and k_iwee__;
    vars j_awee and j_awee;
    vars j_iwee and j_iwee;
    vars epsilon and epsilon;
  enddef;
  def map between Wee1_c and N for
    vars N and N;
  enddef;
  def map between Wee1_c and Wee1P_c for
    vars Wee1P_c and Wee1P_c;
    vars Wee1_c and Wee1_c;
  enddef;
  def map between Wee1P_n and parameters for
    vars k_inw and k_inw;
    vars k_outw and k_outw;
    vars k_awee and k_awee;
    vars k_iwee_ and k_iwee_;
    vars k_iwee__ and k_iwee__;
    vars j_awee and j_awee;
    vars j_iwee and j_iwee;
  enddef;
  def map between Wee1P_n and Wee1P_c for
    vars Wee1P_c and Wee1P_c;
    vars Wee1P_n and Wee1P_n;
  enddef;
  def map between Wee1P_n and MPF_n for
    vars MPF_n and MPF_n;
  enddef;
  def map between Wee1P_c and parameters for
    vars epsilon and epsilon;
  enddef;
  def map between Wee1P_c and Wee1_n for
    vars Wee1_n and Wee1_n;
  enddef;
  def map between Wee1P_c and N for
    vars N and N;
  enddef;
  def map between CycB_T and parameters for
    vars epsilon and epsilon;
  enddef;
  def map between CycB_T and N for
    vars N and N;
  enddef;
  def map between CycB_T and MPF_c for
    vars MPF_c and MPF_c;
  enddef;
  def map between CycB_T and preMPF_c for
    vars preMPF_c and preMPF_c;
  enddef;
  def map between CycB_T and MPF_n for
    vars MPF_n and MPF_n;
  enddef;
  def map between CycB_T and preMPF_n for
    vars preMPF_n and preMPF_n;
  enddef;
  def map between Stg_T and parameters for
    vars epsilon and epsilon;
  enddef;
  def map between Stg_T and N for
    vars N and N;
  enddef;
  def map between Stg_T and Stg_c for
    vars Stg_c and Stg_c;
  enddef;
  def map between Stg_T and StgP_c for
    vars StgP_c and StgP_c;
  enddef;
  def map between Stg_T and Stg_n for
    vars Stg_n and Stg_n;
  enddef;
  def map between Stg_T and StgP_n for
    vars StgP_n and StgP_n;
  enddef;
  def map between StgP_T and parameters for
    vars epsilon and epsilon;
  enddef;
  def map between StgP_T and N for
    vars N and N;
  enddef;
  def map between StgP_T and StgP_c for
    vars StgP_c and StgP_c;
  enddef;
  def map between StgP_T and StgP_n for
    vars StgP_n and StgP_n;
  enddef;
enddef;
