<?xml version='1.0' encoding='UTF-8'?>
<model xmlns="http://www.cellml.org/cellml/1.1#" name="Arrhenius_Model_Cell_Death"><component name="rate_kinetics"><variable name="k" units="per_sec"/><variable initial_value="1" name="E" units="J_per_mol"/><variable initial_value="8.3143" name="R" units="J_per_mol_per_K"/><variable initial_value="310" name="T" units="kelvin"/><math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>k</ci><apply><times/><ci>A</ci><apply><exp/><apply><minus/><apply><divide/><ci>E</ci><apply><times/><ci>R</ci><ci>T</ci></apply></apply></apply></apply></apply></apply><apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>C</ci></apply><apply><minus/><apply><times/><ci>k</ci><ci>C</ci></apply></apply></apply></math><variable initial_value="1" name="A" units="per_sec"/><variable initial_value="0" name="time" units="second"/><variable initial_value="1" name="C" units="conc"/></component><units base_units="no" name="kJ_per_mol"><unit exponent="-1" units="mole"/><unit exponent="4" units="joule"/></units><units name="J_per_mol_per_K"><unit units="joule"/><unit exponent="-1" units="mole"/><unit exponent="-1" units="kelvin"/></units><units name="per_sec"><unit exponent="-1" units="second"/></units><units name="J_per_mol"><unit units="joule"/><unit exponent="-1" units="mole"/></units><units base_units="yes" name="conc"/></model>