// reference: subject_type keyword; electrophysiology
def model kernik_2019 as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mmol as
    unit second {mult: 1000};
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit J_per_mol_per_K as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit L_per_F_per_ms_times_1e0 as
    unit gram;
    unit metre {expo: 5.0};
    unit second {expo: -5.0};
    unit ampere {expo: -2.0};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit pF as
    unit gram {expo: -1.0, mult: 1e-15};
    unit metre {expo: -2.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit per_mM2_per_ms as
    unit metre {expo: 6.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole {expo: -2.0};
  enddef;
  def unit per_mM_per_ms as
    unit metre {expo: 3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit s4_A2_per_g_per_m2_per_mol_times_1e3 as
    unit gram {expo: -1.0, mult: 1000};
    unit metre {expo: -2.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
    unit mole {expo: -1.0};
  enddef;
  def unit um3 as
    unit metre {expo: 3.0, mult: 1e-18};
  enddef;

  def comp cai as
    var Buf_C: mM {init: 0.06};
    var Cai: mM {pub: out, init: 2.19191642424964390e-04};
    var Cai_bufc: dimensionless;
    var Cm: pF {pub: in};
    var F: C_per_mmol {pub: in};
    var Kbuf_C: mM {init: 0.0006};
    var Vc: um3 {pub: in};
    var i_CaL_Ca: A_per_F {pub: in};
    var i_CaT: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_PCa: A_per_F {pub: in};
    var i_b_Ca: A_per_F {pub: in};
    var i_leak: mM_per_ms {pub: in};
    var i_rel: mM_per_ms {pub: in};
    var i_up: mM_per_ms {pub: in};
    var time: ms {pub: in};
    ode(Cai, time) = Cai_bufc*(-i_up+i_leak+i_rel-Cm/(2.0{dimensionless}*Vc*F)*(+i_CaL_Ca+i_CaT+i_b_Ca+i_PCa-2.0{dimensionless}*i_NaCa));
    Cai_bufc = 1.0{dimensionless}/(1.0{dimensionless}+Buf_C*Kbuf_C/sqr(Cai+Kbuf_C));
  enddef;

  def comp casr as
    var Buf_SR: mM;
    var Ca_SR: mM {pub: out, init: 3.35086796732326109e-01};
    var Ca_SR_bufSR: dimensionless;
    var Kbuf_SR: mM {init: 0.3};
    var V_SR: um3 {pub: in};
    var Vc: um3 {pub: in};
    var i_leak: mM_per_ms {pub: in};
    var i_rel: mM_per_ms {pub: in};
    var i_up: mM_per_ms {pub: in};
    var time: ms {pub: in};
    Buf_SR = 10.0{dimensionless}*1.2{mM};
    ode(Ca_SR, time) = Ca_SR_bufSR*Vc/V_SR*(i_up-i_rel-i_leak);
    Ca_SR_bufSR = 1.0{dimensionless}/(1.0{dimensionless}+Buf_SR*Kbuf_SR/sqr(Ca_SR+Kbuf_SR));
  enddef;

  def comp engine as
    var pace: dimensionless {pub: out, init: 0.0};
    var time: ms {pub: out};
  enddef;

  def comp erev as
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    var E_Ca: mV {pub: out};
    var E_K: mV {pub: out};
    var E_Na: mV {pub: out};
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var RTF: mV {pub: in};
    E_Ca = 0.5{dimensionless}*RTF*ln(Cao/Cai);
    E_K = RTF*ln(Ko/Ki);
    E_Na = RTF*ln(Nao/Nai);
  enddef;

  def comp extra as
    var Cao: mM {pub: out, init: 1.8};
    var Ko: mM {pub: out, init: 5.4};
    var Nao: mM {pub: out, init: 140.0};
  enddef;

  def comp geom as
    var Cm: pF {pub: out, init: 60.0};
    var VSR_tenT: um3 {init: 1094.0};
    var V_SR: um3 {pub: out};
    var V_tot: um3 {init: 3960.0};
    var V_tot_tenT: um3;
    var Vc: um3 {pub: out};
    var Vc_tenT: um3 {init: 16404.0};
    V_SR = V_tot*(VSR_tenT/V_tot_tenT);
    V_tot_tenT = Vc_tenT+VSR_tenT;
    Vc = V_tot*(Vc_tenT/V_tot_tenT);
  enddef;

  def comp ibca as
    var E_Ca: mV {pub: in};
    var V: mV {pub: in};
    var g_b_Ca: mS_per_uF;
    var i_b_Ca: A_per_F {pub: out};
    g_b_Ca = 0.000592{mS_per_uF}*0.62{dimensionless};
    i_b_Ca = g_b_Ca*(V-E_Ca);
  enddef;

  def comp ibna as
    var E_Na: mV {pub: in};
    var V: mV {pub: in};
    var g_b_Na: mS_per_uF;
    var i_b_Na: A_per_F {pub: out};
    g_b_Na = 0.00029{mS_per_uF}*1.5{dimensionless};
    i_b_Na = g_b_Na*(V-E_Na);
  enddef;

  def comp ical as
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    var FFRT: s4_A2_per_g_per_m2_per_mol_times_1e3 {pub: in};
    var FRT: per_mV {pub: in};
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var V: mV {pub: in};
    var alpha_fCa: dimensionless;
    var beta_fCa: dimensionless;
    var d: dimensionless {init: 3.94925342652924281e-04};
    var d1: mS_per_uF {init: 1.29662941897219994e+01};
    var d2: mV {init: 7.07914596471100044};
    var d3: mS_per_uF;
    var d4: mV;
    var d5: dimensionless {init: 4.49094155069999987e-02};
    var d6: mV;
    var f: dimensionless {init: 1.70990105585540286e-01};
    var f1: mS_per_uF {init: 5.12589825999999987e-04};
    var f2: mV;
    var f3: mS_per_uF;
    var f4: mV;
    var f5: dimensionless {init: 1.93121122351431995e+03};
    var f6: mV {init: 5.73002749969900016};
    var fCa: dimensionless {init: 8.77798946134088598e-01};
    var fCa_inf: dimensionless;
    var gamma_fCa: dimensionless;
    var i_CaL: A_per_F {pub: out};
    var i_CaL_Ca: A_per_F {pub: out};
    var i_CaL_K: A_per_F {pub: out};
    var i_CaL_Na: A_per_F {pub: out};
    var ibarca: A_per_F;
    var ibark: A_per_F;
    var ibarna: A_per_F;
    var ical_d_a: mS_per_uF;
    var ical_d_b: mS_per_uF;
    var ical_d_inf: dimensionless;
    var ical_d_tau: ms;
    var ical_f_a: mS_per_uF;
    var ical_f_b: mS_per_uF;
    var ical_f_inf: dimensionless;
    var ical_f_tau: ms;
    var k_fca: dimensionless;
    var p_CaL: L_per_F_per_ms_times_1e0 {init: 3.08027691378999990e-01};
    var p_CaL_Ca: L_per_F_per_ms_times_1e0;
    var p_CaL_K: L_per_F_per_ms_times_1e0;
    var p_CaL_Na: L_per_F_per_ms_times_1e0;
    var p_CaL_shannonCa: dimensionless {init: 0.00054};
    var p_CaL_shannonCap: dimensionless;
    var p_CaL_shannonK: dimensionless {init: 2.7e-07};
    var p_CaL_shannonKp: dimensionless;
    var p_CaL_shannonNa: dimensionless {init: 1.5e-08};
    var p_CaL_shannonNap: dimensionless;
    var p_CaL_shannonTot: dimensionless;
    var scale: dimensionless {init: 1.2};
    var tau_fCa: ms {init: 2.0};
    var taud_const: ms {init: 1.65824694683000007};
    var tauf_const: ms {init: 1.00462559171102995e+02};
    var time: ms {pub: in};
    alpha_fCa = 1.0{dimensionless}/(1.0{dimensionless}+pow(scale*Cai/0.000325{mM}, 8.0{dimensionless}));
    beta_fCa = 0.1{dimensionless}/(1.0{dimensionless}+exp((scale*Cai-0.0005{mM})/0.0001{mM}));
    ode(d, time) = (ical_d_inf-d)/ical_d_tau;
    d3 = d5*d1;
    d4 = 1.0{dimensionless}/(1.0{dimensionless}/d2+1.0{dimensionless}/d6);
    d6 = -6.90988036924199989{mV};
    ode(f, time) = (ical_f_inf-f)/ical_f_tau;
    f2 = -4.95057120338699974e1{mV};
    f3 = f5*f1;
    f4 = 1.0{dimensionless}/(1.0{dimensionless}/f2+1.0{dimensionless}/f6);
    ode(fCa, time) = k_fca*(fCa_inf-fCa)/tau_fCa;
    fCa_inf = (alpha_fCa+beta_fCa+gamma_fCa+0.23{dimensionless})/1.46{dimensionless};
    gamma_fCa = 0.2{dimensionless}/(1.0{dimensionless}+exp((scale*Cai-0.00075{mM})/0.0008{mM}));
    i_CaL = i_CaL_Ca+i_CaL_Na+i_CaL_K;
    i_CaL_Ca = ibarca*d*f*fCa;
    i_CaL_K = ibark*d*f*fCa;
    i_CaL_Na = ibarna*d*f*fCa;
    ibarca = p_CaL_Ca*4.0{dimensionless}*V*FFRT*(0.341{dimensionless}*Cai*exp(2.0{dimensionless}*V*FRT)-0.341{dimensionless}*Cao)/(exp(2.0{dimensionless}*V*FRT)-1.0{dimensionless});
    ibark = p_CaL_K*V*FFRT*(0.75{dimensionless}*Ki*exp(V*FRT)-0.75{dimensionless}*Ko)/(exp(V*FRT)-1.0{dimensionless});
    ibarna = p_CaL_Na*V*FFRT*(0.75{dimensionless}*Nai*exp(V*FRT)-0.75{dimensionless}*Nao)/(exp(V*FRT)-1.0{dimensionless});
    ical_d_a = d1*exp(V/d2);
    ical_d_b = d3*exp(V/d4);
    ical_d_inf = ical_d_a/(ical_d_a+ical_d_b);
    ical_d_tau = 1.0{dimensionless}/(ical_d_a+ical_d_b)+taud_const;
    ical_f_a = f1*exp(V/f2);
    ical_f_b = f3*exp(V/f4);
    ical_f_inf = ical_f_a/(ical_f_a+ical_f_b);
    ical_f_tau = 1.0{dimensionless}/(ical_f_a+ical_f_b)+tauf_const;
    k_fca = sel
      case (fCa_inf > fCa) and (V > -60.0{mV}):
        0.0{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
    p_CaL_Ca = p_CaL_shannonCap*p_CaL;
    p_CaL_K = p_CaL_shannonKp*p_CaL;
    p_CaL_Na = p_CaL_shannonNap*p_CaL;
    p_CaL_shannonCap = p_CaL_shannonCa/p_CaL_shannonTot;
    p_CaL_shannonKp = p_CaL_shannonK/p_CaL_shannonTot;
    p_CaL_shannonNap = p_CaL_shannonNa/p_CaL_shannonTot;
    p_CaL_shannonTot = p_CaL_shannonCa+p_CaL_shannonNa+p_CaL_shannonK;
  enddef;

  def comp icat as
    var E_Ca: mV {pub: in};
    var V: mV {pub: in};
    var d: dimensionless {init: 2.70195573471577175e-04};
    var f: dimensionless {init: 7.56032904368393432e-01};
    var g_CaT: mS_per_uF {init: 0.185};
    var i_CaT: A_per_F {pub: out};
    var icat_d_inf: dimensionless;
    var icat_d_tau: ms;
    var icat_f_inf: dimensionless;
    var icat_f_tau: ms;
    var time: ms {pub: in};
    ode(d, time) = (icat_d_inf-d)/icat_d_tau;
    ode(f, time) = (icat_f_inf-f)/icat_f_tau;
    i_CaT = g_CaT*d*f*(V-E_Ca);
    icat_d_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+26.3{mV})/(-6.0{mV})));
    icat_d_tau = 1.0{dimensionless}/(1.068{mS_per_uF}*exp((V+26.3{mV})/30.0{mV})+1.068{mS_per_uF}*exp((V+26.3{mV})/(-30.0{mV})));
    icat_f_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+61.7{mV})/5.6{mV}));
    icat_f_tau = 1.0{dimensionless}/(0.0153{mS_per_uF}*exp(-(V+61.7{mV})/83.3{mV})+0.015{mS_per_uF}*exp((V+61.7{mV})/15.38{mV}));
  enddef;

  def comp ifunny as
    var E_K: mV {pub: in};
    var E_Na: mV {pub: in};
    var Na_frac: dimensionless;
    var NatoK_ratio: dimensionless {init: 0.491};
    var V: mV {pub: in};
    var Xf: dimensionless {init: 6.40338504912615469e-03};
    var g_f: mS_per_uF {init: 0.0435};
    var i_f: A_per_F {pub: out};
    var i_fK: A_per_F {pub: out};
    var i_fNa: A_per_F {pub: out};
    var ifunny_Xf_a: mS_per_uF;
    var ifunny_Xf_b: mS_per_uF;
    var ifunny_Xf_inf: dimensionless;
    var ifunny_Xf_tau: ms;
    var time: ms {pub: in};
    var xF1: mS_per_uF {init: 5.78970000000000002e-07};
    var xF2: mV;
    var xF3: mS_per_uF;
    var xF4: mV;
    var xF5: dimensionless {init: 2.00866502378844016e+04};
    var xF6: mV {init: 1.02023528452800001e+01};
    var xF_const: ms {init: 2.39452913465299986e+01};
    Na_frac = NatoK_ratio/(NatoK_ratio+1.0{dimensionless});
    ode(Xf, time) = (ifunny_Xf_inf-Xf)/ifunny_Xf_tau;
    i_f = i_fNa+i_fK;
    i_fK = (1.0{dimensionless}-Na_frac)*g_f*Xf*(V-E_K);
    i_fNa = Na_frac*g_f*Xf*(V-E_Na);
    ifunny_Xf_a = xF1*exp(V/xF2);
    ifunny_Xf_b = xF3*exp(V/xF4);
    ifunny_Xf_inf = ifunny_Xf_a/(ifunny_Xf_a+ifunny_Xf_b);
    ifunny_Xf_tau = 1.0{dimensionless}/(ifunny_Xf_a+ifunny_Xf_b)+xF_const;
    xF2 = -1.45897121702000003e1{mV};
    xF3 = xF5*xF1;
    xF4 = 1.0{dimensionless}/(1.0{dimensionless}/xF2+1.0{dimensionless}/xF6);
  enddef;

  def comp ik1 as
    var E_K: mV {pub: in};
    var Ko: mM {pub: in};
    var V: mV {pub: in};
    var g_K1: mS_per_uF {init: 1.33785777797606004e-01};
    var i_K1: A_per_F {pub: out};
    var ik1_inf_a: mS_per_uF;
    var ik1_inf_b: mS_per_uF;
    var inf: dimensionless;
    var xK11: mS_per_uF {init: 4.77994972217041014e-01};
    var xK12: mV {init: 2.72427558793486995e+01};
    var xK13: mV {init: 4.92502331781412028};
    var xK14: mV {init: 8.72223760006881932};
    var xK15: mV {init: 5.66361974998243980e+01};
    i_K1 = g_K1*sqrt(Ko/5.4{mM})*inf*(V-E_K);
    ik1_inf_a = xK11*exp((V+xK13)/xK12);
    ik1_inf_b = 1.0{mS_per_uF}*exp((V+xK15)/xK14);
    inf = ik1_inf_a/(ik1_inf_a+ik1_inf_b);
  enddef;

  def comp ikr as
    var E_K: mV {pub: in};
    var Ko: mM {pub: in};
    var V: mV {pub: in};
    var Xr1: dimensionless {init: 3.09767485715433222e-01};
    var Xr1_1: mS_per_uF {init: 5.74885237435000026e-03};
    var Xr1_2: mV {init: 1.36234926362576001e+01};
    var Xr1_3: mS_per_uF;
    var Xr1_4: mV;
    var Xr1_5: dimensionless {init: 4.76305711818360011e-02};
    var Xr1_6: mV;
    var Xr2: dimensionless {init: 4.50577185148518577e-01};
    var Xr2_1: mS_per_uF {init: 1.24566405268270002e-02};
    var Xr2_2: mV;
    var Xr2_3: mS_per_uF;
    var Xr2_4: mV;
    var Xr2_5: dimensionless {init: 3.73426331501040991e+01};
    var Xr2_6: mV {init: 2.20919642353902006e+01};
    var g_Kr: mS_per_uF {init: 0.218025};
    var i_Kr: A_per_F {pub: out};
    var ikr_Xr1_a: mS_per_uF;
    var ikr_Xr1_b: mS_per_uF;
    var ikr_Xr1_inf: dimensionless;
    var ikr_Xr1_tau: ms;
    var ikr_Xr2_a: mS_per_uF;
    var ikr_Xr2_b: mS_per_uF;
    var ikr_Xr2_inf: dimensionless;
    var ikr_Xr2_tau: ms;
    var tau_1_offset: ms {init: 50.0};
    var tau_2_offset: ms {init: 0.0};
    var time: ms {pub: in};
    ode(Xr1, time) = (ikr_Xr1_inf-Xr1)/ikr_Xr1_tau;
    Xr1_3 = Xr1_5*Xr1_1;
    Xr1_4 = 1.0{dimensionless}/(1.0{dimensionless}/Xr1_2+1.0{dimensionless}/Xr1_6);
    Xr1_6 = -7.06808742965549008{mV};
    ode(Xr2, time) = (ikr_Xr2_inf-Xr2)/ikr_Xr2_tau;
    Xr2_2 = -2.59944581644376989e1{mV};
    Xr2_3 = Xr2_5*Xr2_1;
    Xr2_4 = 1.0{dimensionless}/(1.0{dimensionless}/Xr2_2+1.0{dimensionless}/Xr2_6);
    i_Kr = g_Kr*sqrt(Ko/5.4{mM})*Xr1*Xr2*(V-E_K);
    ikr_Xr1_a = Xr1_1*exp(V/Xr1_2);
    ikr_Xr1_b = Xr1_3*exp(V/Xr1_4);
    ikr_Xr1_inf = ikr_Xr1_a/(ikr_Xr1_a+ikr_Xr1_b);
    ikr_Xr1_tau = 1.0{dimensionless}/(ikr_Xr1_a+ikr_Xr1_b)+tau_1_offset;
    ikr_Xr2_a = Xr2_1*exp(V/Xr2_2);
    ikr_Xr2_b = Xr2_3*exp(V/Xr2_4);
    ikr_Xr2_inf = ikr_Xr2_a/(ikr_Xr2_a+ikr_Xr2_b);
    ikr_Xr2_tau = 1.0{dimensionless}/(ikr_Xr2_a+ikr_Xr2_b)+tau_2_offset;
  enddef;

  def comp iks as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var Xs: dimensionless {init: 1.53788281650948710e-01};
    var g_Ks: mS_per_uF {init: 0.0077};
    var i_Ks: A_per_F {pub: out};
    var iks_Xs_a: mS_per_uF;
    var iks_Xs_b: mS_per_uF;
    var iks_Xs_inf: dimensionless;
    var iks_Xs_tau: ms;
    var ks1: mS_per_uF {init: 1.16558447999999992e-03};
    var ks2: mV {init: 6.67268386758935958e+04};
    var ks3: mS_per_uF;
    var ks4: mV;
    var ks5: dimensionless {init: 2.80458908250000027e-01};
    var ks6: mV;
    var tauks_const: ms {init: 4.74115000000000034e-06};
    var time: ms {pub: in};
    ode(Xs, time) = (iks_Xs_inf-Xs)/iks_Xs_tau;
    i_Ks = g_Ks*sqr(Xs)*(V-E_K);
    iks_Xs_a = ks1*exp(V/ks2);
    iks_Xs_b = ks3*exp(V/ks4);
    iks_Xs_inf = iks_Xs_a/(iks_Xs_a+iks_Xs_b);
    iks_Xs_tau = 1.0{dimensionless}/(iks_Xs_a+iks_Xs_b)+tauks_const;
    ks3 = ks5*ks1;
    ks4 = 1.0{dimensionless}/(1.0{dimensionless}/ks2+1.0{dimensionless}/ks6);
    ks6 = -1.88669715729099998e1{mV};
  enddef;

  def comp ileak as
    var Ca_SR: mM {pub: in};
    var Cai: mM {pub: in};
    var V_leak: mS_per_uF;
    var i_leak: mM_per_ms {pub: out};
    V_leak = 8e-05{dimensionless}*0.02{mS_per_uF};
    i_leak = (Ca_SR-Cai)*V_leak;
  enddef;

  def comp ina as
    var E_Na: mV {pub: in};
    var V: mV {pub: in};
    var g_Na: mS_per_uF {init: 9.72061340924100037};
    var h: dimensionless {init: 7.39543607812429227e-01};
    var h1: mS_per_uF {init: 3.62659886399999999e-03};
    var h2: mV;
    var h3: mS_per_uF;
    var h4: mV;
    var h5: dimensionless {init: 9.66329497711473959e+03};
    var h6: mV {init: 7.39550356461299963};
    var i_Na: A_per_F {pub: out};
    var ina_h_a: mS_per_uF;
    var ina_h_b: mS_per_uF;
    var ina_h_inf: dimensionless;
    var ina_h_tau: ms;
    var ina_j_a: mS_per_uF;
    var ina_j_b: mS_per_uF;
    var ina_j_inf: dimensionless;
    var ina_j_tau: ms;
    var ina_m_a: mS_per_uF;
    var ina_m_b: mS_per_uF;
    var ina_m_inf: dimensionless;
    var ina_m_tau: ms;
    var j: dimensionless {init: 1.24515982574504899e-01};
    var j1: mS_per_uF {init: 5.12257182000000044e-04};
    var j2: mV;
    var j3: mS_per_uF;
    var j4: mV;
    var j5: dimensionless;
    var j6: mV;
    var m: dimensionless {init: 2.97549962926413614e-02};
    var m1: mS_per_uF {init: 1.08045846384818006e+02};
    var m2: mV {init: 1.31070157339409992e+01};
    var m3: mS_per_uF;
    var m4: mV;
    var m5: dimensionless {init: 2.32691436700000007e-03};
    var m6: mV;
    var tau_h_const: ms {init: 1.67331502516000014e-01};
    var tau_j_const: ms {init: 9.51088724962000032e-01};
    var tau_m_const: ms {init: 3.19775803839999970e-02};
    var time: ms {pub: in};
    ode(h, time) = (ina_h_inf-h)/ina_h_tau;
    h2 = -1.98393588600259996e1{mV};
    h3 = h5*h1;
    h4 = 1.0{dimensionless}/(1.0{dimensionless}/h2+1.0{dimensionless}/h6);
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
    ina_h_a = h1*exp(V/h2);
    ina_h_b = h3*exp(V/h4);
    ina_h_inf = ina_h_a/(ina_h_a+ina_h_b);
    ina_h_tau = 1.0{dimensionless}/(ina_h_a+ina_h_b)+tau_h_const;
    ina_j_a = j1*exp(V/j2);
    ina_j_b = j3*exp(V/j4);
    ina_j_inf = ina_j_a/(ina_j_a+ina_j_b);
    ina_j_tau = 1.0{dimensionless}/(ina_j_a+ina_j_b)+tau_j_const;
    ina_m_a = m1*exp(V/m2);
    ina_m_b = m3*exp(V/m4);
    ina_m_inf = ina_m_a/(ina_m_a+ina_m_b);
    ina_m_tau = 1.0{dimensionless}/(ina_m_a+ina_m_b)+tau_m_const;
    ode(j, time) = (ina_j_inf-j)/ina_j_tau;
    j2 = -6.65837555026519965e01{mV};
    j3 = j5*j1;
    j4 = 1.0{dimensionless}/(1.0{dimensionless}/j2+1.0{dimensionless}/j6);
    j5 = h5;
    j6 = h6;
    ode(m, time) = (ina_m_inf-m)/ina_m_tau;
    m3 = m5*m1;
    m4 = 1.0{dimensionless}/(1.0{dimensionless}/m2+1.0{dimensionless}/m6);
    m6 = -7.91772628951300028{mV};
  enddef;

  def comp inaca as
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    var FRT: per_mV {pub: in};
    var KmCa: mM {init: 1.38};
    var KmNai: mM {init: 87.5};
    var Ksat: dimensionless {init: 0.1};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var V: mV {pub: in};
    var alpha: dimensionless;
    var gamma: dimensionless;
    var i_NaCa: A_per_F {pub: out};
    var kNaCa: A_per_F;
    alpha = 2.5{dimensionless}*1.1{dimensionless};
    gamma = 0.35{dimensionless}*2.0{dimensionless};
    i_NaCa = kNaCa*(exp(gamma*V*FRT)*pow(Nai, 3.0{dimensionless})*Cao-exp((gamma-1.0{dimensionless})*V*FRT)*pow(Nao, 3.0{dimensionless})*Cai*alpha)/((pow(KmNai, 3.0{dimensionless})+pow(Nao, 3.0{dimensionless}))*(KmCa+Cao)*(1.0{dimensionless}+Ksat*exp((gamma-1.0{dimensionless})*V*FRT)));
    kNaCa = 1000.0{dimensionless}*1.1{A_per_F};
  enddef;

  def comp inak as
    var FRT: per_mV {pub: in};
    var Km_K: mM {init: 1.0};
    var Km_Na: mM {init: 40.0};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var PNaK: A_per_F;
    var V: mV {pub: in};
    var i_NaK: A_per_F {pub: out};
    PNaK = 1.362{dimensionless}*1.818{A_per_F};
    i_NaK = PNaK*Ko*Nai/((Ko+Km_K)*(Nai+Km_Na)*(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*FRT)+0.0353{dimensionless}*exp(-V*FRT)));
  enddef;

  def comp ipca as
    var Cai: mM {pub: in};
    var KPCa: mM {init: 0.0005};
    var g_PCa: A_per_F;
    var i_PCa: A_per_F {pub: out};
    g_PCa = 0.025{A_per_F}*10.5{dimensionless};
    i_PCa = g_PCa*Cai/(Cai+KPCa);
  enddef;

  def comp irel as
    var Ca_SR: mM {pub: in};
    var Cai: mM {pub: in};
    var I: dimensionless {init: 1.42153622323011597e-02};
    var MaxSR: dimensionless {init: 15.0};
    var MinSR: dimensionless {init: 1.0};
    var O: dimensionless {init: 1.65045105312396393e-04};
    var R: dimensionless {init: 1.13120363433751106e-02};
    var RI: dimensionless;
    var V_SR: um3 {pub: in};
    var Vc: um3 {pub: in};
    var ec50SR: mM {init: 0.45};
    var i_rel: mM_per_ms {pub: out};
    var kCaSR: dimensionless;
    var kiCa: per_mM_per_ms;
    var kiSRCa: per_mM_per_ms;
    var kim: mS_per_uF;
    var koCa: per_mM2_per_ms;
    var koSRCa: per_mM2_per_ms;
    var kom: mS_per_uF;
    var ks: mS_per_uF {init: 12.5};
    var time: ms {pub: in};
    ode(I, time) = kiSRCa*Cai*O-kim*I-kom*I+koSRCa*sqr(Cai)*RI;
    ode(O, time) = koSRCa*sqr(Cai)*R-kom*O-kiSRCa*Cai*O+kim*I;
    ode(R, time) = kim*RI-kiSRCa*Cai*R-koSRCa*sqr(Cai)*R+kom*O;
    RI = 1.0{dimensionless}-R-O-I;
    i_rel = ks*O*(Ca_SR-Cai)*(V_SR/Vc);
    kCaSR = MaxSR-(MaxSR-MinSR)/(1.0{dimensionless}+pow(ec50SR/Ca_SR, 2.5{dimensionless}));
    kiCa = 54.0{dimensionless}*0.3425{per_mM_per_ms};
    kiSRCa = kiCa*kCaSR;
    kim = 0.001{dimensionless}*0.5571{mS_per_uF};
    koCa = 56320.0{dimensionless}*11.43025{per_mM2_per_ms};
    koSRCa = koCa/kCaSR;
    kom = 1.5{dimensionless}*0.1429{mS_per_uF};
  enddef;

  def comp ito as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var g_to: mS_per_uF {init: 1.17833333333299997e-01};
    var i_to: A_per_F {pub: out};
    var ito_r_a: mS_per_uF;
    var ito_r_b: mS_per_uF;
    var ito_r_inf: dimensionless;
    var ito_r_tau: ms;
    var ito_s_a: mS_per_uF;
    var ito_s_b: mS_per_uF;
    var ito_s_inf: dimensionless;
    var ito_s_tau: ms;
    var r: dimensionless {init: 2.67597833344160611e-04};
    var r1: mS_per_uF {init: 5.53614181712999975e-02};
    var r2: mV {init: 1.16842023429669002e+01};
    var r3: mS_per_uF;
    var r4: mV;
    var r5: dimensionless {init: 3.98918108037750008};
    var r6: mV;
    var s: dimensionless {init: 7.46802810614006107e-01};
    var s1: mS_per_uF {init: 3.44230944300000013e-04};
    var s2: mV;
    var s3: mS_per_uF;
    var s4: mV;
    var s5: dimensionless {init: 1.86760536909694991e+02};
    var s6: mV {init: 8.18093387332270083};
    var tau_r_const: ms {init: 6.96758421171499998e-01};
    var tau_s_const: ms {init: 1.12244577239468999e+01};
    var time: ms {pub: in};
    i_to = g_to*r*s*(V-E_K);
    ito_r_a = r1*exp(V/r2);
    ito_r_b = r3*exp(V/r4);
    ito_r_inf = ito_r_a/(ito_r_a+ito_r_b);
    ito_r_tau = 1.0{dimensionless}/(ito_r_a+ito_r_b)+tau_r_const;
    ito_s_a = s1*exp(V/s2);
    ito_s_b = s3*exp(V/s4);
    ito_s_inf = ito_s_a/(ito_s_a+ito_s_b);
    ito_s_tau = 1.0{dimensionless}/(ito_s_a+ito_s_b)+tau_s_const;
    ode(r, time) = (ito_r_inf-r)/ito_r_tau;
    r3 = r5*r1;
    r4 = 1.0{dimensionless}/(1.0{dimensionless}/r2+1.0{dimensionless}/r6);
    r6 = -1.10471393012032006e1{mV};
    ode(s, time) = (ito_s_inf-s)/ito_s_tau;
    s2 = -1.76344722898096009e1{mV};
    s3 = s5*s1;
    s4 = 1.0{dimensionless}/(1.0{dimensionless}/s2+1.0{dimensionless}/s6);
  enddef;

  def comp iup as
    var Cai: mM {pub: in};
    var Kup: mM;
    var VmaxUp: mM_per_ms;
    var i_up: mM_per_ms {pub: out};
    Kup = 0.00025{dimensionless}*0.702{mM};
    VmaxUp = 0.000425{dimensionless}*0.26{mM_per_ms};
    i_up = VmaxUp/(1.0{dimensionless}+sqr(Kup)/sqr(Cai));
  enddef;

  def comp ki as
    var Cm: pF {pub: in};
    var F: C_per_mmol {pub: in};
    var Ki: mM {pub: out, init: 1.04748824394112106e+02};
    var Vc: um3 {pub: in};
    var i_CaL_K: A_per_F {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_fK: A_per_F {pub: in};
    var i_to: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(Ki, time) = -Cm/(F*Vc)*(+i_K1+i_to+i_Kr+i_Ks+i_fK-2.0{dimensionless}*i_NaK+i_CaL_K);
  enddef;

  def comp membrane as
    var V: mV {pub: out, init: -7.55966016388546791e+01};
    var i_CaL: A_per_F {pub: in};
    var i_CaT: A_per_F {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_PCa: A_per_F {pub: in};
    var i_b_Ca: A_per_F {pub: in};
    var i_b_Na: A_per_F {pub: in};
    var i_f: A_per_F {pub: in};
    var i_stim: A_per_F {pub: in};
    var i_to: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(V, time) = -(+i_K1+i_to+i_Kr+i_Ks+i_CaL+i_CaT+i_NaK+i_Na+i_NaCa+i_PCa+i_f+i_b_Na+i_b_Ca+i_stim);
  enddef;

  def comp nai as
    var Cm: pF {pub: in};
    var F: C_per_mmol {pub: in};
    var Nai: mM {pub: out, init: 7.16928091250999167};
    var Vc: um3 {pub: in};
    var i_CaL_Na: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_b_Na: A_per_F {pub: in};
    var i_fNa: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(Nai, time) = -Cm/(F*Vc)*(+i_Na+i_b_Na+i_fNa+3.0{dimensionless}*i_NaK+3.0{dimensionless}*i_NaCa+i_CaL_Na);
  enddef;

  def comp phys as
    var F: C_per_mmol {pub: out, init: 9.64853415000000041e+01};
    var FFRT: s4_A2_per_g_per_m2_per_mol_times_1e3 {pub: out};
    var FRT: per_mV {pub: out};
    var R: J_per_mol_per_K {init: 8.314472};
    var RTF: mV {pub: out};
    var T: kelvin {init: 310.0};
    FFRT = F*FRT;
    FRT = F/(R*T);
    RTF = R*T/F;
  enddef;

  def comp stimulus as
    var amplitude: A_per_F;
    var i_stim: A_per_F {pub: out};
    var pace: dimensionless {pub: in};
    amplitude = -3.0{A_per_F};
    i_stim = pace*amplitude;
  enddef;
  def map between cai and engine for
    vars time and time;
  enddef;
  def map between cai and erev for
    vars Cai and Cai;
  enddef;
  def map between cai and geom for
    vars Cm and Cm;
    vars Vc and Vc;
  enddef;
  def map between cai and ibca for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between cai and ical for
    vars Cai and Cai;
    vars i_CaL_Ca and i_CaL_Ca;
  enddef;
  def map between cai and icat for
    vars i_CaT and i_CaT;
  enddef;
  def map between cai and ileak for
    vars Cai and Cai;
    vars i_leak and i_leak;
  enddef;
  def map between cai and inaca for
    vars Cai and Cai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between cai and ipca for
    vars Cai and Cai;
    vars i_PCa and i_PCa;
  enddef;
  def map between cai and irel for
    vars Cai and Cai;
    vars i_rel and i_rel;
  enddef;
  def map between cai and iup for
    vars Cai and Cai;
    vars i_up and i_up;
  enddef;
  def map between cai and phys for
    vars F and F;
  enddef;
  def map between casr and engine for
    vars time and time;
  enddef;
  def map between casr and geom for
    vars V_SR and V_SR;
    vars Vc and Vc;
  enddef;
  def map between casr and ileak for
    vars Ca_SR and Ca_SR;
    vars i_leak and i_leak;
  enddef;
  def map between casr and irel for
    vars Ca_SR and Ca_SR;
    vars i_rel and i_rel;
  enddef;
  def map between casr and iup for
    vars i_up and i_up;
  enddef;
  def map between engine and ical for
    vars time and time;
  enddef;
  def map between engine and icat for
    vars time and time;
  enddef;
  def map between engine and ifunny for
    vars time and time;
  enddef;
  def map between engine and ikr for
    vars time and time;
  enddef;
  def map between engine and iks for
    vars time and time;
  enddef;
  def map between engine and ina for
    vars time and time;
  enddef;
  def map between engine and irel for
    vars time and time;
  enddef;
  def map between engine and ito for
    vars time and time;
  enddef;
  def map between engine and ki for
    vars time and time;
  enddef;
  def map between engine and membrane for
    vars time and time;
  enddef;
  def map between engine and nai for
    vars time and time;
  enddef;
  def map between engine and stimulus for
    vars pace and pace;
  enddef;
  def map between erev and extra for
    vars Cao and Cao;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between erev and ibca for
    vars E_Ca and E_Ca;
  enddef;
  def map between erev and ibna for
    vars E_Na and E_Na;
  enddef;
  def map between erev and icat for
    vars E_Ca and E_Ca;
  enddef;
  def map between erev and ifunny for
    vars E_K and E_K;
    vars E_Na and E_Na;
  enddef;
  def map between erev and ik1 for
    vars E_K and E_K;
  enddef;
  def map between erev and ikr for
    vars E_K and E_K;
  enddef;
  def map between erev and iks for
    vars E_K and E_K;
  enddef;
  def map between erev and ina for
    vars E_Na and E_Na;
  enddef;
  def map between erev and ito for
    vars E_K and E_K;
  enddef;
  def map between erev and ki for
    vars Ki and Ki;
  enddef;
  def map between erev and nai for
    vars Nai and Nai;
  enddef;
  def map between erev and phys for
    vars RTF and RTF;
  enddef;
  def map between extra and ical for
    vars Cao and Cao;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between extra and ik1 for
    vars Ko and Ko;
  enddef;
  def map between extra and ikr for
    vars Ko and Ko;
  enddef;
  def map between extra and inaca for
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between extra and inak for
    vars Ko and Ko;
  enddef;
  def map between geom and irel for
    vars V_SR and V_SR;
    vars Vc and Vc;
  enddef;
  def map between geom and ki for
    vars Cm and Cm;
    vars Vc and Vc;
  enddef;
  def map between geom and nai for
    vars Cm and Cm;
    vars Vc and Vc;
  enddef;
  def map between ibca and membrane for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between ibna and membrane for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between ibna and nai for
    vars i_b_Na and i_b_Na;
  enddef;
  def map between ical and ki for
    vars Ki and Ki;
    vars i_CaL_K and i_CaL_K;
  enddef;
  def map between ical and membrane for
    vars V and V;
    vars i_CaL and i_CaL;
  enddef;
  def map between ical and nai for
    vars Nai and Nai;
    vars i_CaL_Na and i_CaL_Na;
  enddef;
  def map between ical and phys for
    vars FFRT and FFRT;
    vars FRT and FRT;
  enddef;
  def map between icat and membrane for
    vars V and V;
    vars i_CaT and i_CaT;
  enddef;
  def map between ifunny and ki for
    vars i_fK and i_fK;
  enddef;
  def map between ifunny and membrane for
    vars V and V;
    vars i_f and i_f;
  enddef;
  def map between ifunny and nai for
    vars i_fNa and i_fNa;
  enddef;
  def map between ik1 and ki for
    vars i_K1 and i_K1;
  enddef;
  def map between ik1 and membrane for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between ikr and ki for
    vars i_Kr and i_Kr;
  enddef;
  def map between ikr and membrane for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between iks and ki for
    vars i_Ks and i_Ks;
  enddef;
  def map between iks and membrane for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between ina and membrane for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between ina and nai for
    vars i_Na and i_Na;
  enddef;
  def map between inaca and membrane for
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between inaca and nai for
    vars Nai and Nai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between inaca and phys for
    vars FRT and FRT;
  enddef;
  def map between inak and ki for
    vars i_NaK and i_NaK;
  enddef;
  def map between inak and membrane for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between inak and nai for
    vars Nai and Nai;
    vars i_NaK and i_NaK;
  enddef;
  def map between inak and phys for
    vars FRT and FRT;
  enddef;
  def map between ipca and membrane for
    vars i_PCa and i_PCa;
  enddef;
  def map between ito and ki for
    vars i_to and i_to;
  enddef;
  def map between ito and membrane for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between ki and phys for
    vars F and F;
  enddef;
  def map between membrane and stimulus for
    vars i_stim and i_stim;
  enddef;
  def map between nai and phys for
    vars F and F;
  enddef;
enddef;
