def model corrias_rabbit_purkinje_model_2011 as
  def unit conductance_units as
    unit siemens {pref: nano};
  enddef;
  def unit picofarads as
    unit farad {pref: pico};
  enddef;
  def unit voltage_units as
    unit volt {pref: milli};
  enddef;
  def unit volume_units as
    unit meter {pref: micro, expo: 3};
  enddef;
  def unit inverse_voltage_units as
    unit voltage_units {expo: -1};
  enddef;
  def unit inverse_voltage_units_square as
    unit voltage_units {expo: -2};
  enddef;
  def unit Inverse_Voltage_Units_per_time_units as
    unit inverse_voltage_units;
    unit time_units {expo: -1};
  enddef;
  def unit time_units as
    unit second {pref: milli};
  enddef;
  def unit current_units as
    unit ampere {pref: pico};
  enddef;
  def unit rate_constants_units as
    unit time_units {expo: -1};
  enddef;
  def unit capacitance_units as
    unit farad {pref: pico};
  enddef;
  def unit Temperature_units as
    unit kelvin;
  enddef;
  def unit Inverse_Temperature_units_times_conductance as
    unit Temperature_units {expo: -1};
    unit conductance_units;
  enddef;
  def unit F_units as
    unit mole {pref: micro, expo: -1};
    unit coulomb {pref: micro};
  enddef;
  def unit R_units as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit inverse_millimolar_fourth_power as
    unit millimolar {expo: -4};
  enddef;
  def unit millimolar_power_4 as
    unit millimolar {expo: 4};
  enddef;
  def unit micromolar_per_time_units as
    unit mole {pref: micro};
    unit litre {expo: -1};
    unit time_units {expo: -1};
  enddef;
  def unit per_millimolar as
    unit litre;
    unit mole {pref: milli, expo: -1};
  enddef;
  def unit current_per_millimolar_units as
    unit current_units;
    unit per_millimolar;
  enddef;
  def unit millimolar_per_second as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_second_per_millivolt as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit millimole_to_nanomole as
    unit mole {pref: nano};
    unit mole {pref: milli, expo: -1};
  enddef;
  def unit microcoulomb_to_picocoulomb as
    unit coulomb {pref: pico};
    unit coulomb {pref: micro, expo: -1};
  enddef;
  def unit molar_to_millimolar as
    unit millimolar;
    unit molar {expo: -1};
  enddef;
  def unit liter_over_cubic_microns as
    unit liter {expo: 1};
    unit volume_units {expo: -1};
  enddef;
  def unit milliA_over_picoA as
    unit molar {expo: 12};
    unit molar {expo: -6};
  enddef;

  def comp Time as
    var time: time_units {pub: out, priv: out};
  enddef;

  def comp Environment as
    var T: Temperature_units {init: 310.0, priv: out};
    var F: F_units {init: 96485.3415, pub: out, priv: out};
    var R: R_units {init: 8314.472, priv: out};
    var Ca_o: millimolar {init: 2.0, pub: out, priv: out};
    var Na_o: millimolar {init: 140, pub: out, priv: out};
    var K_o: millimolar {init: 5.4, pub: out, priv: out};
    var FoRT: inverse_voltage_units {pub: out, priv: out};
    var RToF: voltage_units {pub: out, priv: out};
    FoRT = F/(R*T);
    RToF = R*T/F;
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: capacitance_units {init: 69.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var Vm: voltage_units {init: -88.34, priv: out};
    var time: time_units {pub: in, priv: out};
    var Ca_i_peripheral: millimolar {init: 0.00001, pub: out, priv: out};
    var Ca_i_bulk: millimolar {init: 0.000032, pub: out, priv: out};
    var Ca_sr: millimolar {init: 0.17, pub: out, priv: out};
    var Na_i: millimolar {init: 6.7, pub: out, priv: out};
    var K_i: millimolar {init: 140, pub: out, priv: out};
    var Ca_o: millimolar {pub: in, priv: out};
    var Na_o: millimolar {pub: in, priv: out};
    var K_o: millimolar {pub: in, priv: out};
    var RToF: voltage_units {pub: in, priv: out};
    var FoRT: inverse_voltage_units {pub: in, priv: out};
    var F: F_units {pub: in, priv: out};
    var i_k1: current_units {priv: in};
    var i_to_fast: current_units {priv: in};
    var i_to_sustained: current_units {priv: in};
    var i_kr: current_units {priv: in};
    var i_ks: current_units {priv: in};
    var i_kb: current_units {priv: in};
    var i_nak: current_units {priv: in};
    var i_cal: current_units {priv: in};
    var i_cat: current_units {priv: in};
    var i_na_fast: current_units {priv: in};
    var i_na_late: current_units {priv: in};
    var i_pmca: current_units {priv: in};
    var i_cab: current_units {priv: in};
    var i_f_na: current_units {priv: in};
    var i_f_k: current_units {priv: in};
    var i_naca: current_units {priv: in};
    var i_nab: current_units {priv: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_stim: current_units;
    var i_rel_per: current_units {priv: in};
    var i_serca_per: current_units {priv: in};
    var i_serca_bulk: current_units {priv: in};
    var i_diff: current_units {priv: in};
    var i_leak: current_units {priv: in};
    var peripheral_volume: volume_units {priv: out};
    var bulk_volume: volume_units {priv: out};
    var diffusable_volume: volume_units {priv: out};
    var sr_volume: volume_units {priv: out};
    var cell_volume: volume_units {init: 13266.5, priv: out};
    var bulk_fraction: dimensionless {init: 0.6, priv: out};
    var periphery_fraction: dimensionless {init: 0.2, priv: out};
    var sr_fraction: dimensionless {init: 0.06, priv: out};
    var stim_start: time_units {init: 700};
    var stim_end: time_units {init: 9000000};
    var stim_period: time_units {init: 500};
    var stim_duration: time_units {init: 0.5};
    var stim_amplitude: current_units {init: -4320.0};
    i_stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{current_units};
    endsel;
    bulk_volume = bulk_fraction*cell_volume;
    peripheral_volume = periphery_fraction*cell_volume;
    sr_volume = sr_fraction*cell_volume;
    diffusable_volume = (bulk_fraction+periphery_fraction)*cell_volume;
    ode(Vm, time) = -1{dimensionless}*1{dimensionless}/Cm*(i_k1+i_to_fast+i_to_sustained+i_kr+i_ks+i_kb+i_nak+i_cal+i_cat+i_na_fast+i_na_late+i_pmca+i_cab+i_f_na+i_f_k+i_naca+i_nab+i_stim);
    // end of numerator
    // end of denominator
    // end of divide (equation RHS)
    ode(Ca_i_peripheral, time) = (-1{dimensionless}*i_cal+(-1{dimensionless}*i_cat)+(-1{dimensionless}*i_cab)+1{dimensionless}*i_rel_per+(-1{dimensionless}*i_serca_per)+(-1{dimensionless}*i_diff)+2{dimensionless}*i_naca+(-1{dimensionless}*i_pmca))*1000{molar_to_millimolar}/(2{dimensionless}*F*peripheral_volume);
    // end of the equation
    // end of numerator
    // end of denominator
    // end of divide (equation RHS)
    ode(Ca_i_bulk, time) = (-1{dimensionless}*i_serca_bulk+i_diff+i_leak)*1000{molar_to_millimolar}/(2{dimensionless}*F*bulk_volume);
    // end of the equation
    // end of numerator
    // end of denominator
    // end of divide (equation RHS)
    ode(Ca_sr, time) = (-1{dimensionless}*i_rel_per+(-1{dimensionless}*i_leak)+i_serca_bulk+i_serca_per)*1000{molar_to_millimolar}/(2{dimensionless}*F*sr_volume);
    // end of the equation
    // end of numerator
    // end of denominator
    // end of divide (equation RHS)
    ode(K_i, time) = (-1{dimensionless}*i_to_fast+(-1{dimensionless}*i_to_sustained)+(-1{dimensionless}*i_kr)+(-1{dimensionless}*i_ks)+(-1{dimensionless}*i_k1)+(-1{dimensionless}*i_kb)+(-1{dimensionless}*i_f_k)+(-1{dimensionless}*i_stim)+2{dimensionless}*i_nak)*1000{molar_to_millimolar}/(F*diffusable_volume);
    // end of the equation
    // end of numerator
    // end of denominator
    // end of divide (equation RHS)
    ode(Na_i, time) = (-1{dimensionless}*i_na_fast+(-1{dimensionless}*i_na_late)+(-3{dimensionless}*i_nak)+(-3{dimensionless}*i_naca)+(-1{dimensionless}*i_f_na)+(-1{dimensionless}*i_nab))*1000{molar_to_millimolar}/(F*diffusable_volume);
    // end of the equation
  enddef;
  // end of membrane component

  def comp x_Ttype as
    var Vm: voltage_units {pub: in};
    var x_inf_Ttype: dimensionless;
    var tau_x_Ttype: time_units {init: 1.0};
    var x_Ttype: dimensionless {init: 0.001337, pub: out};
    var time: time_units {pub: in};
    x_inf_Ttype = 1{dimensionless}/(1{dimensionless}+exp((Vm+47.8{voltage_units})/(-5.5{voltage_units})));
    ode(x_Ttype, time) = (x_inf_Ttype-x_Ttype)/tau_x_Ttype;
  enddef;

  def comp y_Ttype as
    var Vm: voltage_units {pub: in};
    var y_inf_Ttype: dimensionless;
    var tau_y_Ttype: time_units;
    var y_Ttype: dimensionless {init: 0.01, pub: out};
    var time: time_units {pub: in};
    y_inf_Ttype = 1{dimensionless}/(1{dimensionless}+exp((Vm+67.9{voltage_units})/3.87{voltage_units}));
    tau_y_Ttype = 1.42271{time_units}*exp(-0.05119{inverse_voltage_units}*Vm);
    ode(y_Ttype, time) = (y_inf_Ttype-y_Ttype)/tau_y_Ttype;
  enddef;

  def comp i_cat as
    var i_cat: current_units {pub: out};
    var E_Ca: voltage_units;
    var G_max_Ttype: conductance_units {init: 0.9};
    var Vm: voltage_units {pub: in, priv: out};
    var x_Ttype: dimensionless {priv: in};
    var y_Ttype: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i_peripheral: millimolar {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_Ca = 0.5{dimensionless}*RToF*ln(Ca_o/Ca_i_peripheral);
    i_cat = G_max_Ttype*x_Ttype*y_Ttype*(Vm-E_Ca);
  enddef;

  def comp x_Ltype as
    var Vm: voltage_units {pub: in};
    var x_inf_Ltype: dimensionless;
    var tau_x_Ltype: time_units {init: 0.7};
    var x_Ltype: dimensionless {init: 0.000003, pub: out};
    var time: time_units {pub: in};
    x_inf_Ltype = 1{dimensionless}/(1{dimensionless}+exp((Vm+14.6{voltage_units})/(-5.5{voltage_units})));
    ode(x_Ltype, time) = (x_inf_Ltype-x_Ltype)/tau_x_Ltype;
  enddef;

  def comp y_Ltype as
    var Vm: voltage_units {pub: in};
    var y_inf_Ltype: dimensionless;
    var tau_y_Ltype: time_units;
    var y_Ltype: dimensionless {init: 0.1, pub: out};
    var time: time_units {pub: in};
    y_inf_Ltype = 1{dimensionless}/(1{dimensionless}+exp((Vm+31.0{voltage_units})/5.54{voltage_units}));
    // end of denominator
    // end of divide
    tau_y_Ltype = 25.1{time_units}/(0.04{dimensionless}+0.7{dimensionless}*exp(-1{dimensionless}*sqr(0.028{inverse_voltage_units}*(Vm+14.5{voltage_units}))));
    // end of tau
    ode(y_Ltype, time) = (y_inf_Ltype-y_Ltype)/tau_y_Ltype;
  enddef;

  def comp y_ca_Ltype as
    var Ca_i_peripheral: millimolar {pub: in};
    var y_ca_inf_Ltype: dimensionless;
    var tau_y_ca_Ltype: time_units;
    var y_ca_Ltype: dimensionless {init: 0.7, pub: out};
    var time: time_units {pub: in};
    y_ca_inf_Ltype = 0.4{dimensionless}+0.6{dimensionless}/(1{dimensionless}+sqr(Ca_i_peripheral/0.0001{millimolar}));
    tau_y_ca_Ltype = 2.0{time_units}+80.0{time_units}/(1{dimensionless}+sqr(Ca_i_peripheral/0.0001{millimolar}));
    ode(y_ca_Ltype, time) = (y_ca_inf_Ltype-y_ca_Ltype)/tau_y_ca_Ltype;
  enddef;

  def comp i_cal as
    var i_cal: current_units {pub: out};
    var E_Ca: voltage_units;
    var G_max_Ltype: conductance_units {init: 5.4};
    var Vm: voltage_units {pub: in, priv: out};
    var x_Ltype: dimensionless {priv: in};
    var y_Ltype: dimensionless {priv: in};
    var y_ca_Ltype: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i_peripheral: millimolar {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_Ca = 0.5{dimensionless}*RToF*ln(Ca_o/Ca_i_peripheral);
    i_cal = G_max_Ltype*x_Ltype*y_Ltype*y_ca_Ltype*(Vm-E_Ca);
  enddef;

  def comp x_to_fast as
    var Vm: voltage_units {pub: in};
    var x_inf_to_fast: dimensionless;
    var tau_x_to_fast: time_units {init: 5.0};
    var x_to_fast: dimensionless {init: 0.0, pub: out};
    var time: time_units {pub: in};
    x_inf_to_fast = 1{dimensionless}/(1{dimensionless}+exp((Vm+(-7.0{voltage_units}))/(-9.0{voltage_units})));
    ode(x_to_fast, time) = (x_inf_to_fast-x_to_fast)/tau_x_to_fast;
  enddef;

  def comp y_to_fast as
    var Vm: voltage_units {pub: in};
    var y_inf_to_fast: dimensionless;
    var tau_y_to_fast: time_units {init: 350.0};
    var y_to_fast: dimensionless {init: 0.7, pub: out};
    var time: time_units {pub: in};
    y_inf_to_fast = 1{dimensionless}/(1{dimensionless}+exp((Vm+27.5{voltage_units})/8.0{voltage_units}));
    ode(y_to_fast, time) = (y_inf_to_fast-y_to_fast)/tau_y_to_fast;
  enddef;

  def comp i_to_fast as
    var i_to_fast: current_units {pub: out};
    var E_k: voltage_units;
    var G_max_to_fast: conductance_units {init: 10.0};
    var Vm: voltage_units {pub: in, priv: out};
    var x_to_fast: dimensionless {priv: in};
    var y_to_fast: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_k = RToF*ln(K_o/K_i);
    i_to_fast = G_max_to_fast*x_to_fast*y_to_fast*(Vm-E_k);
  enddef;

  def comp x_to_sustained as
    var Vm: voltage_units {pub: in};
    var x_to_sustained: dimensionless {pub: out};
    var time: time_units {pub: in};
    x_to_sustained = 1{dimensionless}/(1{dimensionless}+exp((5.0{voltage_units}-Vm)/17.0{voltage_units}));
  enddef;

  def comp i_to_sustained as
    var i_to_sustained: current_units {pub: out};
    var E_k: voltage_units;
    var G_max_to_sustained: conductance_units {init: 3.0};
    var Vm: voltage_units {pub: in, priv: out};
    var x_to_sustained: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_k = RToF*ln(K_o/K_i);
    i_to_sustained = G_max_to_sustained*x_to_sustained*(Vm-E_k);
  enddef;

  def comp x_na_fast as
    var Vm: voltage_units {pub: in};
    var x_inf_na_fast: dimensionless;
    var tau_x_na_fast: time_units {init: 0.005};
    var x_na_fast: dimensionless {init: 0.000007, pub: out};
    var time: time_units {pub: in};
    x_inf_na_fast = 1{dimensionless}/(1{dimensionless}+exp((Vm+25.0{voltage_units})/(-5.0{voltage_units})));
    ode(x_na_fast, time) = (x_inf_na_fast-x_na_fast)/tau_x_na_fast;
  enddef;

  def comp y_na_fast as
    var Vm: voltage_units {pub: in};
    var y_inf_na_fast: dimensionless;
    var tau_y_na_fast: time_units {init: 2.0};
    var y_na_fast: dimensionless {init: 0.978861, pub: out};
    var time: time_units {pub: in};
    y_inf_na_fast = 1{dimensionless}/(1{dimensionless}+exp((Vm+69.0{voltage_units})/3.96{voltage_units}));
    ode(y_na_fast, time) = (y_inf_na_fast-y_na_fast)/tau_y_na_fast;
  enddef;

  def comp i_na_fast as
    var i_na_fast: current_units {pub: out};
    var E_na: voltage_units;
    var G_max_na_fast: conductance_units {init: 1140.0};
    var Vm: voltage_units {pub: in, priv: out};
    var x_na_fast: dimensionless {priv: in};
    var y_na_fast: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_na = RToF*ln(Na_o/Na_i);
    i_na_fast = G_max_na_fast*x_na_fast*y_na_fast*(Vm-E_na);
  enddef;

  def comp x_na_late as
    var Vm: voltage_units {pub: in};
    var x_inf_na_late: dimensionless;
    var tau_x_na_late: time_units {init: 15.0};
    var x_na_late: dimensionless {init: 0.000012, pub: out};
    var time: time_units {pub: in};
    x_inf_na_late = 1{dimensionless}/(1{dimensionless}+exp((Vm+30.0{voltage_units})/(-5.0{voltage_units})));
    ode(x_na_late, time) = (x_inf_na_late-x_na_late)/tau_x_na_late;
  enddef;

  def comp y_na_late as
    var Vm: voltage_units {pub: in};
    var y_inf_na_late: dimensionless;
    var tau_y_na_late: time_units;
    var y_na_late: dimensionless {init: 0.864489, pub: out};
    var time: time_units {pub: in};
    y_inf_na_late = 0.1{dimensionless}+0.9{dimensionless}/(1{dimensionless}+exp((Vm+75.6{voltage_units})/6.3{voltage_units}));
    tau_y_na_late = 120.0{time_units}+1.0{time_units}*exp((Vm+100.0{voltage_units})/25.0{voltage_units});
    ode(y_na_late, time) = (y_inf_na_late-y_na_late)/tau_y_na_late;
  enddef;

  def comp i_na_late as
    var i_na_late: current_units {pub: out};
    var E_na: voltage_units;
    var G_max_na_late: conductance_units {init: 2.0};
    var Vm: voltage_units {pub: in, priv: out};
    var x_na_late: dimensionless {priv: in};
    var y_na_late: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_na = RToF*ln(Na_o/Na_i);
    i_na_late = G_max_na_late*x_na_late*y_na_late*(Vm-E_na);
  enddef;

  def comp x_k1 as
    var Vm: voltage_units {pub: in};
    var x_k1: dimensionless {pub: out};
    var time: time_units {pub: in};
    x_k1 = 1{dimensionless}/(1{dimensionless}+exp((92.0{voltage_units}+Vm)/10.0{voltage_units}));
  enddef;

  def comp i_k1 as
    var i_k1: current_units {pub: out};
    var E_k: voltage_units;
    var G_max_k1: conductance_units {init: 20.0};
    var Vm: voltage_units {pub: in, priv: out};
    var x_k1: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_k = RToF*ln(K_o/K_i);
    i_k1 = G_max_k1*pow(K_o/5.4{millimolar}, 0.8{dimensionless})*x_k1*(Vm-E_k);
  enddef;

  def comp x_kr as
    var Vm: voltage_units {pub: in};
    var x_kr: dimensionless {pub: out};
    var time: time_units {pub: in};
    x_kr = 1{dimensionless}/(1{dimensionless}+exp((33.0{voltage_units}+Vm)/22.4{voltage_units}));
  enddef;

  def comp y_kr as
    var Vm: voltage_units {pub: in};
    var y_inf_kr: dimensionless;
    var tau_y_kr: time_units;
    var y_kr: dimensionless {init: 0.25, pub: out};
    var ykrv1: rate_constants_units;
    var ykrv2: rate_constants_units;
    var time: time_units {pub: in};
    y_inf_kr = 1{dimensionless}/(1{dimensionless}+exp((Vm+50.0{voltage_units})/(-7.5{voltage_units})));
    ykrv1 = sel
      case abs(Vm+7{voltage_units}) > 0.001{voltage_units}:
        0.00138{rate_constants_units}*1{inverse_voltage_units}*(Vm+7{voltage_units})/(1{dimensionless}-exp(-0.123{inverse_voltage_units}*(Vm+7{voltage_units})));
      otherwise:
        0.00138{rate_constants_units}/0.123{dimensionless};
    endsel;
    ykrv2 = sel
      case abs(Vm+10{voltage_units}) > 0.001{voltage_units}:
        0.000061{rate_constants_units}*1{inverse_voltage_units}*(Vm+10{voltage_units})/(exp(0.145{inverse_voltage_units}*(Vm+10{voltage_units}))-1{dimensionless});
      otherwise:
        0.00061{rate_constants_units}/0.145{dimensionless};
    endsel;
    tau_y_kr = 1{dimensionless}/(ykrv1+ykrv2);
    ode(y_kr, time) = (y_inf_kr-y_kr)/tau_y_kr;
  enddef;

  def comp i_kr as
    var i_kr: current_units {pub: out};
    var E_k: voltage_units;
    var G_max_kr: conductance_units {init: 1.5};
    var Vm: voltage_units {pub: in, priv: out};
    var x_kr: dimensionless {priv: in};
    var y_kr: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_k = RToF*ln(K_o/K_i);
    i_kr = G_max_kr*pow(K_o/5.4{millimolar}, 1.0{dimensionless})*x_kr*y_kr*(Vm-E_k);
  enddef;

  def comp x_ks as
    var Vm: voltage_units {pub: in};
    var x_inf_ks: dimensionless {pub: out};
    var tau_x_ks: time_units {pub: out};
    var x_ks: dimensionless {init: 1.0, pub: out};
    var time: time_units {pub: in};
    x_inf_ks = 1{dimensionless}/(1{dimensionless}+exp((Vm-1.5{voltage_units})/(-16.7{voltage_units})));
    tau_x_ks = sel
      case abs(Vm+30{voltage_units}) < 0.0145{voltage_units}:
        417.9462{time_units};
      otherwise:
        1{time_units}/(0.0000719{inverse_voltage_units}*(Vm+30{voltage_units})/(1{dimensionless}-exp(-0.148{inverse_voltage_units}*(Vm+30{voltage_units})))+0.000131{inverse_voltage_units}*(Vm+30{voltage_units})/(exp(0.0687{inverse_voltage_units}*(Vm+30{voltage_units}))-1{dimensionless}));
    endsel;
    ode(x_ks, time) = (x_inf_ks-x_ks)/tau_x_ks;
  enddef;

  def comp y_ks as
    var Vm: voltage_units {pub: in};
    var y_inf_ks: dimensionless;
    var tau_y_ks: time_units;
    var y_ks: dimensionless {init: 0.0, pub: out};
    var x_inf_ks: dimensionless {pub: in};
    var tau_x_ks: time_units {pub: in};
    var time: time_units {pub: in};
    y_inf_ks = x_inf_ks;
    tau_y_ks = 4{dimensionless}*tau_x_ks;
    ode(y_ks, time) = (y_inf_ks-y_ks)/tau_y_ks;
  enddef;

  def comp i_ks as
    var i_ks: current_units {pub: out};
    var E_k: voltage_units;
    var G_max_ks: conductance_units {init: 3.0};
    var Vm: voltage_units {pub: in, priv: out};
    var x_ks: dimensionless {priv: in};
    var y_ks: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_k = RToF*ln(K_o/K_i);
    i_ks = G_max_ks*x_ks*y_ks*(Vm-E_k);
  enddef;

  def comp i_naca as
    var i_naca: current_units {pub: out};
    var n_NaCa: dimensionless {init: 3, pub: out};
    var g_NaCa: current_units {init: 0.001};
    var d_NaCa: dimensionless {init: 0.001};
    var gamma: dimensionless {init: 0.5};
    var Vm: voltage_units {pub: in};
    var RToF: voltage_units {pub: in};
    var Cao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    // end of numerator
    i_naca = 512.009113204{dimensionless}*g_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*Vm/RToF)*pow(Nai, n_NaCa)*Cao-Cai*exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*Vm/RToF)*pow(Nao, n_NaCa))/((1{millimolar_power_4}+d_NaCa*(Cai*pow(Nao, n_NaCa)+Cao*pow(Nai, n_NaCa)))*(1{dimensionless}+Cai/0.0069{millimolar}));
  enddef;

  def comp x_nak as
    var Vm: voltage_units {pub: in};
    var x_nak: dimensionless {priv: out, pub: out};
    x_nak = 1{dimensionless}/(1{dimensionless}+exp((Vm+80.0{voltage_units})/(-45.0{voltage_units})));
  enddef;

  def comp y_nak as
    var Vm: voltage_units {pub: in};
    var y_nak: dimensionless {priv: out, pub: out};
    y_nak = 1{dimensionless}/(1{dimensionless}+exp((Vm+0.0{voltage_units})/125.0{voltage_units}));
  enddef;

  def comp i_nak as
    var i_nak: current_units {pub: out};
    var g_nak: current_units {init: 442.2};
    var Vm: voltage_units {pub: in, priv: out};
    var x_nak: dimensionless {priv: in};
    var y_nak: dimensionless {priv: in};
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    i_nak = g_nak*x_nak*y_nak*(1.0{dimensionless}/(1.0{dimensionless}+pow(1.9{millimolar}/K_o, 1.45{dimensionless})))*(1.0{dimensionless}/(1.0{dimensionless}+pow(31.98{millimolar}/Na_i, 1.0{dimensionless})));
  enddef;

  def comp i_kb as
    var i_kb: current_units {pub: out};
    var E_k: voltage_units;
    var G_max_kb: conductance_units {init: 0.01};
    var Vm: voltage_units {pub: in, priv: out};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    E_k = RToF*ln(K_o/K_i);
    i_kb = G_max_kb*(Vm-E_k);
  enddef;

  def comp i_nab as
    var i_nab: current_units {pub: out};
    var E_na: voltage_units;
    var G_max_nab: conductance_units {init: 0.01};
    var Vm: voltage_units {pub: in, priv: out};
    var RToF: voltage_units {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in, priv: out};
    E_na = RToF*ln(Na_o/Na_i);
    i_nab = G_max_nab*(Vm-E_na);
  enddef;

  def comp i_cab as
    var i_cab: current_units {pub: out};
    var E_ca: voltage_units;
    var G_max_cab: conductance_units {init: 0.0001};
    var Vm: voltage_units {pub: in, priv: out};
    var RToF: voltage_units {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i_peripheral: millimolar {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_ca = 0.5{dimensionless}*RToF*ln(Ca_o/Ca_i_peripheral);
    i_cab = G_max_cab*(Vm-E_ca);
  enddef;

  def comp i_pmca as
    var i_pmca: current_units {pub: out};
    var PMCA_max: current_units {init: 5.0};
    var Ca_i_peripheral: millimolar {pub: in, priv: out};
    var Kpmca: millimolar {init: 0.0001};
    var Hpmca: dimensionless {init: 1.5};
    i_pmca = PMCA_max*(1.0{dimensionless}/(1.0{dimensionless}+pow(Kpmca/Ca_i_peripheral, Hpmca)));
  enddef;

  def comp i_f_k as
    var i_f_k: current_units {pub: out};
    var G_f_k: conductance_units {init: 0.188709677};
    var E_k: voltage_units;
    var Vm: voltage_units {pub: in, priv: out};
    var RToF: voltage_units {pub: in};
    var y_gate_f_k: dimensionless {priv: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_k = RToF*ln(K_o/K_i);
    i_f_k = G_f_k*y_gate_f_k*(Vm-E_k);
  enddef;

  def comp i_f_na as
    var i_f_na: current_units {pub: out};
    var G_f_na: conductance_units {init: 0.045290323};
    var E_na: voltage_units;
    var Vm: voltage_units {pub: in, priv: out};
    var RToF: voltage_units {pub: in};
    var y_gate_f_na: dimensionless {priv: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_na = RToF*ln(Na_o/Na_i);
    i_f_na = G_f_na*y_gate_f_na*(Vm-E_na);
  enddef;

  def comp y_gate_f_k as
    var Vm: voltage_units {pub: in};
    var y_inf_f_gate: dimensionless;
    var tau_y_f_gate: time_units;
    var y_gate_f_k: dimensionless {init: 0.011099, pub: out};
    var time: time_units {pub: in};
    y_inf_f_gate = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm+109.0{voltage_units})/10.0{voltage_units}));
    tau_y_f_gate = 6000.0{time_units}/(exp(-1.0{inverse_voltage_units}*(2.9{voltage_units}+0.04{dimensionless}*Vm))+exp(1.0{inverse_voltage_units}*(3.6{voltage_units}+0.11{dimensionless}*Vm)));
    ode(y_gate_f_k, time) = (y_inf_f_gate-y_gate_f_k)/tau_y_f_gate;
  enddef;

  def comp y_gate_f_na as
    var Vm: voltage_units {pub: in};
    var y_inf_f_gate: dimensionless;
    var tau_y_f_gate: time_units;
    var y_gate_f_na: dimensionless {init: 0.011099, pub: out};
    var time: time_units {pub: in};
    y_inf_f_gate = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm+109.0{voltage_units})/10.0{voltage_units}));
    tau_y_f_gate = 6000.0{time_units}/(exp(-1.0{inverse_voltage_units}*(2.9{voltage_units}+0.04{dimensionless}*Vm))+exp(1.0{inverse_voltage_units}*(3.6{voltage_units}+0.11{dimensionless}*Vm)));
    ode(y_gate_f_na, time) = (y_inf_f_gate-y_gate_f_na)/tau_y_f_gate;
  enddef;

  def comp i_rel_per as
    var i_rel_per: current_units {pub: out};
    var REL_max: current_per_millimolar_units {init: 2500.0};
    var Ca_i_peripheral: millimolar {pub: in};
    var Ca_sr: millimolar {pub: in, priv: out};
    var Krel: millimolar {init: 0.001};
    i_rel_per = REL_max*(Ca_sr/(1.0{dimensionless}+sqr(Krel/Ca_i_peripheral)));
  enddef;

  def comp i_serca_per as
    var i_serca_per: current_units {pub: out};
    var SERCA_max: current_units {init: 120.0, pub: out};
    var Ca_i_peripheral: millimolar {pub: in, priv: out};
    var Ca_sr: millimolar {pub: in, priv: out};
    var Kmf: millimolar {init: 0.000246};
    var Kmr: millimolar {init: 1.7};
    var H: dimensionless {init: 1.6};
    i_serca_per = SERCA_max*((pow(Ca_i_peripheral/Kmf, H)-pow(Ca_sr/Kmr, H))/(1.0{dimensionless}+pow(Ca_i_peripheral/Kmf, H)+pow(Ca_sr/Kmr, H)));
  enddef;

  def comp i_serca_bulk as
    var i_serca_bulk: current_units {pub: out};
    var SERCA_max: current_units {pub: in};
    var Ca_i_bulk: millimolar {pub: in, priv: out};
    var Ca_sr: millimolar {pub: in, priv: out};
    var Kmf: millimolar {init: 0.000246};
    var Kmr: millimolar {init: 1.7};
    var H: dimensionless {init: 1.6};
    i_serca_bulk = SERCA_max*((pow(Ca_i_bulk/Kmf, H)-pow(Ca_sr/Kmr, H))/(1.0{dimensionless}+pow(Ca_i_bulk/Kmf, H)+pow(Ca_sr/Kmr, H)));
  enddef;

  def comp i_leak as
    var i_leak: current_units {pub: out};
    var LEAK_max: current_per_millimolar_units {init: 10.0};
    var Ca_i_bulk: millimolar {pub: in, priv: out};
    var Ca_sr: millimolar {pub: in, priv: out};
    i_leak = LEAK_max*(Ca_sr-Ca_i_bulk);
  enddef;

  def comp i_diff as
    var i_diff: current_units {pub: out};
    var DIFF_max: current_per_millimolar_units {init: 5000.0};
    var Ca_i_bulk: millimolar {pub: in, priv: out};
    var Ca_i_peripheral: millimolar {pub: in, priv: out};
    i_diff = DIFF_max*(Ca_i_peripheral-Ca_i_bulk);
  enddef;
  def map between x_Ttype and i_cat for
    vars Vm and Vm;
    vars x_Ttype and x_Ttype;
    vars time and time;
  enddef;
  def map between y_Ttype and i_cat for
    vars Vm and Vm;
    vars y_Ttype and y_Ttype;
    vars time and time;
  enddef;
  def map between i_cat and membrane for
    vars Ca_i_peripheral and Ca_i_peripheral;
    vars Vm and Vm;
    vars i_cat and i_cat;
    vars time and time;
    vars RToF and RToF;
    vars Ca_o and Ca_o;
  enddef;
  def map between x_Ltype and i_cal for
    vars Vm and Vm;
    vars x_Ltype and x_Ltype;
    vars time and time;
  enddef;
  def map between y_Ltype and i_cal for
    vars Vm and Vm;
    vars y_Ltype and y_Ltype;
    vars time and time;
  enddef;
  def map between y_ca_Ltype and i_cal for
    vars y_ca_Ltype and y_ca_Ltype;
    vars Ca_i_peripheral and Ca_i_peripheral;
    vars time and time;
  enddef;
  def map between i_cal and membrane for
    vars Ca_i_peripheral and Ca_i_peripheral;
    vars Vm and Vm;
    vars i_cal and i_cal;
    vars time and time;
    vars RToF and RToF;
    vars Ca_o and Ca_o;
  enddef;
  def map between x_to_fast and i_to_fast for
    vars Vm and Vm;
    vars x_to_fast and x_to_fast;
    vars time and time;
  enddef;
  def map between y_to_fast and i_to_fast for
    vars Vm and Vm;
    vars y_to_fast and y_to_fast;
    vars time and time;
  enddef;
  def map between i_to_fast and membrane for
    vars K_i and K_i;
    vars Vm and Vm;
    vars i_to_fast and i_to_fast;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
  enddef;
  def map between x_to_sustained and i_to_sustained for
    vars Vm and Vm;
    vars x_to_sustained and x_to_sustained;
    vars time and time;
  enddef;
  def map between i_to_sustained and membrane for
    vars K_i and K_i;
    vars Vm and Vm;
    vars i_to_sustained and i_to_sustained;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
  enddef;
  def map between x_na_fast and i_na_fast for
    vars Vm and Vm;
    vars x_na_fast and x_na_fast;
    vars time and time;
  enddef;
  def map between y_na_fast and i_na_fast for
    vars Vm and Vm;
    vars y_na_fast and y_na_fast;
    vars time and time;
  enddef;
  def map between i_na_fast and membrane for
    vars Na_i and Na_i;
    vars Vm and Vm;
    vars i_na_fast and i_na_fast;
    vars time and time;
    vars RToF and RToF;
    vars Na_o and Na_o;
  enddef;
  def map between x_na_late and i_na_late for
    vars Vm and Vm;
    vars x_na_late and x_na_late;
    vars time and time;
  enddef;
  def map between y_na_late and i_na_late for
    vars Vm and Vm;
    vars y_na_late and y_na_late;
    vars time and time;
  enddef;
  def map between i_na_late and membrane for
    vars Na_i and Na_i;
    vars Vm and Vm;
    vars i_na_late and i_na_late;
    vars time and time;
    vars RToF and RToF;
    vars Na_o and Na_o;
  enddef;
  def map between x_k1 and i_k1 for
    vars Vm and Vm;
    vars x_k1 and x_k1;
    vars time and time;
  enddef;
  def map between i_k1 and membrane for
    vars K_i and K_i;
    vars Vm and Vm;
    vars i_k1 and i_k1;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
  enddef;
  def map between x_kr and i_kr for
    vars Vm and Vm;
    vars x_kr and x_kr;
    vars time and time;
  enddef;
  def map between y_kr and i_kr for
    vars Vm and Vm;
    vars y_kr and y_kr;
    vars time and time;
  enddef;
  def map between i_kr and membrane for
    vars K_i and K_i;
    vars Vm and Vm;
    vars i_kr and i_kr;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
  enddef;
  def map between x_ks and y_ks for
    vars x_inf_ks and x_inf_ks;
    vars tau_x_ks and tau_x_ks;
  enddef;
  def map between x_ks and i_ks for
    vars Vm and Vm;
    vars x_ks and x_ks;
    vars time and time;
  enddef;
  def map between y_ks and i_ks for
    vars Vm and Vm;
    vars y_ks and y_ks;
    vars time and time;
  enddef;
  def map between i_ks and membrane for
    vars K_i and K_i;
    vars Vm and Vm;
    vars i_ks and i_ks;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
  enddef;
  def map between i_naca and membrane for
    vars Vm and Vm;
    vars i_naca and i_naca;
    vars RToF and RToF;
    vars Cao and Ca_o;
    vars Cai and Ca_i_peripheral;
    vars Nao and Na_o;
    vars Nai and Na_i;
  enddef;
  def map between i_nak and y_nak for
    vars Vm and Vm;
    vars y_nak and y_nak;
  enddef;
  def map between i_nak and x_nak for
    vars Vm and Vm;
    vars x_nak and x_nak;
  enddef;
  def map between i_nak and membrane for
    vars Vm and Vm;
    vars i_nak and i_nak;
    vars K_o and K_o;
    vars Na_i and Na_i;
  enddef;
  def map between i_kb and membrane for
    vars Vm and Vm;
    vars RToF and RToF;
    vars i_kb and i_kb;
    vars K_o and K_o;
    vars K_i and K_i;
  enddef;
  def map between i_nab and membrane for
    vars Vm and Vm;
    vars RToF and RToF;
    vars i_nab and i_nab;
    vars Na_o and Na_o;
    vars Na_i and Na_i;
  enddef;
  def map between i_cab and membrane for
    vars Ca_i_peripheral and Ca_i_peripheral;
    vars Vm and Vm;
    vars i_cab and i_cab;
    vars time and time;
    vars RToF and RToF;
    vars Ca_o and Ca_o;
  enddef;
  def map between i_pmca and membrane for
    vars Ca_i_peripheral and Ca_i_peripheral;
    vars i_pmca and i_pmca;
  enddef;
  def map between i_f_na and membrane for
    vars Vm and Vm;
    vars RToF and RToF;
    vars i_f_na and i_f_na;
    vars time and time;
    vars Na_o and Na_o;
    vars Na_i and Na_i;
  enddef;
  def map between i_f_k and membrane for
    vars K_i and K_i;
    vars Vm and Vm;
    vars i_f_k and i_f_k;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
  enddef;
  def map between y_gate_f_k and i_f_k for
    vars Vm and Vm;
    vars y_gate_f_k and y_gate_f_k;
    vars time and time;
  enddef;
  def map between y_gate_f_na and i_f_na for
    vars Vm and Vm;
    vars y_gate_f_na and y_gate_f_na;
    vars time and time;
  enddef;
  def map between i_rel_per and membrane for
    vars Ca_i_peripheral and Ca_i_peripheral;
    vars Ca_sr and Ca_sr;
    vars i_rel_per and i_rel_per;
  enddef;
  def map between i_serca_per and membrane for
    vars Ca_i_peripheral and Ca_i_peripheral;
    vars Ca_sr and Ca_sr;
    vars i_serca_per and i_serca_per;
  enddef;
  def map between i_serca_bulk and membrane for
    vars Ca_i_bulk and Ca_i_bulk;
    vars Ca_sr and Ca_sr;
    vars i_serca_bulk and i_serca_bulk;
  enddef;
  def map between i_leak and membrane for
    vars Ca_i_bulk and Ca_i_bulk;
    vars Ca_sr and Ca_sr;
    vars i_leak and i_leak;
  enddef;
  def map between i_diff and membrane for
    vars Ca_i_bulk and Ca_i_bulk;
    vars Ca_i_peripheral and Ca_i_peripheral;
    vars i_diff and i_diff;
  enddef;
  def map between membrane and Environment for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
    vars K_o and K_o;
    vars RToF and RToF;
    vars FoRT and FoRT;
    vars F and F;
  enddef;
  def map between Time and membrane for
    vars time and time;
  enddef;
  def map between i_serca_bulk and i_serca_per for
    vars SERCA_max and SERCA_max;
  enddef;
enddef;
