// Tomek ... human cardiac ventricular action potential model:
//  - original implementation: 17/11/2018, Alfonso Bueno-Orovio, University of Oxford
//  - Reference:
//    Journal. Year;Volume(Issue):Pages. doi:
//    Title.
//    Authors.
//
// This code makes use of portions of a previous implementation of the O'Hara-Vir
// reference: subject_type keyword; electrophysiology
def model Tomek_model13endo as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt_per_millimole as
    unit volt {pref: milli};
    unit millimolar {expo: -1};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_millimolar_per_millisecond as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond_per_millimolar as
    unit millisecond;
    unit millimolar {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microC_per_microF as
    unit coulomb {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit micrometre_3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit per_micrometre_3 as
    unit metre {expo: -3, pref: micro};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit centimeter as
    unit metre {pref: centi};
  enddef;
  def unit centimeter_squared as
    unit centimeter {expo: 2};
  enddef;
  def unit microliter_per_centimeter_cubed as
    unit microliter;
    unit centimeter {expo: -3};
  enddef;
  def unit microF_per_centimeter_squared as
    unit microF;
    unit centimeter_squared {expo: -1};
  enddef;
  def unit microliter as
    unit liter {pref: micro};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit per_kelvin as
    unit kelvin {expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: millisecond {pub: out};
    var celltype: dimensionless {init: 0, pub: out};
  enddef;

  def comp extracellular as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var nao: millimolar {init: 140.0, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var cao: millimolar {init: 1.8, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var ko: millimolar {init: 5.0, pub: out};
    var clo: millimolar {init: 150.0, pub: out};
  enddef;

  def comp physical_constants as
    var R: joule_per_kilomole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485, pub: out};
    var zna: dimensionless {init: 1, pub: out};
    var zca: dimensionless {init: 2, pub: out};
    var zk: dimensionless {init: 1, pub: out};
    var zcl: dimensionless {init: -1, pub: out};
  enddef;

  def comp cell_geometry as
    var L: centimeter {init: 0.01};
    var rad: centimeter {init: 0.0011};
    var vcell: microliter {pub: out};
    var Ageo: centimeter_squared {pub: out};
    var Acap: centimeter_squared {pub: out};
    var vmyo: microliter {pub: out};
    var vnsr: microliter {pub: out};
    var vjsr: microliter {pub: out};
    var vss: microliter {pub: out};
    vcell = 1000{microliter_per_centimeter_cubed}*3.14{dimensionless}*rad*rad*L;
    Ageo = 2{dimensionless}*3.14{dimensionless}*rad*rad+2{dimensionless}*3.14{dimensionless}*rad*L;
    Acap = 2{dimensionless}*Ageo;
    vmyo = 0.68{dimensionless}*vcell;
    vnsr = 0.0552{dimensionless}*vcell;
    vjsr = 0.0048{dimensionless}*vcell;
    vss = 0.02{dimensionless}*vcell;
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var v: millivolt {init: -88.7638, pub: out};
    var time: millisecond {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var vffrt: coulomb_per_mole {pub: out};
    var vfrt: dimensionless {pub: out};
    var INa: microA_per_microF {pub: in};
    var INaL: microA_per_microF {pub: in};
    var Ito: microA_per_microF {pub: in};
    var ICaL: microA_per_microF {pub: in};
    var ICaNa: microA_per_microF {pub: in};
    var ICaK: microA_per_microF {pub: in};
    var IKr: microA_per_microF {pub: in};
    var IKs: microA_per_microF {pub: in};
    var IK1: microA_per_microF {pub: in};
    var INaCa_i: microA_per_microF {pub: in};
    var INaCa_ss: microA_per_microF {pub: in};
    var INaK: microA_per_microF {pub: in};
    var INab: microA_per_microF {pub: in};
    var IKb: microA_per_microF {pub: in};
    var IpCa: microA_per_microF {pub: in};
    var ICab: microA_per_microF {pub: in};
    var IClCa: microA_per_microF {pub: in};
    var IClb: microA_per_microF {pub: in};
    var I_katp: microA_per_microF {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var Istim: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var i_Stim_Start: millisecond {init: 0};
    var i_Stim_End: millisecond {init: 100000000000000000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var i_Stim_Amplitude: microA_per_microF {init: -53};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var i_Stim_Period: millisecond {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var i_Stim_PulseDuration: millisecond {init: 1.0};
    Istim = sel
      case (time >= i_Stim_Start) and (time <= i_Stim_End) and (time-i_Stim_Start-floor((time-i_Stim_Start)/i_Stim_Period)*i_Stim_Period <= i_Stim_PulseDuration):
        i_Stim_Amplitude;
      otherwise:
        0{microA_per_microF};
    endsel;
    vffrt = v*F*F/(R*T);
    vfrt = v*F/(R*T);
    ode(v, time) = -(INa+INaL+Ito+ICaL+ICaNa+ICaK+IKr+IKs+IK1+INaCa_i+INaCa_ss+INaK+INab+IKb+IpCa+ICab+IClCa+IClb+I_katp+Istim);
  enddef;

  def comp CaMK as
    var KmCaMK: millimolar {init: 0.15, pub: out};
    // modifiable-parameter: yes
    var aCaMK: per_millimolar_per_millisecond {init: 0.05};
    var bCaMK: per_millisecond {init: 0.00068};
    // modifiable-parameter: yes
    var CaMKo: dimensionless {init: 0.05};
    var KmCaM: millimolar {init: 0.0015};
    var CaMKb: millimolar {pub: out};
    var CaMKa: millimolar {pub: out};
    var CaMKt: millimolar {init: 0.0111};
    var cass: millimolar {pub: in};
    var time: millisecond {pub: in};
    CaMKb = CaMKo*(1{millimolar}-CaMKt)/(1{dimensionless}+KmCaM/cass);
    CaMKa = CaMKb+CaMKt;
    ode(CaMKt, time) = aCaMK*CaMKb*(CaMKb+CaMKt)-bCaMK*CaMKt;
  enddef;

  def comp intracellular_ions as
    var cmdnmax_b: millimolar {init: 0.05};
    var cmdnmax: millimolar;
    var kmcmdn: millimolar {init: 0.00238};
    var trpnmax: millimolar {init: 0.07};
    var kmtrpn: millimolar {init: 0.0005};
    var BSRmax: millimolar {init: 0.047};
    var KmBSR: millimolar {init: 0.00087};
    var BSLmax: millimolar {init: 1.124};
    var KmBSL: millimolar {init: 0.0087};
    var csqnmax: millimolar {init: 10};
    var kmcsqn: millimolar {init: 0.8};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var nai: millimolar {init: 12.1025, pub: out};
    var nass: millimolar {init: 12.1029, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var ki: millimolar {init: 142.3002, pub: out};
    var kss: millimolar {init: 142.3002, pub: out};
    var cass: millimolar {init: 7.0305e-5, pub: out};
    var cansr: millimolar {init: 1.5211, pub: out};
    var cajsr: millimolar {init: 1.5214, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var cai: millimolar {init: 8.1583e-05, pub: out};
    var cli: millimolar {init: 24.0, pub: out};
    var celltype: dimensionless {pub: in};
    var Acap: centimeter_squared {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var INa: microA_per_microF {pub: in};
    var INaL: microA_per_microF {pub: in};
    var INaCa_i: microA_per_microF {pub: in};
    var INaCa_ss: microA_per_microF {pub: in};
    var ICaL: microA_per_microF {pub: in};
    var ICaNa: microA_per_microF {pub: in};
    var ICaK: microA_per_microF {pub: in};
    var ICaL_ss: microA_per_microF {pub: in};
    var ICaNa_ss: microA_per_microF {pub: in};
    var ICaK_ss: microA_per_microF {pub: in};
    var ICaL_i: microA_per_microF {pub: in};
    var ICaNa_i: microA_per_microF {pub: in};
    var ICaK_i: microA_per_microF {pub: in};
    var INaK: microA_per_microF {pub: in};
    var INab: microA_per_microF {pub: in};
    var IK1: microA_per_microF {pub: in};
    var IKb: microA_per_microF {pub: in};
    var IKr: microA_per_microF {pub: in};
    var IKs: microA_per_microF {pub: in};
    var Istim: microA_per_microF {pub: in};
    var Ito: microA_per_microF {pub: in};
    var I_katp: microA_per_microF {pub: in};
    var ICab: microA_per_microF {pub: in};
    var IpCa: microA_per_microF {pub: in};
    var JdiffNa: millimolar_per_millisecond {pub: in};
    var Jdiff: millimolar_per_millisecond {pub: in};
    var Jup: millimolar_per_millisecond {pub: in};
    var JdiffK: millimolar_per_millisecond {pub: in};
    var Jrel: millimolar_per_millisecond {pub: in};
    var Jtr: millimolar_per_millisecond {pub: in};
    var time: millisecond {pub: in};
    var vmyo: microliter {pub: in};
    var vnsr: microliter {pub: in};
    var vss: microliter {pub: in};
    var vjsr: microliter {pub: in};
    var Bcai: dimensionless;
    var Bcajsr: dimensionless;
    var Bcass: dimensionless;
    cmdnmax = sel
      case celltype == 1{dimensionless}:
        cmdnmax_b*1.3{dimensionless};
      otherwise:
        cmdnmax_b;
    endsel;
    ode(nai, time) = -(INa+INaL+3{dimensionless}*INaCa_i+ICaNa_i+3{dimensionless}*INaK+INab)*Acap/(F*vmyo)+JdiffNa*vss/vmyo;
    ode(nass, time) = -(ICaNa_ss+3{dimensionless}*INaCa_ss)*Acap/(F*vss)-JdiffNa;
    ode(ki, time) = -(Ito+IKr+IKs+IK1+IKb+I_katp+Istim-2{dimensionless}*INaK+ICaK_i)*Acap/(F*vmyo)+JdiffK*vss/vmyo;
    ode(kss, time) = -ICaK_ss*Acap/(F*vss)-JdiffK;
    Bcai = 1{dimensionless}/(1{dimensionless}+cmdnmax*kmcmdn/sqr(kmcmdn+cai)+trpnmax*kmtrpn/sqr(kmtrpn+cai));
    ode(cai, time) = Bcai*(-(ICaL_i+IpCa+ICab-2{dimensionless}*INaCa_i)*Acap/(2{dimensionless}*F*vmyo)-Jup*vnsr/vmyo+Jdiff*vss/vmyo);
    Bcass = 1{dimensionless}/(1{dimensionless}+BSRmax*KmBSR/sqr(KmBSR+cass)+BSLmax*KmBSL/sqr(KmBSL+cass));
    ode(cass, time) = Bcass*(-(ICaL_ss-2{dimensionless}*INaCa_ss)*Acap/(2{dimensionless}*F*vss)+Jrel*vjsr/vss-Jdiff);
    ode(cansr, time) = Jup-Jtr*vjsr/vnsr;
    Bcajsr = 1{dimensionless}/(1{dimensionless}+csqnmax*kmcsqn/sqr(kmcsqn+cajsr));
    ode(cajsr, time) = Bcajsr*(Jtr-Jrel);
  enddef;

  def comp reversal_potentials as
    var PKNa: dimensionless {init: 0.01833};
    var ENa: millivolt {pub: out};
    var EK: millivolt {pub: out};
    var EKs: millivolt {pub: out};
    var ECl: millivolt {pub: out};
    var nao: millimolar {pub: in};
    var nai: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var clo: millimolar {pub: in};
    var cli: millimolar {pub: in};
    var zna: dimensionless {pub: in};
    var zk: dimensionless {pub: in};
    var zcl: dimensionless {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    ENa = R*T/(zna*F)*ln(nao/nai);
    EK = R*T/(zk*F)*ln(ko/ki);
    EKs = R*T/(zk*F)*ln((ko+PKNa*nao)/(ki+PKNa*nai));
    ECl = R*T/(zcl*F)*ln(clo/cli);
  enddef;

  def comp I_katp as
    var v: millivolt {pub: in};
    var EK: millivolt {pub: in};
    var ko: millimolar {pub: in};
    var gkatp: milliS_per_microF {init: 4.3195};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_atp_dependent_potassium_current_conductance
    // modifiable-parameter: yes
    var fkatp: dimensionless {init: 0.0};
    var K_o_n: millimolar {init: 5};
    var A_atp: millimolar {init: 2};
    var K_atp: millimolar {init: 0.25};
    var akik: dimensionless;
    var bkik: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_atp_dependent_potassium_current
    var I_katp: microA_per_microF {pub: out};
    akik = pow(ko/K_o_n, 0.24{dimensionless});
    bkik = 1{dimensionless}/(1{dimensionless}+sqr(A_atp/K_atp));
    I_katp = fkatp*gkatp*akik*bkik*(v-EK);
  enddef;

  def comp INa as
    var mss: dimensionless;
    var tm: millisecond {pub: out};
    var m: dimensionless {init: 8.0572e-4};
    var hss: dimensionless;
    var ah: dimensionless;
    var bh: dimensionless;
    var th: millisecond;
    var h: dimensionless {init: 0.8286};
    var jss: dimensionless;
    var aj: dimensionless;
    var bj: dimensionless;
    var tj: millisecond;
    var j: dimensionless {init: 0.8284};
    var hssp: dimensionless;
    var hp: dimensionless {init: 0.6707};
    var tjp: millisecond;
    var jp: dimensionless {init: 0.8281};
    var fINap: dimensionless;
    var time: millisecond {pub: in};
    var v: millivolt {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var ENa: millivolt {pub: in};
    // modifiable-parameter: yes
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var GNa: milliS_per_microF {init: 11.7802};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var INa: microA_per_microF {pub: out};
    mss = 1{dimensionless}/sqr(1{dimensionless}+exp(-(v+56.86{millivolt})/9.03{millivolt}));
    tm = 0.1292{millisecond}*exp(-sqr((v+45.79{millivolt})/15.54{millivolt}))+0.06487{millisecond}*exp(-sqr((v-4.823{millivolt})/51.12{millivolt}));
    ode(m, time) = (mss-m)/tm;
    hss = 1{dimensionless}/sqr(1{dimensionless}+exp((v+71.55{millivolt})/7.43{millivolt}));
    ah = sel
      case v >= -40{millivolt}:
        0{dimensionless};
      otherwise:
        0.057{dimensionless}*exp(-(v+80{millivolt})/6.8{millivolt});
    endsel;
    bh = sel
      case v >= -40{millivolt}:
        0.77{dimensionless}/(0.13{dimensionless}*(1{dimensionless}+exp(-(v+10.66{millivolt})/11.1{millivolt})));
      otherwise:
        2.7{dimensionless}*exp(0.079{per_millivolt}*v)+3.1e5{dimensionless}*exp(0.3485{per_millivolt}*v);
    endsel;
    th = 1{millisecond}/(ah+bh);
    ode(h, time) = (hss-h)/th;
    aj = sel
      case v >= -40{millivolt}:
        0{dimensionless};
      otherwise:
        (-2.5428e4{per_millivolt}*exp(0.2444{per_millivolt}*v)-6.948e-6{per_millivolt}*exp(-0.04391{per_millivolt}*v))*(v+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(v+79.23{millivolt})));
    endsel;
    bj = sel
      case v >= -40{millivolt}:
        0.6{dimensionless}*exp(0.057{per_millivolt}*v)/(1{dimensionless}+exp(-0.1{per_millivolt}*(v+32{millivolt})));
      otherwise:
        0.02424{dimensionless}*exp(-0.01052{per_millivolt}*v)/(1{dimensionless}+exp(-0.1378{per_millivolt}*(v+40.14{millivolt})));
    endsel;
    jss = hss;
    tj = 1{millisecond}/(aj+bj);
    ode(j, time) = (jss-j)/tj;
    hssp = 1{dimensionless}/sqr(1{dimensionless}+exp((v+77.55{millivolt})/7.43{millivolt}));
    ode(hp, time) = (hssp-hp)/th;
    tjp = 1.46{dimensionless}*tj;
    ode(jp, time) = (jss-jp)/tjp;
    fINap = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    INa = GNa*(v-ENa)*pow(m, 3{dimensionless})*((1{dimensionless}-fINap)*h*j+fINap*hp*jp);
  enddef;

  def comp INaL as
    var mLss: dimensionless;
    var tmL: millisecond;
    var mL: dimensionless {init: 1.629e-4};
    var thL: millisecond {init: 200};
    var hLss: dimensionless;
    var v: millivolt {pub: in};
    var hL: dimensionless {init: 0.5255};
    var hLssp: dimensionless;
    var thLp: millisecond;
    var hLp: dimensionless {init: 0.2872};
    // modifiable-parameter: yes
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current_conductance
    var GNaL_b: milliS_per_microF {init: 0.0279};
    var GNaL: milliS_per_microF;
    var fINaLp: dimensionless;
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var ENa: millivolt {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current
    var INaL: microA_per_microF {pub: out};
    var celltype: dimensionless {pub: in};
    var time: millisecond {pub: in};
    mLss = 1{dimensionless}/(1{dimensionless}+exp(-(v+42.85{millivolt})/5.264{millivolt}));
    tmL = 0.1292{millisecond}*exp(-sqr((v+45.79{millivolt})/15.54{millivolt}))+0.06487{millisecond}*exp(-sqr((v-4.823{millivolt})/51.12{millivolt}));
    ode(mL, time) = (mLss-mL)/tmL;
    hLss = 1{dimensionless}/(1{dimensionless}+exp((v+87.61{millivolt})/7.488{millivolt}));
    ode(hL, time) = (hLss-hL)/thL;
    hLssp = 1{dimensionless}/(1{dimensionless}+exp((v+93.81{millivolt})/7.488{millivolt}));
    thLp = 3{dimensionless}*thL;
    ode(hLp, time) = (hLssp-hLp)/thLp;
    GNaL = sel
      case celltype == 1{dimensionless}:
        GNaL_b*0.6{dimensionless};
      otherwise:
        GNaL_b;
    endsel;
    fINaLp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    INaL = GNaL*(v-ENa)*mL*((1{dimensionless}-fINaLp)*hL+fINaLp*hLp);
  enddef;

  def comp Ito as
    // modifiable-parameter: yes
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var Gto_b: milliS_per_microF {init: 0.16};
    var ass: dimensionless;
    var ta: millisecond;
    var a: dimensionless {init: 9.5098e-4};
    var time: millisecond {pub: in};
    var v: millivolt {pub: in};
    var EKshift: millivolt {init: 0};
    var EK: millivolt {pub: in};
    var iss: dimensionless;
    var delta_epi: dimensionless;
    var tiF_b: millisecond;
    var tiS_b: millisecond;
    var tiF: millisecond;
    var tiS: millisecond;
    var AiF: dimensionless;
    var AiS: dimensionless;
    var iF: dimensionless {init: 0.9996};
    var iS: dimensionless {init: 0.5936};
    var i: dimensionless;
    var assp: dimensionless;
    var ap: dimensionless {init: 4.8454e-4};
    var dti_develop: dimensionless;
    var dti_recover: dimensionless;
    var tiFp: millisecond;
    var tiSp: millisecond;
    var iFp: dimensionless {init: 0.9996};
    var iSp: dimensionless {init: 0.6538};
    var ip: dimensionless;
    var Gto: milliS_per_microF;
    var fItop: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var Ito: microA_per_microF {pub: out};
    var celltype: dimensionless {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    ass = 1{dimensionless}/(1{dimensionless}+exp(-(v+EKshift-14.34{millivolt})/14.82{millivolt}));
    ta = 1.0515{millisecond}/(1{dimensionless}/(1.2089{dimensionless}*(1{dimensionless}+exp(-(v+EKshift-18.4099{millivolt})/29.3814{millivolt})))+3.5{dimensionless}/(1{dimensionless}+exp((v+EKshift+100{millivolt})/29.3814{millivolt})));
    ode(a, time) = (ass-a)/ta;
    iss = 1{dimensionless}/(1{dimensionless}+exp((v+EKshift+43.94{millivolt})/5.711{millivolt}));
    delta_epi = sel
      case celltype == 1{dimensionless}:
        1{dimensionless}-0.95{dimensionless}/(1{dimensionless}+exp((v+EKshift+70{millivolt})/5{millivolt}));
      otherwise:
        1{dimensionless};
    endsel;
    tiF_b = 4.562{millisecond}+1{millisecond}/(0.3933{dimensionless}*exp(-(v+EKshift+100{millivolt})/100{millivolt})+0.08004{dimensionless}*exp((v+EKshift+50{millivolt})/16.59{millivolt}));
    tiS_b = 23.62{millisecond}+1{millisecond}/(0.001416{dimensionless}*exp(-(v+EKshift+96.52{millivolt})/59.05{millivolt})+1.78e-8{dimensionless}*exp((v+EKshift+114.1{millivolt})/8.079{millivolt}));
    tiF = tiF_b*delta_epi;
    tiS = tiS_b*delta_epi;
    AiF = 1{dimensionless}/(1{dimensionless}+exp((v+EKshift-213.6{millivolt})/151.2{millivolt}));
    AiS = 1{dimensionless}-AiF;
    ode(iF, time) = (iss-iF)/tiF;
    ode(iS, time) = (iss-iS)/tiS;
    i = AiF*iF+AiS*iS;
    assp = 1{dimensionless}/(1{dimensionless}+exp(-(v+EKshift-24.34{millivolt})/14.82{millivolt}));
    ode(ap, time) = (assp-ap)/ta;
    dti_develop = 1.354{dimensionless}+1e-4{dimensionless}/(exp((v+EKshift-167.4{millivolt})/15.89{millivolt})+exp(-(v+EKshift-12.23{millivolt})/0.2154{millivolt}));
    dti_recover = 1{dimensionless}-0.5{dimensionless}/(1{dimensionless}+exp((v+EKshift+70.0{millivolt})/20.0{millivolt}));
    tiFp = dti_develop*dti_recover*tiF;
    tiSp = dti_develop*dti_recover*tiS;
    ode(iFp, time) = (iss-iFp)/tiFp;
    ode(iSp, time) = (iss-iSp)/tiSp;
    ip = AiF*iFp+AiS*iSp;
    Gto = sel
      case celltype == 1{dimensionless}:
        Gto_b*2{dimensionless};
      case celltype == 2{dimensionless}:
        Gto_b*2{dimensionless};
      otherwise:
        Gto_b;
    endsel;
    fItop = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    Ito = Gto*(v-EK)*((1{dimensionless}-fItop)*a*i+fItop*ap*ip);
  enddef;

  def comp ICaL as
    var Kmn: millimolar {init: 0.002};
    var k2n: per_millisecond {init: 500};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    // modifiable-parameter: yes
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    // modifiable-parameter: yes
    var PCa_b: dimensionless {init: 8.3757e-05};
    var dss: dimensionless;
    var d: dimensionless {init: 8.1084e-9};
    var fss: dimensionless;
    var Aff: dimensionless {init: 0.6};
    var Afs: dimensionless;
    var ff: dimensionless {init: 1.0};
    var fs: dimensionless {init: 0.939};
    var f: dimensionless;
    var fcass: dimensionless;
    var jcass: dimensionless;
    var Afcaf: dimensionless;
    var Afcas: dimensionless;
    var fcaf: dimensionless {init: 1.0};
    var fcas: dimensionless {init: 0.9999};
    var fca: dimensionless;
    var jca: dimensionless {init: 1.0};
    var ffp: dimensionless {init: 1.0};
    var fp: dimensionless;
    var fcafp: dimensionless {init: 1.0};
    var fcap: dimensionless;
    var km2n: per_millisecond;
    var anca_ss: dimensionless;
    var nca_ss: dimensionless {init: 6.6462e-4};
    var anca_i: dimensionless;
    var nca_i: dimensionless {init: 0.0012};
    var PhiCaL_ss: dimensionless;
    var PhiCaNa_ss: dimensionless;
    var PhiCaK_ss: dimensionless;
    var PhiCaL_i: dimensionless;
    var PhiCaNa_i: dimensionless;
    var PhiCaK_i: dimensionless;
    var PCa: dimensionless;
    var celltype: dimensionless {pub: in};
    var PCap: dimensionless;
    var PCaNa: dimensionless;
    var PCaK: dimensionless;
    var PCaNap: dimensionless;
    var PCaKp: dimensionless;
    var fICaLp: dimensionless;
    var td: millisecond;
    var tff: millisecond;
    var tfs: millisecond;
    var tfcaf: millisecond;
    var tfcas: millisecond;
    var tjca: millisecond {init: 75};
    var tffp: millisecond;
    var tfcafp: millisecond;
    var ICaL_ss: microA_per_microF {pub: out};
    var ICaNa_ss: microA_per_microF {pub: out};
    var ICaK_ss: microA_per_microF {pub: out};
    var ICaL_i: microA_per_microF {pub: out};
    var ICaNa_i: microA_per_microF {pub: out};
    var ICaK_i: microA_per_microF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var ICaL: microA_per_microF {pub: out};
    var ICaNa: microA_per_microF {pub: out};
    var ICaK: microA_per_microF {pub: out};
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    var cao: millimolar {pub: in};
    var cass: millimolar {pub: in};
    var cai: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var nai: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var kss: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var clo: millimolar {pub: in};
    var cli: millimolar {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var T: kelvin {pub: in};
    var vShift: millivolt {init: 0};
    var offset: millisecond {init: 0};
    var Io: dimensionless;
    var Iss: dimensionless;
    var Ii: dimensionless;
    var dielConstant: per_kelvin {init: 74};
    var constA: dimensionless;
    var gamma_cao: dimensionless {pub: out};
    var gamma_cass: dimensionless;
    var gamma_cai: dimensionless {pub: out};
    var gamma_nao: dimensionless;
    var gamma_nass: dimensionless;
    var gamma_nai: dimensionless;
    var gamma_ko: dimensionless;
    var gamma_kss: dimensionless;
    var gamma_ki: dimensionless;
    var ICaL_fractionSS: dimensionless {init: 0.8};
    dss = sel
      case v >= 31.4978{millivolt}:
        1{dimensionless};
      otherwise:
        1.0763{dimensionless}*exp(-1.0070{dimensionless}*exp(-0.0829{per_millivolt}*v));
    endsel;
    td = offset+0.6{millisecond}+1{millisecond}/(exp(-0.05{per_millivolt}*(v+vShift+6{millivolt}))+exp(0.09{per_millivolt}*(v+vShift+14{millivolt})));
    ode(d, time) = (dss-d)/td;
    fss = 1{dimensionless}/(1{dimensionless}+exp((v+19.58{millivolt})/3.696{millivolt}));
    tff = 7{millisecond}+1{millisecond}/(0.0045{dimensionless}*exp(-(v+20{millivolt})/10{millivolt})+0.0045{dimensionless}*exp((v+20{millivolt})/10{millivolt}));
    tfs = 1000{millisecond}+1{millisecond}/(0.000035{dimensionless}*exp(-(v+5{millivolt})/4{millivolt})+0.000035{dimensionless}*exp((v+5{millivolt})/6{millivolt}));
    Afs = 1{dimensionless}-Aff;
    ode(ff, time) = (fss-ff)/tff;
    ode(fs, time) = (fss-fs)/tfs;
    f = Aff*ff+Afs*fs;
    fcass = fss;
    tfcaf = 7{millisecond}+1{millisecond}/(0.04{dimensionless}*exp(-(v-4{millivolt})/7{millivolt})+0.04{dimensionless}*exp((v-4{millivolt})/7{millivolt}));
    tfcas = 100{millisecond}+1{millisecond}/(0.00012{dimensionless}*exp(-v/3{millivolt})+0.00012{dimensionless}*exp(v/7{millivolt}));
    Afcaf = 0.3{dimensionless}+0.6{dimensionless}/(1{dimensionless}+exp((v-10{millivolt})/10{millivolt}));
    Afcas = 1{dimensionless}-Afcaf;
    ode(fcaf, time) = (fcass-fcaf)/tfcaf;
    ode(fcas, time) = (fcass-fcas)/tfcas;
    fca = Afcaf*fcaf+Afcas*fcas;
    jcass = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+18.08{millivolt})/2.7916{millivolt}));
    ode(jca, time) = (jcass-jca)/tjca;
    tffp = 2.5{dimensionless}*tff;
    ode(ffp, time) = (fss-ffp)/tffp;
    fp = Aff*ffp+Afs*fs;
    tfcafp = 2.5{dimensionless}*tfcaf;
    ode(fcafp, time) = (fcass-fcafp)/tfcafp;
    fcap = Afcaf*fcafp+Afcas*fcas;
    km2n = jca*1{per_millisecond};
    anca_ss = 1{dimensionless}/(k2n/km2n+pow(1{dimensionless}+Kmn/cass, 4{dimensionless}));
    ode(nca_ss, time) = anca_ss*k2n-nca_ss*km2n;
    Io = 0.5{dimensionless}*(nao+ko+clo+4{dimensionless}*cao)/1000{millimolar};
    Iss = 0.5{dimensionless}*(nass+kss+cli+4{dimensionless}*cass)/1000{millimolar};
    constA = 1.82e6{dimensionless}*pow(dielConstant*T, -1.5{dimensionless});
    gamma_cass = exp(-constA*4{dimensionless}*(sqrt(Iss)/(1{dimensionless}+sqrt(Iss))-0.3{dimensionless}*Iss));
    gamma_cao = exp(-constA*4{dimensionless}*(sqrt(Io)/(1{dimensionless}+sqrt(Io))-0.3{dimensionless}*Io));
    gamma_nass = exp(-constA*1{dimensionless}*(sqrt(Iss)/(1{dimensionless}+sqrt(Iss))-0.3{dimensionless}*Iss));
    gamma_nao = exp(-constA*1{dimensionless}*(sqrt(Io)/(1{dimensionless}+sqrt(Io))-0.3{dimensionless}*Io));
    gamma_kss = exp(-constA*1{dimensionless}*(sqrt(Iss)/(1{dimensionless}+sqrt(Iss))-0.3{dimensionless}*Iss));
    gamma_ko = exp(-constA*1{dimensionless}*(sqrt(Io)/(1{dimensionless}+sqrt(Io))-0.3{dimensionless}*Io));
    PhiCaL_ss = 4{dimensionless}*vffrt*(gamma_cass*cass*exp(2{dimensionless}*vfrt)-gamma_cao*cao)/(exp(2{dimensionless}*vfrt)-1{dimensionless});
    PhiCaNa_ss = 1{dimensionless}*vffrt*(gamma_nass*nass*exp(1{dimensionless}*vfrt)-gamma_nao*nao)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    PhiCaK_ss = 1{dimensionless}*vffrt*(gamma_kss*kss*exp(1{dimensionless}*vfrt)-gamma_ko*ko)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    PCa = sel
      case celltype == 1{dimensionless}:
        PCa_b*1.2{dimensionless};
      case celltype == 2{dimensionless}:
        PCa_b*2{dimensionless};
      otherwise:
        PCa_b;
    endsel;
    PCap = 1.1{dimensionless}*PCa;
    PCaNa = 0.00125{dimensionless}*PCa;
    PCaK = 3.574e-4{dimensionless}*PCa;
    PCaNap = 0.00125{dimensionless}*PCap;
    PCaKp = 3.574e-4{dimensionless}*PCap;
    fICaLp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    ICaL_ss = ICaL_fractionSS*((1{dimensionless}-fICaLp)*PCa*PhiCaL_ss*d*(f*(1{dimensionless}-nca_ss)+jca*fca*nca_ss)+fICaLp*PCap*PhiCaL_ss*d*(fp*(1{dimensionless}-nca_ss)+jca*fcap*nca_ss));
    ICaNa_ss = ICaL_fractionSS*((1{dimensionless}-fICaLp)*PCaNa*PhiCaNa_ss*d*(f*(1{dimensionless}-nca_ss)+jca*fca*nca_ss)+fICaLp*PCaNap*PhiCaNa_ss*d*(fp*(1{dimensionless}-nca_ss)+jca*fcap*nca_ss));
    ICaK_ss = ICaL_fractionSS*((1{dimensionless}-fICaLp)*PCaK*PhiCaK_ss*d*(f*(1{dimensionless}-nca_ss)+jca*fca*nca_ss)+fICaLp*PCaKp*PhiCaK_ss*d*(fp*(1{dimensionless}-nca_ss)+jca*fcap*nca_ss));
    anca_i = 1{dimensionless}/(k2n/km2n+pow(1{dimensionless}+Kmn/cai, 4{dimensionless}));
    ode(nca_i, time) = anca_i*k2n-nca_i*km2n;
    Ii = 0.5{dimensionless}*(nai+ki+cli+4{dimensionless}*cai)/1000{millimolar};
    gamma_cai = exp(-constA*4{dimensionless}*(sqrt(Ii)/(1{dimensionless}+sqrt(Ii))-0.3{dimensionless}*Ii));
    gamma_nai = exp(-constA*1{dimensionless}*(sqrt(Ii)/(1{dimensionless}+sqrt(Ii))-0.3{dimensionless}*Ii));
    gamma_ki = exp(-constA*1{dimensionless}*(sqrt(Ii)/(1{dimensionless}+sqrt(Ii))-0.3{dimensionless}*Ii));
    PhiCaL_i = 4{dimensionless}*vffrt*(gamma_cai*cai*exp(2{dimensionless}*vfrt)-gamma_cao*cao)/(exp(2{dimensionless}*vfrt)-1{dimensionless});
    PhiCaNa_i = 1{dimensionless}*vffrt*(gamma_nai*nai*exp(1{dimensionless}*vfrt)-gamma_nao*nao)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    PhiCaK_i = 1{dimensionless}*vffrt*(gamma_ki*ki*exp(1{dimensionless}*vfrt)-gamma_ko*ko)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    ICaL_i = (1{dimensionless}-ICaL_fractionSS)*((1{dimensionless}-fICaLp)*PCa*PhiCaL_i*d*(f*(1{dimensionless}-nca_i)+jca*fca*nca_i)+fICaLp*PCap*PhiCaL_i*d*(fp*(1{dimensionless}-nca_i)+jca*fcap*nca_i));
    ICaNa_i = (1{dimensionless}-ICaL_fractionSS)*((1{dimensionless}-fICaLp)*PCaNa*PhiCaNa_i*d*(f*(1{dimensionless}-nca_i)+jca*fca*nca_i)+fICaLp*PCaNap*PhiCaNa_i*d*(fp*(1{dimensionless}-nca_i)+jca*fcap*nca_i));
    ICaK_i = (1{dimensionless}-ICaL_fractionSS)*((1{dimensionless}-fICaLp)*PCaK*PhiCaK_i*d*(f*(1{dimensionless}-nca_i)+jca*fca*nca_i)+fICaLp*PCaKp*PhiCaK_i*d*(fp*(1{dimensionless}-nca_i)+jca*fcap*nca_i));
    ICaL = ICaL_ss+ICaL_i;
    ICaNa = ICaNa_ss+ICaNa_i;
    ICaK = ICaK_ss+ICaK_i;
  enddef;

  def comp IKr as
    // modifiable-parameter: yes
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var GKr_b: milliS_per_microF {init: 0.0321};
    var C1: dimensionless {init: 7.0344e-4};
    var C2: dimensionless {init: 8.5109e-4};
    var C3: dimensionless {init: 0.9981};
    var I: dimensionless {init: 1.3289e-5};
    var O: dimensionless {init: 3.7585e-4};
    var alpha: per_millisecond;
    var beta: per_millisecond;
    var alpha_1: per_millisecond {init: 0.154375};
    var beta_1: per_millisecond {init: 0.1911};
    var alpha_2: per_millisecond;
    var beta_2: per_millisecond;
    var alpha_i: per_millisecond;
    var beta_i: per_millisecond;
    var alpha_C2ToI: per_millisecond;
    var beta_ItoC2: per_millisecond;
    var v: millivolt {pub: in};
    var vfrt: dimensionless {pub: in};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var GKr: milliS_per_microF;
    var EK: millivolt {pub: in};
    var ko: millimolar {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var IKr: microA_per_microF {pub: out};
    alpha = 0.1161{per_millisecond}*exp(0.2990{dimensionless}*vfrt);
    beta = 0.2442{per_millisecond}*exp(-1.604{dimensionless}*vfrt);
    alpha_2 = 0.0578{per_millisecond}*exp(0.9710{dimensionless}*vfrt);
    beta_2 = 0.349e-3{per_millisecond}*exp(-1.062{dimensionless}*vfrt);
    alpha_i = 0.2533{per_millisecond}*exp(0.5953{dimensionless}*vfrt);
    beta_i = 0.06525{per_millisecond}*exp(-0.8209{dimensionless}*vfrt);
    alpha_C2ToI = 0.52e-4{per_millisecond}*exp(1.525{dimensionless}*vfrt);
    beta_ItoC2 = beta_2*beta_i*alpha_C2ToI/(alpha_2*alpha_i);
    ode(C3, time) = beta*C2-alpha*C3;
    ode(C2, time) = alpha*C3+beta_1*C1-(beta+alpha_1)*C2;
    ode(C1, time) = alpha_1*C2+beta_2*O+beta_ItoC2*I-(beta_1+alpha_2+alpha_C2ToI)*C1;
    ode(O, time) = alpha_2*C1+beta_i*I-(beta_2+alpha_i)*O;
    ode(I, time) = alpha_C2ToI*C1+alpha_i*O-(beta_ItoC2+beta_i)*I;
    GKr = sel
      case celltype == 1{dimensionless}:
        GKr_b*1.3{dimensionless};
      case celltype == 2{dimensionless}:
        GKr_b*0.8{dimensionless};
      otherwise:
        GKr_b;
    endsel;
    IKr = GKr*sqrt(ko/5{millimolar})*O*(v-EK);
  enddef;

  def comp IKs as
    // modifiable-parameter: yes
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var GKs_b: milliS_per_microF {init: 0.0011};
    var GKs: milliS_per_microF;
    var xs1ss: dimensionless;
    var xs2ss: dimensionless;
    var txs1: millisecond;
    var xs1: dimensionless {init: 0.248};
    var xs2: dimensionless {init: 1.7707e-4};
    var KsCa: dimensionless;
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var EKs: millivolt {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var IKs: microA_per_microF {pub: out};
    var txs2: millisecond;
    var cai: millimolar {pub: in};
    xs1ss = 1{dimensionless}/(1{dimensionless}+exp(-(v+11.6{millivolt})/8.932{millivolt}));
    txs1 = 817.3{millisecond}+1{millisecond}/(2.326e-4{dimensionless}*exp((v+48.28{millivolt})/17.8{millivolt})+0.001292{dimensionless}*exp(-(v+210{millivolt})/230{millivolt}));
    ode(xs1, time) = (xs1ss-xs1)/txs1;
    xs2ss = xs1ss;
    txs2 = 1{millisecond}/(0.01{dimensionless}*exp((v-50{millivolt})/20{millivolt})+0.0193{dimensionless}*exp(-(v+66.54{millivolt})/31{millivolt}));
    ode(xs2, time) = (xs2ss-xs2)/txs2;
    KsCa = 1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8e-5{millimolar}/cai, 1.4{dimensionless}));
    GKs = sel
      case celltype == 1{dimensionless}:
        GKs_b*1.4{dimensionless};
      otherwise:
        GKs_b;
    endsel;
    IKs = GKs*KsCa*xs1*xs2*(v-EKs);
  enddef;

  def comp IK1 as
    var GK1: milliS_per_microF;
    // modifiable-parameter: yes
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var GK1_b: milliS_per_microF {init: 0.6992};
    var aK1: dimensionless;
    var bK1: dimensionless;
    var K1ss: dimensionless;
    var v: millivolt {pub: in};
    var celltype: dimensionless {pub: in};
    var EK: millivolt {pub: in};
    var ko: millimolar {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var IK1: microA_per_microF {pub: out};
    aK1 = 4.094{dimensionless}/(1{dimensionless}+exp(0.1217{per_millivolt}*(v-EK-49.934{millivolt})));
    bK1 = (15.72{dimensionless}*exp(0.0674{per_millivolt}*(v-EK-3.257{millivolt}))+exp(0.0618{per_millivolt}*(v-EK-594.31{millivolt})))/(1{dimensionless}+exp(-0.1629{per_millivolt}*(v-EK+14.207{millivolt})));
    K1ss = aK1/(aK1+bK1);
    GK1 = sel
      case celltype == 1{dimensionless}:
        GK1_b*1.2{dimensionless};
      case celltype == 2{dimensionless}:
        GK1_b*1.3{dimensionless};
      otherwise:
        GK1_b;
    endsel;
    IK1 = GK1*sqrt(ko/5{millimolar})*K1ss*(v-EK);
  enddef;

  def comp INaCa as
    var INaCa_fractionSS: dimensionless {init: 0.35};
    var kna1: per_millisecond {init: 15};
    var kna2: per_millisecond {init: 5};
    var kna3: per_millisecond {init: 88.12};
    var kasymm: dimensionless {init: 12.5};
    var wna: dimensionless {init: 6e4};
    var wca: dimensionless {init: 6e4};
    var wnaca: dimensionless {init: 5e3};
    var kcaon: per_millisecond {init: 1.5e6};
    var kcaoff: per_millisecond {init: 5e3};
    var qna: dimensionless {init: 0.5224};
    var qca: dimensionless {init: 0.167};
    var hna: dimensionless;
    var hca: dimensionless;
    var zca: dimensionless {pub: in};
    var KmCaAct: millimolar {init: 150e-6};
    var zna: dimensionless {pub: in};
    // modifiable-parameter: yes
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var Gncx_b: milliS_per_microF {init: 0.0034};
    var Gncx: milliS_per_microF;
    var v: millivolt {pub: in};
    var vfrt: dimensionless {pub: in};
    var nai: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var cass: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var cai: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var h1_i: dimensionless;
    var h2_i: dimensionless;
    var h3_i: dimensionless;
    var h4_i: dimensionless;
    var h5_i: dimensionless;
    var h6_i: dimensionless;
    var h7_i: dimensionless;
    var h8_i: dimensionless;
    var h9_i: dimensionless;
    var h10_i: dimensionless;
    var h11_i: dimensionless;
    var h12_i: dimensionless;
    var k1_i: dimensionless;
    var k2_i: dimensionless;
    var k3p_i: dimensionless;
    var k3pp_i: dimensionless;
    var k3_i: dimensionless;
    var k4_i: dimensionless;
    var k4p_i: dimensionless;
    var k4pp_i: dimensionless;
    var k5_i: dimensionless;
    var k6_i: dimensionless;
    var k7_i: dimensionless;
    var k8_i: dimensionless;
    var x1_i: dimensionless;
    var x2_i: dimensionless;
    var x3_i: dimensionless;
    var x4_i: dimensionless;
    var E1_i: dimensionless;
    var E2_i: dimensionless;
    var E3_i: dimensionless;
    var E4_i: dimensionless;
    var allo_i: dimensionless;
    var JncxNa_i: millimolar_per_millisecond;
    var JncxCa_i: millimolar_per_millisecond;
    var celltype: dimensionless {pub: in};
    // <variable cmeta:id="membrane_sodium_calcium_exchanger_current_i" name="INaCa_i" public_interface="out" units="microA_per_microF"/>
    // <variable cmeta:id="membrane_sodium_calcium_exchanger_current_ss" name="INaCa_ss" public_interface="out" units="microA_per_microF"/>
    var INaCa_i: microA_per_microF {pub: out};
    var INaCa_ss: microA_per_microF {pub: out};
    var h1_ss: dimensionless;
    var h2_ss: dimensionless;
    var h3_ss: dimensionless;
    var h4_ss: dimensionless;
    var h5_ss: dimensionless;
    var h6_ss: dimensionless;
    var h7_ss: dimensionless;
    var h8_ss: dimensionless;
    var h9_ss: dimensionless;
    var h10_ss: dimensionless;
    var h11_ss: dimensionless;
    var h12_ss: dimensionless;
    var k1_ss: dimensionless;
    var k2_ss: dimensionless;
    var k3p_ss: dimensionless;
    var k3pp_ss: dimensionless;
    var k3_ss: dimensionless;
    var k4_ss: dimensionless;
    var k4p_ss: dimensionless;
    var k4pp_ss: dimensionless;
    var k5_ss: dimensionless;
    var k6_ss: dimensionless;
    var k7_ss: dimensionless;
    var k8_ss: dimensionless;
    var x1_ss: dimensionless;
    var x2_ss: dimensionless;
    var x3_ss: dimensionless;
    var x4_ss: dimensionless;
    var E1_ss: dimensionless;
    var E2_ss: dimensionless;
    var E3_ss: dimensionless;
    var E4_ss: dimensionless;
    var allo_ss: dimensionless;
    var JncxNa_ss: millimolar_per_millisecond;
    var JncxCa_ss: millimolar_per_millisecond;
    hca = exp(qca*vfrt);
    hna = exp(qna*vfrt);
    h1_i = 1{dimensionless}+nai/kna3*(1{dimensionless}+hna);
    h2_i = nai*hna/(kna3*h1_i);
    h3_i = 1{dimensionless}/h1_i;
    h4_i = 1{dimensionless}+nai/kna1*(1{dimensionless}+nai/kna2);
    h5_i = nai*nai/(h4_i*kna1*kna2);
    h6_i = 1{dimensionless}/h4_i;
    h7_i = 1{dimensionless}+nao/kna3*(1{dimensionless}+1{dimensionless}/hna);
    h8_i = nao/(kna3*hna*h7_i);
    h9_i = 1{dimensionless}/h7_i;
    h10_i = kasymm+1{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_i = nao*nao/(h10_i*kna1*kna2);
    h12_i = 1{dimensionless}/h10_i;
    k1_i = h12_i*cao*kcaon;
    k2_i = kcaoff;
    k3p_i = h9_i*wca;
    k3pp_i = h8_i*wnaca;
    k3_i = k3p_i+k3pp_i;
    k4p_i = h3_i*wca/hca;
    k4pp_i = h2_i*wnaca;
    k4_i = k4p_i+k4pp_i;
    k5_i = kcaoff;
    k6_i = h6_i*cai*kcaon;
    k7_i = h5_i*h2_i*wna;
    k8_i = h8_i*h11_i*wna;
    x1_i = k2_i*k4_i*(k7_i+k6_i)+k5_i*k7_i*(k2_i+k3_i);
    x2_i = k1_i*k7_i*(k4_i+k5_i)+k4_i*k6_i*(k1_i+k8_i);
    x3_i = k1_i*k3_i*(k7_i+k6_i)+k8_i*k6_i*(k2_i+k3_i);
    x4_i = k2_i*k8_i*(k4_i+k5_i)+k3_i*k5_i*(k1_i+k8_i);
    E1_i = x1_i/(x1_i+x2_i+x3_i+x4_i);
    E2_i = x2_i/(x1_i+x2_i+x3_i+x4_i);
    E3_i = x3_i/(x1_i+x2_i+x3_i+x4_i);
    E4_i = x4_i/(x1_i+x2_i+x3_i+x4_i);
    allo_i = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/cai));
    JncxNa_i = 3{dimensionless}*(E4_i*k7_i-E1_i*k8_i)+E3_i*k4pp_i-E2_i*k3pp_i;
    JncxCa_i = E2_i*k2_i-E1_i*k1_i;
    Gncx = sel
      case celltype == 1{dimensionless}:
        Gncx_b*1.1{dimensionless};
      case celltype == 2{dimensionless}:
        Gncx_b*1.4{dimensionless};
      otherwise:
        Gncx_b;
    endsel;
    INaCa_i = (1{dimensionless}-INaCa_fractionSS)*Gncx*allo_i*(zna*JncxNa_i+zca*JncxCa_i);
    h1_ss = 1{dimensionless}+nass/kna3*(1{dimensionless}+hna);
    h2_ss = nass*hna/(kna3*h1_ss);
    h3_ss = 1{dimensionless}/h1_ss;
    h4_ss = 1{dimensionless}+nass/kna1*(1{dimensionless}+nass/kna2);
    h5_ss = nass*nass/(h4_ss*kna1*kna2);
    h6_ss = 1{dimensionless}/h4_ss;
    h7_ss = 1{dimensionless}+nao/kna3*(1{dimensionless}+1{dimensionless}/hna);
    h8_ss = nao/(kna3*hna*h7_ss);
    h9_ss = 1{dimensionless}/h7_ss;
    h10_ss = kasymm+1{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_ss = nao*nao/(h10_ss*kna1*kna2);
    h12_ss = 1{dimensionless}/h10_ss;
    k1_ss = h12_ss*cao*kcaon;
    k2_ss = kcaoff;
    k3p_ss = h9_ss*wca;
    k3pp_ss = h8_ss*wnaca;
    k3_ss = k3p_ss+k3pp_ss;
    k4p_ss = h3_ss*wca/hca;
    k4pp_ss = h2_ss*wnaca;
    k4_ss = k4p_ss+k4pp_ss;
    k5_ss = kcaoff;
    k6_ss = h6_ss*cass*kcaon;
    k7_ss = h5_ss*h2_ss*wna;
    k8_ss = h8_ss*h11_ss*wna;
    x1_ss = k2_ss*k4_ss*(k7_ss+k6_ss)+k5_ss*k7_ss*(k2_ss+k3_ss);
    x2_ss = k1_ss*k7_ss*(k4_ss+k5_ss)+k4_ss*k6_ss*(k1_ss+k8_ss);
    x3_ss = k1_ss*k3_ss*(k7_ss+k6_ss)+k8_ss*k6_ss*(k2_ss+k3_ss);
    x4_ss = k2_ss*k8_ss*(k4_ss+k5_ss)+k3_ss*k5_ss*(k1_ss+k8_ss);
    E1_ss = x1_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E2_ss = x2_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E3_ss = x3_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E4_ss = x4_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    allo_ss = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/cass));
    JncxNa_ss = 3{dimensionless}*(E4_ss*k7_ss-E1_ss*k8_ss)+E3_ss*k4pp_ss-E2_ss*k3pp_ss;
    JncxCa_ss = E2_ss*k2_ss-E1_ss*k1_ss;
    INaCa_ss = INaCa_fractionSS*Gncx*allo_ss*(zna*JncxNa_ss+zca*JncxCa_ss);
  enddef;

  def comp INaK as
    var k1p: per_millisecond {init: 949.5};
    var k1m: per_millisecond {init: 182.4};
    var k2p: per_millisecond {init: 687.2};
    var k2m: per_millisecond {init: 39.4};
    var k3p: per_millisecond {init: 1899};
    var k3m: per_millisecond {init: 79300};
    var k4p: per_millisecond {init: 639};
    var k4m: per_millisecond {init: 40};
    var Knai0: millimolar {init: 9.073};
    var Knao0: millimolar {init: 27.78};
    var delta: millivolt {init: -0.155};
    var Kki: per_millisecond {init: 0.5};
    var Kko: per_millisecond {init: 0.3582};
    var MgADP: millimolar {init: 0.05};
    var MgATP: millimolar {init: 9.8};
    var Kmgatp: millimolar {init: 1.698e-7};
    var H: millimolar {init: 1e-7};
    var eP: dimensionless {init: 4.2};
    var Khp: millimolar {init: 1.698e-7};
    var Knap: millimolar {init: 224};
    var Kxkur: millimolar {init: 292};
    var zk: dimensionless {pub: in};
    var zna: dimensionless {pub: in};
    // modifiable-parameter: yes
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current_permeability
    var Pnak_b: milliS_per_microF {init: 15.4509};
    var Pnak: milliS_per_microF;
    var celltype: dimensionless {pub: in};
    var v: millivolt {pub: in};
    var vfrt: dimensionless {pub: in};
    var nai: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var Knai: millimolar;
    var Knao: millimolar;
    var P: dimensionless;
    var a1: dimensionless;
    var b1: dimensionless;
    var a2: dimensionless;
    var b2: dimensionless;
    var a3: dimensionless;
    var b3: dimensionless;
    var a4: dimensionless;
    var b4: dimensionless;
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var E1: dimensionless;
    var E2: dimensionless;
    var E3: dimensionless;
    var E4: dimensionless;
    var JnakNa: millimolar_per_millisecond;
    var JnakK: millimolar_per_millisecond;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current
    var INaK: microA_per_microF {pub: out};
    Knai = Knai0*exp(delta*vfrt/3{dimensionless});
    Knao = Knao0*exp((1{dimensionless}-delta)*vfrt/3{dimensionless});
    P = eP/(1{dimensionless}+H/Khp+nai/Knap+ki/Kxkur);
    a1 = k1p*pow(nai/Knai, 3{dimensionless})/(pow(1{dimensionless}+nai/Knai, 3{dimensionless})+sqr(1{dimensionless}+ki/Kki)-1{dimensionless});
    b1 = k1m*MgADP;
    a2 = k2p;
    b2 = k2m*pow(nao/Knao, 3{dimensionless})/(pow(1{dimensionless}+nao/Knao, 3{dimensionless})+sqr(1{dimensionless}+ko/Kko)-1{dimensionless});
    a3 = k3p*sqr(ko/Kko)/(pow(1{dimensionless}+nao/Knao, 3{dimensionless})+sqr(1{dimensionless}+ko/Kko)-1{dimensionless});
    b3 = k3m*P*H/(1{dimensionless}+MgATP/Kmgatp);
    a4 = k4p*MgATP/Kmgatp/(1{dimensionless}+MgATP/Kmgatp);
    b4 = k4m*sqr(ki/Kki)/(pow(1{dimensionless}+nai/Knai, 3{dimensionless})+sqr(1{dimensionless}+ki/Kki)-1{dimensionless});
    x1 = a4*a1*a2+b2*b4*b3+a2*b4*b3+b3*a1*a2;
    x2 = b2*b1*b4+a1*a2*a3+a3*b1*b4+a2*a3*b4;
    x3 = a2*a3*a4+b3*b2*b1+b2*b1*a4+a3*a4*b1;
    x4 = b4*b3*b2+a3*a4*a1+b2*a4*a1+b3*b2*a1;
    E1 = x1/(x1+x2+x3+x4);
    E2 = x2/(x1+x2+x3+x4);
    E3 = x3/(x1+x2+x3+x4);
    E4 = x4/(x1+x2+x3+x4);
    JnakNa = 3{dimensionless}*(E1*a3-E2*b3);
    JnakK = 2{dimensionless}*(E4*b1-E3*a1);
    Pnak = sel
      case celltype == 1{dimensionless}:
        Pnak_b*0.9{dimensionless};
      case celltype == 2{dimensionless}:
        Pnak_b*0.7{dimensionless};
      otherwise:
        Pnak_b;
    endsel;
    INaK = Pnak*(zna*JnakNa+zk*JnakK);
  enddef;

  def comp IKb as
    var xkb: dimensionless;
    var GKb_b: milliS_per_microF {init: 0.0189};
    var GKb: milliS_per_microF;
    var v: millivolt {pub: in};
    var EK: millivolt {pub: in};
    var celltype: dimensionless {pub: in};
    var IKb: microA_per_microF {pub: out};
    xkb = 1{dimensionless}/(1{dimensionless}+exp(-(v-10.8968{millivolt})/23.9871{millivolt}));
    GKb = sel
      case celltype == 1{dimensionless}:
        GKb_b*0.6{dimensionless};
      otherwise:
        GKb_b;
    endsel;
    IKb = GKb*xkb*(v-EK);
  enddef;

  def comp INab as
    var PNab: milliS_per_microF {init: 1.9239e-09};
    var INab: microA_per_microF {pub: out};
    var nai: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    INab = PNab*vffrt*(nai*exp(vfrt)-nao)/(exp(vfrt)-1{dimensionless});
  enddef;

  def comp ICab as
    var PCab: milliS_per_microF {init: 5.9194e-08};
    var ICab: microA_per_microF {pub: out};
    var cao: millimolar {pub: in};
    var cai: millimolar {pub: in};
    var gamma_cao: dimensionless {pub: in};
    var gamma_cai: dimensionless {pub: in};
    var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    ICab = PCab*4{dimensionless}*vffrt*(gamma_cai*cai*exp(2{dimensionless}*vfrt)-gamma_cao*cao)/(exp(2{dimensionless}*vfrt)-1{dimensionless});
  enddef;

  def comp IpCa as
    var GpCa: milliS_per_microF {init: 5e-04};
    var KmCap: millimolar {init: 0.0005};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var IpCa: microA_per_microF {pub: out};
    var cai: millimolar {pub: in};
    IpCa = GpCa*cai/(KmCap+cai);
  enddef;

  def comp ICl as
    var GClCa: milliS_per_microF {init: 0.2843};
    var GClb: milliS_per_microF {init: 1.98e-3};
    var KdClCa: millimolar {init: 0.1};
    var Fjunc: dimensionless {init: 1};
    var cai: millimolar {pub: in};
    var cass: millimolar {pub: in};
    var v: millivolt {pub: in};
    var ECl: millivolt {pub: in};
    var IClCa_junc: microA_per_microF;
    var IClCa_sl: microA_per_microF;
    var IClCa: microA_per_microF {pub: out};
    var IClb: microA_per_microF {pub: out};
    IClCa_junc = Fjunc*GClCa/(1{dimensionless}+KdClCa/cass)*(v-ECl);
    IClCa_sl = (1{dimensionless}-Fjunc)*GClCa/(1{dimensionless}+KdClCa/cai)*(v-ECl);
    IClCa = IClCa_junc+IClCa_sl;
    IClb = GClb*(v-ECl);
  enddef;

  def comp diff as
    var cai: millimolar {pub: in};
    var cass: millimolar {pub: in};
    var nai: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var kss: millimolar {pub: in};
    var tauNa: millisecond {init: 2.0};
    var tauK: millisecond {init: 2.0};
    var tauCa: millisecond {init: 0.2};
    var JdiffNa: millimolar_per_millisecond {pub: out};
    var JdiffK: millimolar_per_millisecond {pub: out};
    var Jdiff: millimolar_per_millisecond {pub: out};
    JdiffNa = (nass-nai)/tauNa;
    JdiffK = (kss-ki)/tauK;
    Jdiff = (cass-cai)/tauCa;
  enddef;

  def comp ryr as
    var bt: millisecond {init: 4.75};
    var a_rel: millimolar_per_millisecond;
    var Jrel_inf_b: millimolar_per_millisecond;
    var Jrel_inf: millimolar_per_millisecond;
    var tau_rel_b: millisecond;
    var tau_rel: millisecond;
    var Jrel_np: millimolar_per_millisecond {init: 1.6129e-22};
    var btp: millisecond;
    var a_relp: millimolar_per_millisecond;
    var Jrel_infp_b: millimolar_per_millisecond;
    var Jrel_infp: millimolar_per_millisecond;
    var tau_relp_b: millisecond;
    var tau_relp: millisecond;
    var Jrel_p: millimolar_per_millisecond {init: 1.2475e-20};
    var cajsr_half: millimolar {init: 1.7};
    var celltype: dimensionless {pub: in};
    var ICaL_ss: microA_per_microF {pub: in};
    var cajsr: millimolar {pub: in};
    var time: millisecond {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var fJrelp: dimensionless;
    // modifiable-parameter: yes
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var Jrel_b: dimensionless {init: 1.5378};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var Jrel: millimolar_per_millisecond {pub: out};
    a_rel = 0.5{millimolar_per_millisecond}*bt/1{millisecond};
    Jrel_inf_b = -a_rel*ICaL_ss/1{microA_per_microF}/(1{dimensionless}+pow(cajsr_half/cajsr, 8{dimensionless}));
    Jrel_inf = sel
      case celltype == 2{dimensionless}:
        Jrel_inf_b*1.7{dimensionless};
      otherwise:
        Jrel_inf_b;
    endsel;
    tau_rel_b = bt/(1{dimensionless}+0.0123{millimolar}/cajsr);
    tau_rel = sel
      case tau_rel_b < 0.001{millisecond}:
        0.001{millisecond};
      otherwise:
        tau_rel_b;
    endsel;
    ode(Jrel_np, time) = (Jrel_inf-Jrel_np)/tau_rel;
    btp = 1.25{dimensionless}*bt;
    a_relp = 0.5{millimolar_per_millisecond}*btp/1{millisecond};
    Jrel_infp_b = -a_relp*ICaL_ss/1{microA_per_microF}/(1{dimensionless}+pow(cajsr_half/cajsr, 8{dimensionless}));
    Jrel_infp = sel
      case celltype == 2{dimensionless}:
        Jrel_infp_b*1.7{dimensionless};
      otherwise:
        Jrel_infp_b;
    endsel;
    tau_relp_b = btp/(1{dimensionless}+0.0123{millimolar}/cajsr);
    tau_relp = sel
      case tau_relp_b < 0.001{millisecond}:
        0.001{millisecond};
      otherwise:
        tau_relp_b;
    endsel;
    ode(Jrel_p, time) = (Jrel_infp-Jrel_p)/tau_relp;
    fJrelp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    Jrel = Jrel_b*((1{dimensionless}-fJrelp)*Jrel_np+fJrelp*Jrel_p);
  enddef;

  def comp SERCA as
    var upScale: dimensionless;
    var Jupnp: millimolar_per_millisecond;
    var Jupp: millimolar_per_millisecond;
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var celltype: dimensionless {pub: in};
    var cai: millimolar {pub: in};
    var cansr: millimolar {pub: in};
    var fJupp: dimensionless;
    var Jleak: millimolar_per_millisecond;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var Jup: millimolar_per_millisecond {pub: out};
    // modifiable-parameter: yes
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    // modifiable-parameter: yes
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var Jup_b: dimensionless {init: 1.0};
    upScale = sel
      case celltype == 1{dimensionless}:
        1.3{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    Jupnp = upScale*0.005425{dimensionless}*cai/(cai+0.00092{millimolar});
    Jupp = upScale*2.75{dimensionless}*0.005425{dimensionless}*cai/(cai+0.00092{millimolar}-0.00017{millimolar});
    fJupp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    Jleak = 0.0048825{millimolar_per_millisecond}*cansr/15{millimolar};
    Jup = Jup_b*((1{dimensionless}-fJupp)*Jupnp+fJupp*Jupp-Jleak);
  enddef;

  def comp trans_flux as
    var cansr: millimolar {pub: in};
    var cajsr: millimolar {pub: in};
    var Jtr: millimolar_per_millisecond {pub: out};
    Jtr = (cansr-cajsr)/60{millisecond};
  enddef;
  def map between intracellular_ions and INaL for
    vars INaL and INaL;
  enddef;
  def map between intracellular_ions and membrane for
    vars Istim and Istim;
  enddef;
  def map between intracellular_ions and trans_flux for
    vars cajsr and cajsr;
    vars cansr and cansr;
    vars Jtr and Jtr;
  enddef;
  def map between intracellular_ions and SERCA for
    vars cai and cai;
    vars cansr and cansr;
    vars Jup and Jup;
  enddef;
  def map between SERCA and environment for
    vars celltype and celltype;
  enddef;
  def map between SERCA and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between intracellular_ions and ryr for
    vars cajsr and cajsr;
    vars Jrel and Jrel;
  enddef;
  def map between ICaL and ryr for
    vars ICaL_ss and ICaL_ss;
  enddef;
  def map between ryr and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between ryr and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between intracellular_ions and diff for
    vars cai and cai;
    vars cass and cass;
    vars nai and nai;
    vars nass and nass;
    vars ki and ki;
    vars kss and kss;
    vars JdiffK and JdiffK;
    vars Jdiff and Jdiff;
    vars JdiffNa and JdiffNa;
  enddef;
  def map between IpCa and membrane for
    vars IpCa and IpCa;
  enddef;
  def map between intracellular_ions and IpCa for
    vars cai and cai;
    vars IpCa and IpCa;
  enddef;
  def map between extracellular and ICab for
    vars cao and cao;
  enddef;
  def map between intracellular_ions and ICab for
    vars cai and cai;
    vars ICab and ICab;
  enddef;
  def map between ICab and membrane for
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars ICab and ICab;
  enddef;
  def map between ICaL and ICab for
    vars gamma_cao and gamma_cao;
    vars gamma_cai and gamma_cai;
  enddef;
  def map between extracellular and INab for
    vars nao and nao;
  enddef;
  def map between intracellular_ions and INab for
    vars nai and nai;
    vars INab and INab;
  enddef;
  def map between INab and membrane for
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars INab and INab;
  enddef;
  def map between IKb and membrane for
    vars v and v;
    vars IKb and IKb;
  enddef;
  def map between IKb and environment for
    vars celltype and celltype;
  enddef;
  def map between IKb and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between intracellular_ions and IKb for
    vars IKb and IKb;
  enddef;
  def map between intracellular_ions and INaK for
    vars ki and ki;
    vars nai and nai;
    vars INaK and INaK;
  enddef;
  def map between INaK and membrane for
    vars v and v;
    vars vfrt and vfrt;
    vars INaK and INaK;
  enddef;
  def map between INaK and environment for
    vars celltype and celltype;
  enddef;
  def map between INaK and physical_constants for
    vars zna and zna;
    vars zk and zk;
  enddef;
  def map between extracellular and INaK for
    vars nao and nao;
    vars ko and ko;
  enddef;
  def map between intracellular_ions and INaCa for
    vars cai and cai;
    vars nai and nai;
    vars nass and nass;
    vars cass and cass;
    vars INaCa_i and INaCa_i;
    vars INaCa_ss and INaCa_ss;
  enddef;
  def map between INaCa and membrane for
    vars v and v;
    vars vfrt and vfrt;
    vars INaCa_i and INaCa_i;
    vars INaCa_ss and INaCa_ss;
  enddef;
  def map between INaCa and environment for
    vars celltype and celltype;
  enddef;
  def map between INaCa and physical_constants for
    vars zna and zna;
    vars zca and zca;
  enddef;
  def map between extracellular and INaCa for
    vars nao and nao;
    vars cao and cao;
  enddef;
  def map between intracellular_ions and IKs for
    vars cai and cai;
    vars IKs and IKs;
  enddef;
  def map between IK1 and membrane for
    vars v and v;
    vars IK1 and IK1;
  enddef;
  def map between IK1 and environment for
    vars celltype and celltype;
  enddef;
  def map between IKs and membrane for
    vars v and v;
    vars IKs and IKs;
  enddef;
  def map between IKs and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between IK1 and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between IKs and reversal_potentials for
    vars EKs and EKs;
  enddef;
  def map between Ito and membrane for
    vars v and v;
    vars Ito and Ito;
  enddef;
  def map between INaL and membrane for
    vars v and v;
    vars INaL and INaL;
  enddef;
  def map between IKr and membrane for
    vars v and v;
    vars vfrt and vfrt;
    vars IKr and IKr;
  enddef;
  def map between IKr and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between INaL and reversal_potentials for
    vars ENa and ENa;
  enddef;
  def map between Ito and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between INaL and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between Ito and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between INaL and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between ICaL and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between ICaL and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between CaMK and environment for
    vars time and time;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between membrane and ICaL for
    vars v and v;
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars ICaL and ICaL;
    vars ICaNa and ICaNa;
    vars ICaK and ICaK;
  enddef;
  def map between membrane and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_ions and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between physical_constants and ICaL for
    vars T and T;
  enddef;
  def map between intracellular_ions and ICaL for
    vars cass and cass;
    vars nass and nass;
    vars kss and kss;
    vars cai and cai;
    vars nai and nai;
    vars ki and ki;
    vars cli and cli;
    vars ICaNa and ICaNa;
    vars ICaK and ICaK;
    vars ICaL and ICaL;
    vars ICaNa_ss and ICaNa_ss;
    vars ICaK_ss and ICaK_ss;
    vars ICaL_ss and ICaL_ss;
    vars ICaNa_i and ICaNa_i;
    vars ICaK_i and ICaK_i;
    vars ICaL_i and ICaL_i;
  enddef;
  def map between extracellular and ICaL for
    vars nao and nao;
    vars ko and ko;
    vars cao and cao;
    vars clo and clo;
  enddef;
  def map between extracellular and IK1 for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IK1 for
    vars IK1 and IK1;
  enddef;
  def map between extracellular and IKr for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IKr for
    vars IKr and IKr;
  enddef;
  def map between reversal_potentials and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zna and zna;
    vars zk and zk;
    vars zcl and zcl;
  enddef;
  def map between reversal_potentials and IKr for
    vars EK and EK;
  enddef;
  def map between reversal_potentials and INa for
    vars ENa and ENa;
  enddef;
  def map between intracellular_ions and INa for
    vars INa and INa;
  enddef;
  def map between intracellular_ions and Ito for
    vars Ito and Ito;
  enddef;
  def map between membrane and INa for
    vars v and v;
    vars INa and INa;
  enddef;
  def map between CaMK and INa for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between Ito and environment for
    vars time and time;
    vars celltype and celltype;
  enddef;
  def map between INa and environment for
    vars time and time;
  enddef;
  def map between intracellular_ions and CaMK for
    vars cass and cass;
  enddef;
  def map between intracellular_ions and cell_geometry for
    vars Acap and Acap;
    vars vmyo and vmyo;
    vars vss and vss;
    vars vnsr and vnsr;
    vars vjsr and vjsr;
  enddef;
  def map between intracellular_ions and environment for
    vars time and time;
    vars celltype and celltype;
  enddef;
  def map between intracellular_ions and reversal_potentials for
    vars nai and nai;
    vars ki and ki;
    vars cli and cli;
  enddef;
  def map between extracellular and reversal_potentials for
    vars nao and nao;
    vars ko and ko;
    vars clo and clo;
  enddef;
  def map between intracellular_ions and ICl for
    vars cai and cai;
    vars cass and cass;
  enddef;
  def map between membrane and ICl for
    vars v and v;
    vars IClCa and IClCa;
    vars IClb and IClb;
  enddef;
  def map between reversal_potentials and ICl for
    vars ECl and ECl;
  enddef;
  def map between I_katp and membrane for
    vars v and v;
    vars I_katp and I_katp;
  enddef;
  def map between reversal_potentials and I_katp for
    vars EK and EK;
  enddef;
  def map between extracellular and I_katp for
    vars ko and ko;
  enddef;
  def map between I_katp and intracellular_ions for
    vars I_katp and I_katp;
  enddef;
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#membrane_fast_sodium_current_h_gate">
  //         <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#membrane_fast_sodium_current_j_gate">
  //         <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#INaL_inactTvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#membrane_persistent_sodium_current_conductance">
  //         <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-		metadata#membrane_persistent_sodium_current_conductance" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#INaL_actTvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#Ito_actVvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#Ito_actSvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#Ito_actTvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#membrane_L_type_calcium_current_drivingforce">
  //         <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_drivingforce" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ICaL_actVvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ICaL_actSvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ICaL_actTvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ICaL_inactVvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ICaL_inactSvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ICaL_inactTVfvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  //
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ICaL_inactTVsvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ICaL_inactTCfvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ICaL_inactTCsvar">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#membrane_sodium_calcium_exchanger_current_i">
  //         <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_i" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
  //     </rdf:Description>
  // </rdf:RDF>
  //
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#membrane_sodium_calcium_exchanger_current_ss">
  //         <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_ss" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
  //     </rdf:Description>
  // </rdf:RDF>
  // <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  //     <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#membrane_sodium_potassium_pump_conductance">
  //         <modifiable-parameter xmlns="https://chaste.comlab.ox.ac.uk/cellml/ns/pycml#">yes</modifiable-parameter>
  //     </rdf:Description>
  // </rdf:RDF>
enddef;
