// This CellML file was generated on 28/07/2017 at 15:22:02 using:
//
// COR (0.9.31.1409)
// Copyright 2002-2017 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// reference: subject_type keyword; electrophysiology
def model varela_2016 as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond_per_millimolar as
    unit millisecond;
    unit millimolar {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_picoF as
    unit ampere {pref: pico};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit nanoS_per_picoF as
    unit siemens {pref: nano};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit micrometre_3 as
    unit metre {pref: micro, expo: 3};
  enddef;
  def unit per_micrometre_3 as
    unit metre {pref: micro, expo: -3};
  enddef;
  def unit mm2 as
    unit metre {pref: milli, expo: 2};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {pref: milli, expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {init: -85.53, pub: out};
    var R: joule_per_mole_kelvin {init: 8.3143, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_millimole {init: 96.4867, pub: out};
    var Cm: picoF {init: 100, pub: out};
    var i_st: picoA;
    var time: millisecond {pub: in};
    var i_Na: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_Kur: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_B_Cl: picoA {pub: in};
    var i_K_Ach: picoA {pub: in};
    var stim_start: millisecond {init: 50};
    var stim_end: millisecond {init: 50000};
    var stim_period: millisecond {init: 1000};
    var stim_duration: millisecond {init: 2};
    var stim_amplitude: picoA {init: -2000};
    i_st = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{picoA};
    endsel;
    ode(V, time) = -(i_Na+i_K1+i_to+i_Kur+i_Kr+i_Ks+i_B_Na+i_B_Ca+i_NaK+i_CaP+i_NaCa+i_Ca_L+i_st+i_B_Cl+i_K_Ach)/Cm;
  enddef;

  def comp fast_sodium_current as
    var i_Na: picoA {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: nanoS_per_picoF {init: 7.8};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = Cm*g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
    E_Na = R*T/F*ln(Na_o/Na_i);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 1.972e-3, pub: out};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var m_inf: dimensionless;
    var tau_m: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = sel
      case V == -47.13{millivolt}:
        3.2{per_millisecond};
      otherwise:
        0.32{per_millivolt_millisecond}*(V+47.13{millivolt})/(1{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    endsel;
    beta_m = 0.08{per_millisecond}*exp(-V/11{millivolt});
    m_inf = alpha_m/(alpha_m+beta_m);
    tau_m = 1{dimensionless}/(alpha_m+beta_m);
    ode(m, time) = (m_inf-m)/tau_m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 9.791e-1, pub: out};
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var h_inf: dimensionless;
    var tau_h: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case V < -40{millivolt}:
        0.135{per_millisecond}*exp((V+80{millivolt})/(-6.8{millivolt}));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        3.56{per_millisecond}*exp(0.079{per_millivolt}*V)+3.1e5{per_millisecond}*exp(0.35{per_millivolt}*V);
      otherwise:
        1{dimensionless}/(0.13{millisecond}*(1{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    h_inf = alpha_h/(alpha_h+beta_h);
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: dimensionless {init: 9.869e-1, pub: out};
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var j_inf: dimensionless;
    var tau_j: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = sel
      case V < -40{millivolt}:
        (-1.2714e5{per_millivolt_millisecond}*exp(0.2444{per_millivolt}*V)-3.474e-5{per_millivolt_millisecond}*exp(-0.04391{per_millivolt}*V))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt})));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        0.1212{per_millisecond}*exp(-0.01052{per_millivolt}*V)/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        0.3{per_millisecond}*exp(-2.535e-7{per_millivolt}*V)/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt})));
    endsel;
    j_inf = alpha_j/(alpha_j+beta_j);
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: picoA {pub: out};
    var E_K: millivolt {pub: out};
    var g_K1: nanoS_per_picoF {init: 0.036};
    var Cm: picoF {pub: in};
    var V: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var K_i: millimolar {pub: in};
    E_K = R*T/F*ln(K_o/K_i);
    i_K1 = Cm*g_K1*(V-E_K)/(0.66{dimensionless}+exp(0.078{per_millivolt}*(V-E_K-18{dimensionless})));
  enddef;

  def comp transient_outward_K_current as
    var i_to: picoA {pub: out};
    var g_to: nanoS_per_picoF {init: 0.07104};
    var Cm: picoF {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var oa: dimensionless {priv: in};
    var oi: dimensionless {priv: in};
    i_to = Cm*g_to*pow(oa, 3{dimensionless})*oi*(V-E_K);
  enddef;

  def comp transient_outward_K_current_oa_gate as
    var oa: dimensionless {init: 7.164e-2, pub: out};
    var tau_oa: millisecond;
    var oa_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    tau_oa = 0.4{millisecond}/exp((V-15{millivolt})/20{millivolt});
    oa_infinity = pow(1{dimensionless}+exp((V-12{millivolt})/(-11.5{millivolt})), -1{dimensionless}/3{dimensionless});
    ode(oa, time) = (oa_infinity-oa)/tau_oa;
  enddef;

  def comp transient_outward_K_current_oi_gate as
    var oi: dimensionless {init: 9.992e-1, pub: out};
    var alpha_oi: per_millisecond;
    var beta_oi: per_millisecond;
    var tau_oi: millisecond;
    var oi_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_oi = 1{per_millisecond}/(1.2{dimensionless}+exp((V+95.2{millivolt})/5.85{millivolt}));
    beta_oi = 1{per_millisecond}/(9.54{dimensionless}+exp((V-48{millivolt})/(-20{millivolt})));
    tau_oi = pow(alpha_oi+beta_oi, -1{dimensionless});
    oi_infinity = pow(1{dimensionless}+exp((V+31{millivolt})/6.45{millivolt}), -1{dimensionless});
    ode(oi, time) = (oi_infinity-oi)/tau_oi;
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current as
    var i_Kur: picoA {pub: out};
    var g_Kur: nanoS_per_picoF {init: 0.0115, pub: out};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var ua: dimensionless {priv: in};
    var ui: dimensionless {priv: in};
    i_Kur = Cm*g_Kur*(1{dimensionless}+3{dimensionless}/(1{dimensionless}+exp((V-14{millivolt})/(-6{millivolt}))))*pow(ua, 3{dimensionless})*ui*(V-E_K);
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current_ua_gate as
    var ua: dimensionless {init: 0.05869, pub: out};
    var alpha_ua: per_millisecond;
    var beta_ua: per_millisecond;
    var tau_ua: millisecond;
    var ua_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_ua = 1.47{per_millisecond}/(exp((V+33.2{millivolt})/(-30.63{millivolt}))+exp((V-27.6{millivolt})/(-30.65{millivolt})));
    beta_ua = 0.42{per_millisecond}/(exp((V+26.64{millivolt})/2.49{millivolt})+exp((V+44.41{millivolt})/20.36{millivolt}));
    tau_ua = pow(alpha_ua+beta_ua, -1{dimensionless});
    ua_infinity = pow(1{dimensionless}+exp((V+2.81{millivolt})/(-9.49{millivolt})), -1{dimensionless}/3{dimensionless});
    ode(ua, time) = (ua_infinity-ua)/tau_ua;
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current_ui_gate as
    var ui: dimensionless {init: 9.987e-1, pub: out};
    var alpha_ui: per_millisecond;
    var beta_ui: per_millisecond;
    var tau_ui: millisecond;
    var ui_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_ui = 1{per_millisecond}/(21{dimensionless}+exp((V-185{millivolt})/(-28{millivolt})));
    beta_ui = 1{per_millisecond}*exp((V-158{millivolt})/16{millivolt});
    tau_ui = pow(alpha_ui+beta_ui, -1{dimensionless});
    ui_infinity = pow(1{dimensionless}+exp((V-99.45{millivolt})/27.48{millivolt}), -1{dimensionless});
    ode(ui, time) = (ui_infinity-ui)/tau_ui;
  enddef;

  def comp rapid_delayed_rectifier_K_current as
    var i_Kr: picoA {pub: out};
    var g_Kr: nanoS_per_picoF {init: 0.022475};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var xr: dimensionless {priv: in};
    i_Kr = Cm*g_Kr*xr*(V-E_K)*(0.6{dimensionless}+1{dimensionless}/(0.5{dimensionless}+0.5{dimensionless}*exp((V+8{millivolt})/24.4{millivolt})));
  enddef;

  def comp rapid_delayed_rectifier_K_current_xr_gate as
    var xr: dimensionless {init: 7.433e-7, pub: out};
    var alpha_xr: per_millisecond;
    var beta_xr: per_millisecond;
    var tau_xr: millisecond;
    var xr_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_xr = 0.04{per_millivolt_millisecond}*(V-248{millivolt})/(1{dimensionless}-exp((V-248{millivolt})/(-28{millivolt})));
    beta_xr = 0.028{per_millivolt_millisecond}*(V+163{millivolt})/(exp((V+163{millivolt})/21{millivolt})-1{dimensionless});
    tau_xr = pow(alpha_xr+beta_xr, -1{dimensionless});
    xr_infinity = pow(1{dimensionless}+exp((V+7.654{millivolt})/(-5.377{millivolt})), -1{dimensionless});
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
  enddef;

  def comp slow_delayed_rectifier_K_current as
    var i_Ks: picoA {pub: out};
    var g_Ks: nanoS_per_picoF {init: 0.0832};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var xs: dimensionless {priv: in};
    i_Ks = Cm*g_Ks*sqr(xs)*(V-E_K);
  enddef;

  def comp slow_delayed_rectifier_K_current_xs_gate as
    var xs: dimensionless {init: 0.01791, pub: out};
    var alpha_xs: per_millisecond;
    var beta_xs: per_millisecond;
    var tau_xs: millisecond;
    var xs_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_xs = sel
      case abs(V+28.5{millivolt}) < 1e-10{millivolt}:
        0.00115{per_millisecond};
      otherwise:
        0.00001{per_millivolt_millisecond}*(V+28.5{millivolt})/(1{dimensionless}-exp((V+28.5{millivolt})/(-115{millivolt})));
    endsel;
    beta_xs = sel
      case abs(V+28.5{millivolt}) < 1e-10{millivolt}:
        0.000759{per_millisecond};
      otherwise:
        0.00023{per_millivolt_millisecond}*(V+28.5{millivolt})/(exp((V+28.5{millivolt})/3.3{millivolt})-1{dimensionless});
    endsel;
    tau_xs = pow(alpha_xs+beta_xs, -1{dimensionless});
    xs_infinity = pow(1{dimensionless}+exp((V-13{millivolt})/(-12{millivolt})), -0.5{dimensionless});
    ode(xs, time) = (xs_infinity-xs)/tau_xs;
  enddef;

  def comp i_K_Ach as
    var i_K_Ach: picoA {pub: out};
    var g_K_Ach: nanoS_per_picoF {init: 0.0065};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var xa: dimensionless {priv: in};
    i_K_Ach = Cm*g_K_Ach*xa*(V-E_K)/(0.1{dimensionless}+exp(0.078{dimensionless}*(V-E_K-65{millivolt})));
  enddef;

  def comp i_K_Ach_xa_gate as
    var xa: dimensionless {init: 1e-5, pub: out};
    var tau_xa: millisecond;
    var xa_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    tau_xa = 360{per_millisecond}+130{per_millisecond}*(1{dimensionless}-exp(-(V+130{millivolt})/50{millivolt}));
    xa_infinity = 1{dimensionless}/(1{dimensionless}+exp((-93{millivolt}-V)/(-15.2{millivolt})));
    ode(xa, time) = (xa_infinity-xa)/tau_xa;
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L: picoA {pub: out};
    var g_Ca_L: nanoS_per_picoF {init: 0.255};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ca_i: millimolar {pub: in, priv: out};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    i_Ca_L = Cm*g_Ca_L*d*f*f_Ca*(V-60{millivolt});
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {init: 4.757e-6, pub: out};
    var d_infinity: dimensionless;
    var tau_d: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    d_infinity = pow(1{dimensionless}+exp((-V-2{millivolt})/5{millivolt}), -1{dimensionless});
    tau_d = sel
      case abs(V+10{millivolt}) < 1e-10{millivolt}:
        0.763{millisecond};
      otherwise:
        (1{dimensionless}-exp((V+10{millivolt})/(-6.24{millivolt})))/(0.035{per_millivolt_millisecond}*(V+10{millivolt})*(1{dimensionless}+exp((V+10{millivolt})/(-6.24{millivolt}))));
    endsel;
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {init: 0.9999, pub: out};
    var f_infinity: dimensionless;
    var tau_f: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+34{millivolt})/6.3{millivolt}));
    tau_f = 400{millisecond}/(1{millisecond}+4.5{millisecond}*exp(-sqr((V-9{millivolt})*0.0265{per_millivolt})));
    ode(f, time) = (f_infinity-f)/tau_f;
  enddef;

  def comp L_type_Ca_channel_f_Ca_gate as
    var f_Ca: dimensionless {init: 0.7484, pub: out};
    var f_Ca_infinity: dimensionless;
    var tau_f_Ca: millisecond;
    var Ca_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    f_Ca_infinity = 0.29{dimensionless}+0.8{dimensionless}*pow(1{dimensionless}+(Ca_i-1.2e-4{millimolar})/6e-5{millimolar}, -1{dimensionless});
    tau_f_Ca = 2{millisecond};
    ode(f_Ca, time) = (f_Ca_infinity-f_Ca)/tau_f_Ca;
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: picoA {pub: out};
    var Km_Na_i: millimolar {init: 10};
    var Km_K_o: millimolar {init: 1.5};
    var i_NaK_max: picoA_per_picoF {init: 0.6};
    var Cm: picoF {pub: in};
    var f_NaK: dimensionless;
    var sigma: dimensionless;
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Na_o/67.3{millimolar})-1{dimensionless});
    f_NaK = pow(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*F*V/(R*T))+0.0365{dimensionless}*sigma*exp(-F*V/(R*T)), -1{dimensionless});
    i_NaK = Cm*i_NaK_max*f_NaK/(1{dimensionless}+pow(Km_Na_i/Na_i, 1.5{dimensionless}))*K_o/(K_o+Km_K_o);
  enddef;

  def comp background_currents as
    var i_B_Na: picoA {pub: out};
    var i_B_Ca: picoA {pub: out};
    var i_B_Cl: picoA {pub: out};
    var g_B_Na: nanoS_per_picoF {init: 1e-5};
    var g_B_Ca: nanoS_per_picoF {init: 1e-5};
    var g_B_Cl: nanoS_per_picoF {init: 0.0055};
    var Cm: picoF {pub: in};
    var E_K: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var V: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Cl_i: millimolar {pub: in};
    var Cl_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    i_B_Na = Cm*g_B_Na*(V-E_Na);
    i_B_Ca = Cm*g_B_Ca*(V-R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i));
    i_B_Cl = Cm*g_B_Cl*(V-R*T/F*ln(Cl_i/Cl_o));
  enddef;

  def comp Na_Ca_exchanger_current as
    var i_NaCa: picoA {pub: out};
    var I_NaCa_max: picoA_per_picoF {init: 1600};
    var Cm: picoF {pub: in};
    var K_mNa: millimolar {init: 87.5};
    var K_mCa: millimolar {init: 1.38};
    var K_sat: dimensionless {init: 0.1};
    var gamma: dimensionless {init: 0.35};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    i_NaCa = Cm*I_NaCa_max*(exp(gamma*F*V/(R*T))*pow(Na_i, 3{dimensionless})*Ca_o-exp((gamma-1{dimensionless})*F*V/(R*T))*pow(Na_o, 3{dimensionless})*Ca_i)/((pow(K_mNa, 3{dimensionless})+pow(Na_o, 3{dimensionless}))*(K_mCa+Ca_o)*(1{dimensionless}+K_sat*exp((gamma-1{dimensionless})*V*F/(R*T))));
  enddef;

  def comp sarcolemmal_calcium_pump_current as
    var i_CaP: picoA {pub: out};
    var i_CaP_max: picoA_per_picoF {init: 0.275};
    var Cm: picoF {pub: in};
    var Ca_i: millimolar {pub: in};
    i_CaP = Cm*i_CaP_max*Ca_i/(0.0005{millimolar}+Ca_i);
  enddef;

  def comp Ca_release_current_from_JSR as
    var i_rel: millimolar_per_millisecond {pub: out};
    var Fn: dimensionless {priv: out};
    var K_rel: per_millisecond {init: 8};
    var V_rel: micrometre_3 {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ca_i: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var u: dimensionless {priv: in};
    var v: dimensionless {priv: in};
    var w: dimensionless {priv: in};
    Fn = 1e3{millisecond_per_millimolar}*(1e-15{per_micrometre_3}*V_rel*i_rel-1e-15{per_micrometre_3}/(2{dimensionless}*F)*(0.5{dimensionless}*i_Ca_L-0.2{dimensionless}*i_NaCa));
    i_rel = K_rel*sqr(u)*v*w*(Ca_rel-Ca_i);
  enddef;

  def comp Ca_release_current_from_JSR_u_gate as
    var u: dimensionless {init: 0, pub: out};
    var tau_u: millisecond;
    var u_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Fn: dimensionless {pub: in};
    tau_u = 11.2{millisecond};
    u_infinity = pow(1{dimensionless}+exp(-(Fn-3.4175e-13{dimensionless})/13.67e-16{dimensionless}), -1{dimensionless});
    ode(u, time) = (u_infinity-u)/tau_u;
  enddef;

  def comp Ca_release_current_from_JSR_v_gate as
    var v: dimensionless {init: 1, pub: out};
    var tau_v: millisecond;
    var v_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Fn: dimensionless {pub: in};
    tau_v = 1.91{millisecond}+2.09{millisecond}*pow(1{dimensionless}+exp(-(Fn-3.4175e-13{dimensionless})/13.67e-16{dimensionless}), -1{dimensionless});
    v_infinity = 1{dimensionless}-pow(1{dimensionless}+exp(-(Fn-6.835e-14{dimensionless})/13.67e-16{dimensionless}), -1{dimensionless});
    ode(v, time) = (v_infinity-v)/tau_v;
  enddef;

  def comp Ca_release_current_from_JSR_w_gate as
    var w: dimensionless {init: 0.9993, pub: out};
    var tau_w: millisecond;
    var w_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    tau_w = sel
      case abs(V-7.9{millivolt}) < 1e-10{millivolt}:
        6{millisecond}*0.2{dimensionless}/1.3{dimensionless};
      otherwise:
        6{millisecond}*(1{dimensionless}-exp(-(V-7.9{millivolt})/5{millivolt}))/((1{dimensionless}+0.3{dimensionless}*exp(-(V-7.9{millivolt})/5{millivolt}))*1{per_millivolt}*(V-7.9{millivolt}));
    endsel;
    w_infinity = 1{dimensionless}-pow(1{dimensionless}+exp(-(V-40{millivolt})/17{millivolt}), -1{dimensionless});
    ode(w, time) = (w_infinity-w)/tau_w;
  enddef;

  def comp transfer_current_from_NSR_to_JSR as
    var i_tr: millimolar_per_millisecond {pub: out};
    var tau_tr: millisecond {init: 180};
    var time: millisecond {pub: in};
    var Ca_rel: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    i_tr = (Ca_up-Ca_rel)/tau_tr;
  enddef;

  def comp Ca_uptake_current_by_the_NSR as
    var I_up_max: millimolar_per_millisecond {init: 0.0035, pub: out};
    var i_up: millimolar_per_millisecond {pub: out};
    var K_up: millimolar {init: 6e-4};
    var time: millisecond {pub: in};
    var Ca_i: millimolar {pub: in};
    i_up = I_up_max/(1{dimensionless}+K_up/Ca_i);
  enddef;

  def comp Ca_leak_current_by_the_NSR as
    var i_up_leak: millimolar_per_millisecond {pub: out};
    var Ca_up_max: millimolar {init: 27};
    var time: millisecond {pub: in};
    var Ca_up: millimolar {pub: in};
    var I_up_max: millimolar_per_millisecond {pub: in};
    i_up_leak = I_up_max*Ca_up/Ca_up_max;
  enddef;

  def comp Ca_buffers as
    var CMDN_max: millimolar {init: 0.045, pub: out};
    var TRPN_max: millimolar {init: 0.35, pub: out};
    var CSQN_max: millimolar {init: 10, pub: out};
    var Ca_CMDN: millimolar {init: 1.856e-3, pub: out};
    var Ca_TRPN: millimolar {init: 7.022e-3, pub: out};
    var Ca_CSQN: millimolar {init: 6.432, pub: out};
    var var_CMDN: millimolar {pub: out};
    var var_TRPN: millimolar {pub: out};
    var var_CSQN: millimolar {pub: out};
    var time: millisecond {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    var_CMDN = 200{dimensionless}*Ca_i*(1{dimensionless}-Ca_CMDN/CMDN_max)-0.476{dimensionless}*Ca_CMDN/CMDN_max;
    var_TRPN = 78.4{dimensionless}*Ca_i*(1{dimensionless}-Ca_TRPN/TRPN_max)-0.392{dimensionless}*Ca_TRPN/TRPN_max;
    var_CSQN = 0.48{dimensionless}*Ca_rel*(1{dimensionless}-Ca_CSQN/CSQN_max)-0.4{dimensionless}*Ca_CSQN/CSQN_max;
    ode(Ca_CMDN, time) = var_CMDN*CMDN_max;
    ode(Ca_TRPN, time) = var_TRPN*TRPN_max;
    ode(Ca_CSQN, time) = var_CSQN*CSQN_max;
  enddef;

  def comp intracellular_ion_concentrations as
    var Na_i: millimolar {init: 11.75, pub: out};
    var Ca_i: millimolar {init: 1.024e-4, pub: out};
    var Cl_i: millimolar {init: 29.26, pub: out};
    var K_i: millimolar {init: 138.4, pub: out};
    var Ca_rel: millimolar {init: 1.502, pub: out};
    var Ca_up: millimolar {init: 1.502, pub: out};
    var V_cell: micrometre_3 {init: 20100};
    var V_i: micrometre_3;
    var V_rel: micrometre_3 {pub: out};
    var V_up: micrometre_3;
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_NaK: picoA {pub: in};
    var i_K_Ach: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_Na: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_Kur: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_B_Cl: picoA {pub: in};
    var i_up: millimolar_per_millisecond {pub: in};
    var i_up_leak: millimolar_per_millisecond {pub: in};
    var i_tr: millimolar_per_millisecond {pub: in};
    var i_rel: millimolar_per_millisecond {pub: in};
    var CMDN_max: millimolar {pub: in};
    var TRPN_max: millimolar {pub: in};
    var var_CMDN: millimolar {pub: in};
    var var_TRPN: millimolar {pub: in};
    var var_CSQN: millimolar {pub: in};
    V_i = V_cell*0.68{dimensionless};
    V_rel = 0.0048{dimensionless}*V_cell;
    V_up = 0.0552{dimensionless}*V_cell;
    ode(Na_i, time) = (-3{dimensionless}*i_NaK-(3{dimensionless}*i_NaCa+i_B_Na+i_Na))/(V_i*F);
    ode(K_i, time) = (2{dimensionless}*i_NaK-(i_K1+i_to+i_Kur+i_Kr+i_Ks+i_K_Ach))/(V_i*F);
    ode(Cl_i, time) = i_B_Cl/(V_i*F);
    ode(Ca_i, time) = (2{dimensionless}*i_NaCa-(i_CaP+i_Ca_L+i_B_Ca))/(2{dimensionless}*V_i*F)+(V_up*(i_up_leak-i_up)+i_rel*V_rel)/V_i-TRPN_max*var_TRPN-CMDN_max*var_CMDN;
    ode(Ca_up, time) = i_up-(i_up_leak+i_tr*V_rel/V_up);
    ode(Ca_rel, time) = i_tr-i_rel-31{dimensionless}*var_CSQN;
  enddef;

  def comp standard_ionic_concentrations as
    var Na_o: millimolar {init: 140, pub: out};
    var Ca_o: millimolar {init: 1.8, pub: out};
    var K_o: millimolar {init: 5.4, pub: out};
    var Cl_o: millimolar {init: 132, pub: out};
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp time_independent_potassium_current;
      comp transient_outward_K_current incl
        comp transient_outward_K_current_oa_gate;
        comp transient_outward_K_current_oi_gate;
      endcomp;
      comp ultrarapid_delayed_rectifier_K_current incl
        comp ultrarapid_delayed_rectifier_K_current_ua_gate;
        comp ultrarapid_delayed_rectifier_K_current_ui_gate;
      endcomp;
      comp rapid_delayed_rectifier_K_current incl
        comp rapid_delayed_rectifier_K_current_xr_gate;
      endcomp;
      comp slow_delayed_rectifier_K_current incl
        comp slow_delayed_rectifier_K_current_xs_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
        comp L_type_Ca_channel_f_Ca_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp background_currents;
      comp Na_Ca_exchanger_current;
      comp sarcolemmal_calcium_pump_current;
      comp i_K_Ach incl
        comp i_K_Ach_xa_gate;
      endcomp;
      comp Ca_release_current_from_JSR incl
        comp Ca_release_current_from_JSR_u_gate;
        comp Ca_release_current_from_JSR_v_gate;
        comp Ca_release_current_from_JSR_w_gate;
      endcomp;
      comp transfer_current_from_NSR_to_JSR;
      comp Ca_uptake_current_by_the_NSR;
      comp Ca_leak_current_by_the_NSR;
      comp Ca_buffers;
      comp intracellular_ion_concentrations;
      comp standard_ionic_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp transient_outward_K_current incl
      comp transient_outward_K_current_oa_gate;
      comp transient_outward_K_current_oi_gate;
    endcomp;
    comp ultrarapid_delayed_rectifier_K_current incl
      comp ultrarapid_delayed_rectifier_K_current_ua_gate;
      comp ultrarapid_delayed_rectifier_K_current_ui_gate;
    endcomp;
    comp rapid_delayed_rectifier_K_current incl
      comp rapid_delayed_rectifier_K_current_xr_gate;
    endcomp;
    comp i_K_Ach incl
      comp i_K_Ach_xa_gate;
    endcomp;
    comp slow_delayed_rectifier_K_current incl
      comp slow_delayed_rectifier_K_current_xs_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f_Ca_gate;
    endcomp;
    comp Ca_release_current_from_JSR incl
      comp Ca_release_current_from_JSR_u_gate;
      comp Ca_release_current_from_JSR_v_gate;
      comp Ca_release_current_from_JSR_w_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between i_K_Ach and environment for
    vars time and time;
  enddef;
  def map between Ca_release_current_from_JSR and environment for
    vars time and time;
  enddef;
  def map between transfer_current_from_NSR_to_JSR and environment for
    vars time and time;
  enddef;
  def map between Ca_uptake_current_by_the_NSR and environment for
    vars time and time;
  enddef;
  def map between Ca_leak_current_by_the_NSR and environment for
    vars time and time;
  enddef;
  def map between Ca_buffers and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between membrane and transient_outward_K_current for
    vars V and V;
    vars i_to and i_to;
    vars Cm and Cm;
  enddef;
  def map between membrane and ultrarapid_delayed_rectifier_K_current for
    vars V and V;
    vars i_Kur and i_Kur;
    vars Cm and Cm;
  enddef;
  def map between membrane and i_K_Ach for
    vars V and V;
    vars i_K_Ach and i_K_Ach;
    vars Cm and Cm;
  enddef;
  def map between membrane and rapid_delayed_rectifier_K_current for
    vars V and V;
    vars i_Kr and i_Kr;
    vars Cm and Cm;
  enddef;
  def map between membrane and slow_delayed_rectifier_K_current for
    vars V and V;
    vars i_Ks and i_Ks;
    vars Cm and Cm;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars Cm and Cm;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between membrane and background_currents for
    vars V and V;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
    vars i_B_Cl and i_B_Cl;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between membrane and Na_Ca_exchanger_current for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump_current for
    vars i_CaP and i_CaP;
    vars Cm and Cm;
  enddef;
  def map between Ca_release_current_from_JSR and membrane for
    vars V and V;
    vars F and F;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars F and F;
  enddef;
  def map between fast_sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
    vars Na_i and Na_i;
  enddef;
  def map between fast_sodium_current and standard_ionic_concentrations for
    vars Na_o and Na_o;
  enddef;
  def map between fast_sodium_current and background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between time_independent_potassium_current and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
    vars K_i and K_i;
  enddef;
  def map between time_independent_potassium_current and standard_ionic_concentrations for
    vars K_o and K_o;
  enddef;
  def map between time_independent_potassium_current and transient_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and i_K_Ach for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and background_currents for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and ultrarapid_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and rapid_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and slow_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Kur and i_Kur;
  enddef;
  def map between rapid_delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Kr and i_Kr;
  enddef;
  def map between slow_delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Ks and i_Ks;
  enddef;
  def map between i_K_Ach and intracellular_ion_concentrations for
    vars i_K_Ach and i_K_Ach;
  enddef;
  def map between intracellular_ion_concentrations and transient_outward_K_current for
    vars i_to and i_to;
  enddef;
  def map between L_type_Ca_channel and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between L_type_Ca_channel and Ca_release_current_from_JSR for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between sodium_potassium_pump and standard_ionic_concentrations for
    vars Na_o and Na_o;
    vars K_o and K_o;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Cl_i and Cl_i;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
    vars i_B_Cl and i_B_Cl;
  enddef;
  def map between background_currents and standard_ionic_concentrations for
    vars Cl_o and Cl_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between Na_Ca_exchanger_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger_current and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between Na_Ca_exchanger_current and Ca_release_current_from_JSR for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between sarcolemmal_calcium_pump_current and intracellular_ion_concentrations for
    vars i_CaP and i_CaP;
    vars Ca_i and Ca_i;
  enddef;
  def map between intracellular_ion_concentrations and Ca_release_current_from_JSR for
    vars i_rel and i_rel;
    vars Ca_i and Ca_i;
    vars Ca_rel and Ca_rel;
    vars V_rel and V_rel;
  enddef;
  def map between intracellular_ion_concentrations and transfer_current_from_NSR_to_JSR for
    vars i_tr and i_tr;
    vars Ca_up and Ca_up;
    vars Ca_rel and Ca_rel;
  enddef;
  def map between intracellular_ion_concentrations and Ca_uptake_current_by_the_NSR for
    vars i_up and i_up;
    vars Ca_i and Ca_i;
  enddef;
  def map between Ca_leak_current_by_the_NSR and Ca_uptake_current_by_the_NSR for
    vars I_up_max and I_up_max;
  enddef;
  def map between Ca_leak_current_by_the_NSR and intracellular_ion_concentrations for
    vars i_up_leak and i_up_leak;
    vars Ca_up and Ca_up;
  enddef;
  def map between Ca_buffers and intracellular_ion_concentrations for
    vars CMDN_max and CMDN_max;
    vars TRPN_max and TRPN_max;
    vars var_CMDN and var_CMDN;
    vars var_TRPN and var_TRPN;
    vars var_CSQN and var_CSQN;
    vars Ca_i and Ca_i;
    vars Ca_rel and Ca_rel;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars V and V;
    vars Ca_i and Ca_i;
  enddef;
  def map between transient_outward_K_current and transient_outward_K_current_oa_gate for
    vars oa and oa;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_K_current and transient_outward_K_current_oi_gate for
    vars oi and oi;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_K_Ach and i_K_Ach_xa_gate for
    vars time and time;
    vars V and V;
    vars xa and xa;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and ultrarapid_delayed_rectifier_K_current_ua_gate for
    vars ua and ua;
    vars time and time;
    vars V and V;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and ultrarapid_delayed_rectifier_K_current_ui_gate for
    vars ui and ui;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifier_K_current and rapid_delayed_rectifier_K_current_xr_gate for
    vars xr and xr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_K_current and slow_delayed_rectifier_K_current_xs_gate for
    vars xs and xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_u_gate for
    vars u and u;
    vars time and time;
    vars V and V;
    vars Fn and Fn;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_v_gate for
    vars v and v;
    vars time and time;
    vars V and V;
    vars Fn and Fn;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_w_gate for
    vars w and w;
    vars time and time;
    vars V and V;
  enddef;
enddef;
