def model Feto_maternal_O2_transfer as
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit ml as
    unit liter {pref: milli};
  enddef;
  def unit ml_per_min as
    unit ml;
    unit second {expo: -1, mult: 60};
  enddef;
  def unit ml_per_ml as
    unit ml;
    unit ml {expo: -1};
  enddef;
  def unit ml_per_ml_min_mmHg as
    unit ml;
    unit ml {expo: -1};
    unit second {expo: -1, mult: 60};
    unit mmHg {expo: -1};
  enddef;

  def comp gas_exchange as
    var k1_m: dimensionless {init: 1.4452};
    var k1_81m: dimensionless {init: 1.4452};
    var k2_m: dimensionless {init: 0.456};
    var k3_m: dimensionless {init: 0.3711};
    var K3_81m: dimensionless {init: 0.3711};
    var k4_m: dimensionless {init: 7.8322e+03};
    var pH_m: dimensionless {init: 7.4};
    var k1_f: dimensionless {init: 1.302};
    var k2_f: dimensionless {init: 0.464};
    var k3_f: dimensionless {init: 0.395};
    var k4_f: dimensionless {init: 2.2643e+03};
    var pH_f: dimensionless {init: 7.35};
    var Pin_m: mmHg {init: 33};
    var Pin_f: mmHg {init: 15};
    var x_m: dimensionless;
    var x_m1: dimensionless;
    var x_f: dimensionless;
    var x_f1: dimensionless;
    var S_m: dimensionless;
    var S_f: dimensionless;
    var t: second {init: 0};
    var O2_m: ml_per_ml;
    var O2_f: ml_per_ml;
    var Hb_m: dimensionless {init: 12.5};
    var Hb_f: dimensionless {init: 15.5};
    var a: dimensionless {init: 3.0263e-05};
    var ks_m: dimensionless {init: 164};
    var ks_f: dimensionless {init: 164};
    var kh: dimensionless {init: 164};
    var B: dimensionless {init: 1};
    var V_m: ml {init: 4.89e-7};
    var V_f: ml {init: 4.89e-7};
    var Q_m: ml_per_min {init: 1.2014e-04};
    var Q_f: ml_per_min {init: 1.2014e-04};
    var Dm: ml_per_ml_min_mmHg {init: 6.21};
    var c1: dimensionless {init: 3.287};
    var c2: dimensionless {init: 0.1117};
    var c3: dimensionless {init: 7.05e-3};
    var c4: dimensionless {init: 0.8142};
    var theta_m: dimensionless;
    var theta_f: dimensionless;
    var x1_m: dimensionless;
    var x1_f: dimensionless;
    var R_m: dimensionless;
    var R_f: dimensionless;
    var R_p: dimensionless;
    var R_t: dimensionless;
    var Dp: dimensionless;
    var dodt_m: dimensionless;
    var dodt_f: dimensionless;
    var O2_mnew: ml_per_ml;
    var O2_fnew: ml_per_ml;
    var f_m: dimensionless;
    var f_f: dimensionless;
    var upper_m: dimensionless;
    var lower_m: dimensionless;
    var upper_f: dimensionless;
    var lower_f: dimensionless;
    var dfdP_f: dimensionless;
    var dfdP_m: dimensionless;
    var tt: second;
    var dt: second;
    var Pend1_m: mmHg;
    var Pend1_f: mmHg;
    var theta_96_m: dimensionless;
    var theta_96_f: dimensionless;
    var x_m_sec: dimensionless;
    var x_m1_sec: dimensionless;
    var S_m_sec: dimensionless;
    var x_f_sec: dimensionless;
    var x_f1_sec: dimensionless;
    var S_f_sec: dimensionless;
    var theta_96_m_sec: dimensionless;
    var theta_96_f_sec: dimensionless;
    var x1_m_sec: dimensionless;
    var theta_m_sec: dimensionless;
    var x1_f_sec: dimensionless;
    var theta_f_sec: dimensionless;
    var R_m_sec: dimensionless;
    var R_f_sec: dimensionless;
    var R_p_sec: dimensionless;
    var R_t_sec: dimensionless;
    var Dp_sec: dimensionless;
    var dodt_m_sec: dimensionless;
    var dodt_f_sec: dimensionless;
    var O2_mnew_sec: ml_per_ml;
    var O2_fnew_sec: ml_per_ml;
    var f_m_sec: dimensionless;
    var f_f_sec: dimensionless;
    var upper_m_sec: dimensionless;
    var lower_m_sec: dimensionless;
    var dfdP_m_sec: dimensionless;
    var upper_f_sec: dimensionless;
    var lower_f_sec: dimensionless;
    var dfdP_f_sec: dimensionless;
    var Pend2_m: mmHg;
    var Pend2_f: mmHg;
    var x_m_trd: dimensionless;
    var x_m1_trd: dimensionless;
    var S_m_trd: dimensionless;
    var x_f_trd: dimensionless;
    var x_f1_trd: dimensionless;
    var S_f_trd: dimensionless;
    var theta_96_m_trd: dimensionless;
    var theta_96_f_trd: dimensionless;
    var x1_m_trd: dimensionless;
    var theta_m_trd: dimensionless;
    var x1_f_trd: dimensionless;
    var theta_f_trd: dimensionless;
    var R_m_trd: dimensionless;
    var R_f_trd: dimensionless;
    var R_p_trd: dimensionless;
    var R_t_trd: dimensionless;
    var Dp_trd: dimensionless;
    var dodt_m_trd: dimensionless;
    var dodt_f_trd: dimensionless;
    var O2_mnew_trd: ml_per_ml;
    var O2_fnew_trd: ml_per_ml;
    var f_m_trd: dimensionless;
    var f_f_trd: dimensionless;
    var upper_m_trd: dimensionless;
    var lower_m_trd: dimensionless;
    var dfdP_m_trd: dimensionless;
    var upper_f_trd: dimensionless;
    var lower_f_trd: dimensionless;
    var dfdP_f_trd: dimensionless;
    var Pend3_m: mmHg;
    var Pend3_f: mmHg;
    var x_m_for: dimensionless;
    var x_m1_for: dimensionless;
    var S_m_for: dimensionless;
    var x_f_for: dimensionless;
    var x_f1_for: dimensionless;
    var S_f_for: dimensionless;
    var theta_96_m_for: dimensionless;
    var theta_96_f_for: dimensionless;
    var x1_m_for: dimensionless;
    var theta_m_for: dimensionless;
    var x1_f_for: dimensionless;
    var theta_f_for: dimensionless;
    var R_m_for: dimensionless;
    var R_f_for: dimensionless;
    var R_p_for: dimensionless;
    var R_t_for: dimensionless;
    var Dp_for: dimensionless;
    var dodt_m_for: dimensionless;
    var dodt_f_for: dimensionless;
    var O2_mnew_final: ml_per_ml;
    var O2_fnew_final: ml_per_ml;
    var f_m_final: dimensionless;
    var f_f_final: dimensionless;
    var upper_m_final: dimensionless;
    var lower_m_final: dimensionless;
    var dfdP_m_final: dimensionless;
    var upper_f_final: dimensionless;
    var lower_f_final: dimensionless;
    var dfdP_f_final: dimensionless;
    var Pfinal_m: mmHg;
    var Pfinal_f: mmHg;
    x_m = (log(Pin_m)-k1_m+k2_m*(pH_m-7.4{dimensionless}))/k3_m;
    x_m1 = pow(10{dimensionless}, x_m);
    S_m = 100{dimensionless}*x_m1/(1{dimensionless}+x_m1);
    x_f = (log(Pin_f)-k1_f+k2_f*(pH_f-7.4{dimensionless}))/k3_f;
    x_f1 = pow(10{dimensionless}, x_f);
    S_f = 100{dimensionless}*x_f1/(1{dimensionless}+x_f1);
    O2_m = 1.34{dimensionless}*Hb_m/100{dimensionless}/(k4_m*pow(Pin_m, -1{dimensionless}/k3_m)+1{dimensionless})+a*Pin_m;
    O2_f = 1.34{dimensionless}*Hb_f/100{dimensionless}/(k4_f*pow(Pin_f, -1{dimensionless}/k3_f)+1{dimensionless})+a*Pin_f;
    x1_m = sel
      case S_m > 96{dimensionless}:
        exp(-1{dimensionless}*c2*(100{dimensionless}-96{dimensionless}));
      otherwise:
        exp(-1{dimensionless}*c2*(100{dimensionless}-S_m));
    endsel;
    theta_96_m = (c1*(1{dimensionless}-x1_m)+c3*S_m-c4)*1.34{dimensionless}/100{dimensionless}*Hb_m/0.2{dimensionless}*ks_m/kh;
    theta_m = sel
      case S_m > 96{dimensionless}:
        theta_96_m-theta_96_m*(96{dimensionless}-S_m)/(-4{dimensionless});
      otherwise:
        (c1*(1{dimensionless}-x1_m)+c3*S_m-c4)*1.34{dimensionless}/100{dimensionless}*Hb_m/0.2{dimensiionless}*ks_m/kh;
    endsel;
    x1_f = sel
      case S_f > 96{dimensionless}:
        exp(-1{dimensionless}*c2*(100{dimensionless}-96{dimensionless}));
      otherwise:
        exp(-1{dimensionless}*c2*(100{dimensionless}-S_f));
    endsel;
    theta_96_f = (c1*(1{dimensionless}-x1_f)+c3*S_f-c4)*1.34{dimensionless}/100{dimensionless}*Hb_f/0.2{dimensionless}*ks_f/kh;
    theta_f = sel
      case S_f > 96{dimensionless}:
        theta_96_f-theta_96_f*(96{dimensionless}-S_f)/(-4{dimensionless});
      otherwise:
        (c1*(1{dimensionless}-x1_f)+c3*S_f-c4)*1.34{dimensionless}/100{dimensionless}*Hb_f/0.2{dimensiionless}*ks_f/kh;
    endsel;
    R_m = 1{dimensionless}/(theta_m*V_m);
    R_f = 1{dimensionless}/(theta_f*V_f);
    R_p = 1{dimensionless}/Dm;
    R_t = R_m+R_f+R_p;
    Dp = 1{dimensionless}/R_t/60{dimensionless};
    dodt_m = B*(-1{dimensionless})*Dp*(Pin_m-Pin_f)/V_m;
    dodt_f = -1{dimensionless}/B*V_m/V_f*dodt_m;
    tt = V_f/(Q_f/60{dimensionless});
    dt = tt/100{dimenstionless};
    O2_mnew = O2_m+dodt_m*dt/2{dimensionless};
    O2_fnew = O2_f+dodt_f*dt/2{dimensionlsee};
    f_m = 1.34{dimensionless}*Hb_m/100{dimensionless}/(k4_m*pow(Pin_m, -1{dimensionless}/k3_m)+1{dimensionless})+a*Pin_m-O2_mnew;
    f_f = 1.34{dimensionless}*Hb_f/100{dimensionless}/(k4_f*pow(Pin_f, -1{dimensionless}/k3_f)+1{dimensionless})+a*Pin_f-O2_fnew;
    upper_m = 1.34{dimensionless}*Hb_m*k4_m*pow(Pin_m, -1{dimensionless}/k3_m-1{dimensionless});
    lower_m = 100{dimensionless}*k3_m*sqr(k4_m*pow(Pin_m, -1{dimensionless}/k3_m)+1{dimensionless});
    dfdP_m = upper_m/lower_m+a;
    upper_f = 1.34{dimensionless}*Hb_f*k4_f*pow(Pin_f, -1{dimensionless}/k3_f-1{dimensionless});
    lower_f = 100{dimensionless}*k3_f*sqr(k4_f*pow(Pin_f, -1{dimensionless}/k3_f)+1{dimensionless});
    dfdP_f = upper_f/lower_f+a;
    Pend1_m = Pin_m-f_m/dfdP_m;
    Pend1_f = Pin_f-f_f/dfdP_f;
    x_m_sec = (log(Pend1_m)-k1_m+k2_m*(pH_m-7.4{dimensionless}))/k3_m;
    x_m1_sec = pow(10{dimensionless}, x_m_sec);
    S_m_sec = 100{dimensionless}*x_m1_sec/(1{dimensionless}+x_m1_sec);
    x_f_sec = (log(Pend1_f)-k1_f+k2_f*(pH_f-7.4{dimensionless}))/k3_f;
    x_f1_sec = pow(10{dimensionless}, x_f_sec);
    S_f_sec = 100{dimensionless}*x_f1_sec/(1{dimensionless}+x_f1_sec);
    x1_m_sec = sel
      case S_m_sec > 96{dimensionless}:
        exp(-1{dimensionless}*c2*(100{dimensionless}-96{dimensionless}));
      otherwise:
        exp(-1{dimensionless}*c2*(100{dimensionless}-S_m_sec));
    endsel;
    theta_96_m_sec = (c1*(1{dimensionless}-x1_m_sec)+c3*S_m_sec-c4)*1.34{dimensionless}/100{dimensionless}*Hb_m/0.2{dimensionless}*ks_m/kh;
    theta_m_sec = sel
      case S_m_sec > 96{dimensionless}:
        theta_96_m_sec-theta_96_m_sec*(96{dimensionless}-S_m_sec)/(-4{dimensionless});
      otherwise:
        (c1*(1{dimensionless}-x1_m_sec)+c3*S_m_sec-c4)*1.34{dimensionless}/100{dimensionless}*Hb_m/0.2{dimensiionless}*ks_m/kh;
    endsel;
    x1_f_sec = sel
      case S_f_sec > 96{dimensionless}:
        exp(-1{dimensionless}*c2*(100{dimensionless}-96{dimensionless}));
      otherwise:
        exp(-1{dimensionless}*c2*(100{dimensionless}-S_f_sec));
    endsel;
    theta_96_f_sec = (c1*(1{dimensionless}-x1_f_sec)+c3*S_f_sec-c4)*1.34{dimensionless}/100{dimensionless}*Hb_f/0.2{dimensionless}*ks_f/kh;
    theta_f_sec = sel
      case S_f_sec > 96{dimensionless}:
        theta_96_f_sec-theta_96_f_sec*(96{dimensionless}-S_f_sec)/(-4{dimensionless});
      otherwise:
        (c1*(1{dimensionless}-x1_f_sec)+c3*S_f_sec-c4)*1.34{dimensionless}/100{dimensionless}*Hb_f/0.2{dimensiionless}*ks_f/kh;
    endsel;
    R_m_sec = 1{dimensionless}/(theta_m_sec*V_m);
    R_f_sec = 1{dimensionless}/(theta_f_sec*V_f);
    R_p_sec = 1{dimensionless}/Dm;
    R_t_sec = R_m_sec+R_f_sec+R_p_sec;
    Dp_sec = 1{dimensionless}/R_t_sec/60{dimensionless};
    dodt_m_sec = B*(-1{dimensionless})*Dp_sec*(Pend1_m-Pend1_f)/V_m;
    dodt_f_sec = -1{dimensionless}/B*V_m/V_f*dodt_m_sec;
    O2_mnew_sec = O2_m+dodt_m_sec*dt/2{dimensionless};
    O2_fnew_sec = O2_f+dodt_f_sec*dt/2{dimensionless};
    f_m_sec = 1.34{dimensionless}*Hb_m/100{dimensionless}/(k4_m*pow(Pend1_m, -1{dimensionless}/k3_m)+1{dimensionless})+a*Pend1_m-O2_mnew_sec;
    f_f_sec = 1.34{dimensionless}*Hb_f/100{dimensionless}/(k4_f*pow(Pend1_f, -1{dimensionless}/k3_f)+1{dimensionless})+a*Pend1_f-O2_fnew_sec;
    upper_m_sec = 1.34{dimensionless}*Hb_m*k4_m*pow(Pend1_m, -1{dimensionless}/k3_m-1{dimensionless});
    lower_m_sec = 100{dimensionless}*k3_m*sqr(k4_m*pow(Pend1_m, -1{dimensionless}/k3_m)+1{dimensionless});
    dfdP_m_sec = upper_m_sec/lower_m_sec+a;
    upper_f_sec = 1.34{dimensionless}*Hb_f*k4_f*pow(Pend1_f, -1{dimensionless}/k3_f-1{dimensionless});
    lower_f_sec = 100{dimensionless}*k3_f*sqr(k4_f*pow(Pend1_f, -1{dimensionless}/k3_f)+1{dimensionless});
    dfdP_f_sec = upper_f_sec/lower_f_sec+a;
    Pend2_m = Pend1_m-f_m_sec/dfdP_m_sec;
    Pend2_f = Pend1_f-f_f_sec/dfdP_f_sec;
    x_m_trd = (log(Pend2_m)-k1_m+k2_m*(pH_m-7.4{dimensionless}))/k3_m;
    x_m1_trd = pow(10{dimensionless}, x_m_trd);
    S_m_trd = 100{dimensionless}*x_m1_trd/(1{dimensionless}+x_m1_trd);
    x_f_trd = (log(Pend2_f)-k1_f+k2_f*(pH_f-7.4{dimensionless}))/k3_f;
    x_f1_trd = pow(10{dimensionless}, x_f_trd);
    S_f_trd = 100{dimensionless}*x_f1_trd/(1{dimensionless}+x_f1_trd);
    x1_m_trd = sel
      case S_m_trd > 96{dimensionless}:
        exp(-1{dimensionless}*c2*(100{dimensionless}-96{dimensionless}));
      otherwise:
        exp(-1{dimensionless}*c2*(100{dimensionless}-S_m_trd));
    endsel;
    theta_96_m_trd = (c1*(1{dimensionless}-x1_m_trd)+c3*S_m_trd-c4)*1.34{dimensionless}/100{dimensionless}*Hb_m/0.2{dimensionless}*ks_m/kh;
    theta_m_trd = sel
      case S_m_trd > 96{dimensionless}:
        theta_96_m_trd-theta_96_m_trd*(96{dimensionless}-S_m_trd)/(-4{dimensionless});
      otherwise:
        (c1*(1{dimensionless}-x1_m_trd)+c3*S_m_trd-c4)*1.34{dimensionless}/100{dimensionless}*Hb_m/0.2{dimensiionless}*ks_m/kh;
    endsel;
    x1_f_trd = sel
      case S_f_trd > 96{dimensionless}:
        exp(-1{dimensionless}*c2*(100{dimensionless}-96{dimensionless}));
      otherwise:
        exp(-1{dimensionless}*c2*(100{dimensionless}-S_f_trd));
    endsel;
    theta_96_f_trd = (c1*(1{dimensionless}-x1_f_trd)+c3*S_f_trd-c4)*1.34{dimensionless}/100{dimensionless}*Hb_f/0.2{dimensionless}*ks_f/kh;
    theta_f_trd = sel
      case S_f_trd > 96{dimensionless}:
        theta_96_f_trd-theta_96_f_trd*(96{dimensionless}-S_f_trd)/(-4{dimensionless});
      otherwise:
        (c1*(1{dimensionless}-x1_f_trd)+c3*S_f_trd-c4)*1.34{dimensionless}/100{dimensionless}*Hb_f/0.2{dimensiionless}*ks_f/kh;
    endsel;
    R_m_trd = 1{dimensionless}/(theta_m_trd*V_m);
    R_f_trd = 1{dimensionless}/(theta_f_trd*V_f);
    R_p_trd = 1{dimensionless}/Dm;
    R_t_trd = R_m_trd+R_f_trd+R_p_trd;
    Dp_trd = 1{dimensionless}/R_t_trd/60{dimensionless};
    dodt_m_trd = B*(-1{dimensionless})*Dp_trd*(Pend2_m-Pend2_f)/V_m;
    dodt_f_trd = -1{dimensionless}/B*V_m/V_f*dodt_m_trd;
    O2_mnew_trd = O2_m+dodt_m_trd*dt;
    O2_fnew_trd = O2_f+dodt_f_trd*dt;
    f_m_trd = 1.34{dimensionless}*Hb_m/100{dimensionless}/(k4_m*pow(Pend2_m, -1{dimensionless}/k3_m)+1{dimensionless})+a*Pend2_m-O2_mnew_trd;
    f_f_trd = 1.34{dimensionless}*Hb_f/100{dimensionless}/(k4_f*pow(Pend2_f, -1{dimensionless}/k3_f)+1{dimensionless})+a*Pend2_f-O2_fnew_trd;
    upper_m_trd = 1.34{dimensionless}*Hb_m*k4_m*pow(Pend2_m, -1{dimensionless}/k3_m-1{dimensionless});
    lower_m_trd = 100{dimensionless}*k3_m*sqr(k4_m*pow(Pend2_m, -1{dimensionless}/k3_m)+1{dimensionless});
    dfdP_m_trd = upper_m_trd/lower_m_trd+a;
    upper_f_trd = 1.34{dimensionless}*Hb_f*k4_f*pow(Pend2_f, -1{dimensionless}/k3_f-1{dimensionless});
    lower_f_trd = 100{dimensionless}*k3_f*sqr(k4_f*pow(Pend2_f, -1{dimensionless}/k3_f)+1{dimensionless});
    dfdP_f_trd = upper_f_trd/lower_f_trd+a;
    Pend3_m = Pend2_m-f_m_trd/dfdP_m_trd;
    Pend3_f = Pend2_f-f_f_trd/dfdP_f_trd;
    x_m_for = (log(Pend3_m)-k1_m+k2_m*(pH_m-7.4{dimensionless}))/k3_m;
    x_m1_for = pow(10{dimensionless}, x_m_for);
    S_m_for = 100{dimensionless}*x_m1_for/(1{dimensionless}+x_m1_for);
    x_f_for = (log(Pend3_f)-k1_f+k2_f*(pH_f-7.4{dimensionless}))/k3_f;
    x_f1_for = pow(10{dimensionless}, x_f_for);
    S_f_for = 100{dimensionless}*x_f1_for/(1{dimensionless}+x_f1_for);
    x1_m_for = sel
      case S_m_for > 96{dimensionless}:
        exp(-1{dimensionless}*c2*(100{dimensionless}-96{dimensionless}));
      otherwise:
        exp(-1{dimensionless}*c2*(100{dimensionless}-S_m_for));
    endsel;
    theta_96_m_for = (c1*(1{dimensionless}-x1_m_for)+c3*S_m_for-c4)*1.34{dimensionless}/100{dimensionless}*Hb_m/0.2{dimensionless}*ks_m/kh;
    theta_m_for = sel
      case S_m_for > 96{dimensionless}:
        theta_96_m_for-theta_96_m_for*(96{dimensionless}-S_m_for)/(-4{dimensionless});
      otherwise:
        (c1*(1{dimensionless}-x1_m_for)+c3*S_m_for-c4)*1.34{dimensionless}/100{dimensionless}*Hb_m/0.2{dimensiionless}*ks_m/kh;
    endsel;
    x1_f_for = sel
      case S_f_for > 96{dimensionless}:
        exp(-1{dimensionless}*c2*(100{dimensionless}-96{dimensionless}));
      otherwise:
        exp(-1{dimensionless}*c2*(100{dimensionless}-S_f_for));
    endsel;
    theta_96_f_for = (c1*(1{dimensionless}-x1_f_for)+c3*S_f_for-c4)*1.34{dimensionless}/100{dimensionless}*Hb_f/0.2{dimensionless}*ks_f/kh;
    theta_f_for = sel
      case S_f_for > 96{dimensionless}:
        theta_96_f_for-theta_96_f_for*(96{dimensionless}-S_f_for)/(-4{dimensionless});
      otherwise:
        (c1*(1{dimensionless}-x1_f_for)+c3*S_f_for-c4)*1.34{dimensionless}/100{dimensionless}*Hb_f/0.2{dimensiionless}*ks_f/kh;
    endsel;
    R_m_for = 1{dimensionless}/(theta_m_for*V_m);
    R_f_for = 1{dimensionless}/(theta_f_for*V_f);
    R_p_for = 1{dimensionless}/Dm;
    R_t_for = R_m_for+R_f_for+R_p_for;
    Dp_for = 1{dimensionless}/R_t_for/60{dimensionless};
    dodt_m_for = B*(-1{dimensionless})*Dp_for*(Pend3_m-Pend3_f)/V_m;
    dodt_f_for = -1{dimensionless}/B*V_m/V_f*dodt_m_for;
    O2_mnew_final = O2_m+1{dimensionless}/6{dimensionless}*(dodt_m+2{dimensionless}*dodt_m_sec+2{dimensionless}*dodt_m_trd+dodt_m_for)*dt;
    O2_fnew_final = O2_f+1{dimensionless}/6{dimensionless}*(dodt_f+2{dimensionless}*dodt_f_sec+2{dimensionless}*dodt_f_trd+dodt_f_for)*dt;
    f_m_final = 1.34{dimensionless}*Hb_m/100{dimensionless}/(k4_m*pow(Pend3_m, -1{dimensionless}/k3_m)+1{dimensionless})+a*Pend3_m-O2_mnew_final;
    f_f_final = 1.34{dimensionless}*Hb_f/100{dimensionless}/(k4_f*pow(Pend3_f, -1{dimensionless}/k3_f)+1{dimensionless})+a*Pend3_f-O2_fnew_final;
    upper_m_final = 1.34{dimensionless}*Hb_m*k4_m*pow(Pend3_m, -1{dimensionless}/k3_m-1{dimensionless});
    lower_m_final = 100{dimensionless}*k3_m*sqr(k4_m*pow(Pend3_m, -1{dimensionless}/k3_m)+1{dimensionless});
    dfdP_m_final = upper_m_final/lower_m_final+a;
    upper_f_final = 1.34{dimensionless}*Hb_f*k4_f*pow(Pend3_f, -1{dimensionless}/k3_f-1{dimensionless});
    lower_f_final = 100{dimensionless}*k3_f*sqr(k4_f*pow(Pend3_f, -1{dimensionless}/k3_f)+1{dimensionless});
    dfdP_f_final = upper_f_final/lower_f_final+a;
    Pfinal_m = Pend3_m-f_m_final/dfdP_m_final;
    Pfinal_f = Pend3_f-f_f_final/dfdP_f_final;
    ode(Pin_m, t) = (Pfinal_m-Pin_m)/dt;
    ode(Pin_f, t) = (Pfinal_f-Pin_f)/dt;
  enddef;
enddef;
