<?xml version='1.0' encoding='UTF-8'?>
<!--
This CellML file was generated on 3/25/2013 at 1:50:21 at AM using:

COR (0.9.31.1409)
Copyright 2002-2013 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

Metabolic Component Library for CellML
Matthias Koenig (matthias.koenig@charite.de)
--><model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.1#" name="MixedInhibitionIrrev" cmeta:id="MixedInhibitionIrrev">
   <units name="mM">
      <unit units="mole" prefix="milli"/>
      <unit units="liter" exponent="-1"/>
   </units>
   <units name="per_second">
      <unit units="second" exponent="-1"/>
   </units>
   <units name="mM_per_second">
      <unit units="mM"/>
      <unit units="second" exponent="-1"/>
   </units>
   <component name="Test">
      <variable name="t" units="second"/>
      <variable name="J" units="mM_per_second" public_interface="in"/>
      <variable name="S" units="mM" initial_value="1" public_interface="out"/>
      <variable name="P" units="mM" initial_value="0"/>
      <variable name="V" units="mM_per_second" public_interface="out"/>
      <variable name="I" units="mM" public_interface="out"/>
      <variable name="Kis" units="mM" public_interface="out"/>
      <variable name="Kic" units="mM" public_interface="out"/>
      <variable name="Km_S" units="mM" public_interface="out"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>V</ci>
            <cn cellml:units="mM_per_second">10</cn>
         </apply>
         <apply>
            <eq/>
            <ci>I</ci>
            <cn cellml:units="mM">0.2</cn>
         </apply>
         <apply>
            <eq/>
            <ci>Km_S</ci>
            <cn cellml:units="mM">0.3</cn>
         </apply>
         <apply>
            <eq/>
            <ci>Kis</ci>
            <cn cellml:units="mM">0.2</cn>
         </apply>
         <apply>
            <eq/>
            <ci>Kic</ci>
            <cn cellml:units="mM">0.2</cn>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>S</ci>
            </apply>
            <apply>
               <minus/>
               <ci>J</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>P</ci>
            </apply>
            <ci>J</ci>
         </apply>
      </math>
   </component>
   <component name="MixedInhibitionIrrev">
      <variable name="J" units="mM_per_second" public_interface="out"/>
      <variable name="S" units="mM" public_interface="in"/>
      <variable name="I" units="mM" public_interface="in"/>
      <variable name="V" units="mM_per_second" public_interface="in"/>
      <variable name="Kis" units="mM" public_interface="in"/>
      <variable name="Kic" units="mM" public_interface="in"/>
      <variable name="Km_S" units="mM" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>J</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>V</ci>
                  <ci>S</ci>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>Km_S</ci>
                     <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <divide/>
                           <ci>I</ci>
                           <ci>Kis</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>S</ci>
                     <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <divide/>
                           <ci>I</ci>
                           <ci>Kic</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="Test" component_2="MixedInhibitionIrrev"/>
      <map_variables variable_1="J" variable_2="J"/>
      <map_variables variable_1="S" variable_2="S"/>
      <map_variables variable_1="I" variable_2="I"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="Kis" variable_2="Kis"/>
      <map_variables variable_1="Kic" variable_2="Kic"/>
      <map_variables variable_1="Km_S" variable_2="Km_S"/>
   </connection>
</model>